// PHIV Alignement Tool Set
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter l alignement des photos de coupes seriees

/*



//Outil NdpiExportBatch permet d exporter au format tif calibré les fichiers ndpi d un repertoire source
dans un repertoire cible avec l option N° de serie allant de 3 à 5 de la plus forte a la plus petite resolution 
en option (clic droit): choix du N° de serie

//Outil Crop NDPI pour recuperrer les coupes detourees en blanc et les saugegarder dans un dossier

Outil Resize pour mettre toutes les images d un dossier a la meme taille  (Canvas size et ajout de blanc)
en option marge: nombre de pixels ajoutes a la taille maxi

Outil binning 
retaille les images d un dossier en x y 
clic droit pour l option facteur de binning a 2 par defaut


Outil AutoAlignement ne marche que sous fiji plugin linear stack alignement with SIFT
http://fiji.sc/wiki/index.php/Linear_Stack_Alignment_with_SIFT
http://fr.wikipedia.org/wiki/Scale-invariant_feature_transform
premier passage avec flip en fonction de score (nombre de points verts dans alignement info)
deuxieme passage pour l alignement

Outil Noir2blanc met en blanc tous les pixels noirs

Outil Normalize (en test) pour avoir une meme valeur moyenne d intensite



Raccourci au pave numerique 
4 slice precedente
6 slice suivante
*/

var marge=2;
var binning=2;
var numserie=4;
var debflip=1;



//macro "Unused Tool-1 - " {}  // laisse une place libre!

/*
////////////////////////////////////////////////////////////////label=NdpiExportBatch////////////////////////////////////////////

macro "NdpiMacroBatch Action Tool - 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"{
XResolution=0;
ImageWidth=0;
ImageHeight=0;

dir1 = getDirectory("Choix du Répertoire Source ");
list = getFileList(dir1);
dir2 = getDirectory("Choix du Répertoire Cible ");	
//setBatchMode(true);
      for (i=0; i<list.length; i++) {
          showProgress(i+1, list.length);
           if (endsWith(list[i], '.ndpi')){
           	run("Bio-Formats Importer", "open=["+dir1+list[i]+"] color_mode=Default display_metadata view=[Metadata only] stack_order=Default");
           
           fichier=substring(list[i],0,indexOf(list[i],".ndpi"));
           selectWindow("Original Metadata - "+list[i]);
           	saveAs("Text", dir2+fichier+".xls"); //Creation d un fichier excel pour recuperrer les metadata
						run("Close");
						lines=split(File.openAsString(dir2+fichier+".xls"), "\n");
						
						xline=split(lines[11],"\t");
						yline=split(lines[12],"\t");
						resline=split(lines[(lines.length-3)],"\t");
						xlineserie=split(lines[11+(12*(numserie-1))],"\t");
						ylineserie=split(lines[12+(12*(numserie-1))],"\t");

						XResolution=parseInt(resline[1]);
						ImageHeight=parseInt(yline[1]);
						ImageWidthtotal=parseInt(xline[1]);
						ImageWidthserie=parseInt(xlineserie[1]);
						ImageHeightserie=parseInt(ylineserie[1]);
						pxparcm=XResolution/(ImageWidthtotal/ImageWidthserie);
           
           //print(pxparcm);
           if (ImageWidthserie*ImageHeightserie < 20000*20000){
           	run("Bio-Formats Importer", "open=["+dir1+list[i]+"] color_mode=Default crop view=Hyperstack stack_order=XYCZT series_"+numserie+" x_coordinate_4=0 y_coordinate_4=0 width_4=100000 height_4=100000");
           composite=getImageID();   
           run("RGB Color");
           selectImage(composite);
           close ();
           
           run("Set Scale...", "distance="+pxparcm+" known=10000 pixel=1 unit=µm");
           saveAs("Tiff", dir2+fichier+".tif");
           
          close ();
        }else print ("taille trop grande");
          }
          	
        }

//setBatchMode(false);
  showMessage("Etat du process", "<html>"
     +"<h1><font color=red><i>Fin</i></h1>");

}

macro 'NdpiMacroBatch Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Espacement entre traits"); //e.g., put a dialog here
    Dialog.addNumber("Numero de serie de 3 a 5 :", numserie);
    Dialog.show();
    numserie = Dialog.getNumber();
  	}
*/

/*
////////////////////////////////////////////////////////////////label=Crop ndpi////////////////////////////////////////////


macro "Crop NDPI Action Tool - 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"{
setBackgroundColor(255, 255, 255);
setForegroundColor(255, 255, 255);
origID=getImageID();
run("Select None");
run("Duplicate...", "title=nb");
run("8-bit");
setAutoThreshold("Default");
run("Convert to Mask");
dirmacro=getDirectory("macros");
if (getInfo("fiji.dir")!="") run("Install...", "install=["+dirmacro+"StartupMacros.fiji.ijm]");
else run("Install...", "install=["+dirmacro+"StartupMacros.txt]");
setTool("Paintbrush Tool");
waitForUser("Correction du masque", "Couper avec un trait blanc les defauts");
run("Install...", "install=["+dirmacro+"StartupMacros.fiji.ijm]");
run("Analyze Particles...", "size=100000-Infinity pixel circularity=0.00-1.00 show=Nothing add");
run("Install...", "install=["+dirmacro+"toolsets\\PHIV_Align_toolset.txt]");
close();
selectImage(origID);
roiManager("Show None");
waitForUser("Nom des coupes", "Renommer dans le ROI Manager");

for(i=0;i<roiManager("count");i++){
roiManager("Select", i);
run("Duplicate...", "title="+ call("ij.plugin.frame.RoiManager.getName", i));
run("Clear Outside");
run("Select None");
selectImage(origID);
}
roiManager("Deselect");
roiManager("Delete");

}

macro 'Crop NDPI Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Marge "); //e.g., put a dialog here
    Dialog.addNumber("Nombre de pixels :", marge);
    Dialog.show();
    marge = Dialog.getNumber();
  	}
*/
////////////////////////////////////////////////////////////////label=Resize////////////////////////////////////////////


macro "Resize Action Tool - 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"{
setBackgroundColor(255, 255, 255);
setForegroundColor(255, 255, 255);
dir1 = getDirectory("Choix du Répertoire Source ");
list = getFileList(dir1);
widthmax=0;
heightmax=0;
setBatchMode(true);
      for (i=0; i<list.length; i++) {
      	showProgress(i+1, list.length);
      	if (endsWith(list[i], '.tif')){
           	open(dir1+list[i]);  
           	getDimensions(width, height, channels, slices, frames);
           	if (width>widthmax) widthmax=width;
           	if (height>heightmax) heightmax=height;  
           	close();      	
      }
	}
	 for (i=0; i<list.length; i++) {
	 	showProgress(i+1, list.length);
      	if (endsWith(list[i], '.tif')){
           	open(dir1+list[i]);  
           	run("Canvas Size...", "width="+widthmax+marge+" height="+heightmax+marge+" position=Center");
           	run("Save");
           	close();
           	  	
      	
      	
      }
	}
	
	
	setBatchMode(false);
	print ("Largeur par hauteur :"+widthmax+marge+"  "+heightmax+marge);
}

macro 'Resize Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Marge "); //e.g., put a dialog here
    Dialog.addNumber("Nombre de pixels :", marge);
    Dialog.show();
    marge = Dialog.getNumber();
  	}

macro "Binning Action Tool - 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"{

   dir1 = getDirectory("Dossier Source ");
   list = getFileList(dir1);
   dir2 = getDirectory("Dossier Cible ");
   //start = getTime();
   run("Image Sequence...", "open=["+dir1+"] sort use");
   getDimensions(width, height, channels, slices, frames);
   new_width=round(width/binning);
   new_height=round(height/binning);
   setBatchMode(true); // runs up to 6 times faster
   for (i=0; i<list.length; i++) {
   		showProgress(i+1, list.length);
   		open(dir1+list[i]);
   		getPixelSize(unit, pixelWidth, pixelHeight);
			run("Size...", "width="+new_width+" height="+new_height+" constrain average interpolation=Bilinear");
			if(pixelWidth!=1) run("Set Scale...", "distance=1 known="+(pixelWidth*binning)+" pixel=1 unit="+unit+"");
		  saveAs("Tiff", dir2+list[i]);		
		  close();		   		
        }
  setBatchMode(false); // runs up to 6 times faster
  run("Image Sequence...", "open=["+dir2+"] sort use");
  //print((getTime()-start)/1000);



}
macro 'Binning Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Binning"); //e.g., put a dialog here
    Dialog.addNumber("Binning :", binning);
    Dialog.show();
    binning = Dialog.getNumber();
   
    

  	}

////////////////////////////////////////////////////////////////label=AutoAlignement ////////////////////////////////////////////

macro "AutoAligne Action Tool - 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"{
if (getInfo("fiji.dir")=="") showMessage("A utiliser dans Fiji!");
else {

dir1 = getDirectory("Choix du Répertoire Source ");
list = getFileList(dir1);
//setBatchMode(true);
      for (i=debflip; i<list.length-1; i++) {
          showProgress(i+1, list.length);
           if (endsWith(list[i], '.tif')){
           	open(dir1+list[i]);
           	open(dir1+list[i+1]);
           	run("Images to Stack");
           	rename("Stacktemp");
           	pos_orig=SIFT();
           	print (list[i+1]+"  :  "+pos_orig);
           	if (pos_orig==0){
           		print ("flip pour " +list[i+1]);
           		open(dir1+list[i+1]);
           		run("Flip Vertically");
           		run("Save");
           		close();           		
           	}
           	else{
           	selectWindow("Stacktemp");
           	setSlice(2);
           	run("Flip Vertically", "slice");
           	pos_flip=SIFT();
           	print (list[i+1]+"  :  "+pos_flip);
           	if (pos_flip>pos_orig){
           		print ("flip pour " +list[i+1]);
           		open(dir1+list[i+1]);
           		run("Flip Vertically");
           		run("Save");
           		close();
           	}
          }
           	selectWindow("Stacktemp");
           	close();

			}
			
}

run("Image Sequence...", "open=["+dir1+list[0]+"]  starting=1 increment=1 scale=100 file=[] or=[] sort use");
for (i=1; i<=nSlices; i++){
      Stack.setSlice(i);
     list[i-1]= getMetadata("Label");
        }

run("Linear Stack Alignment with SIFT", "initial_gaussian_blur=1.60 steps_per_scale_octave=3 minimum_image_size=64 maximum_image_size=1024 feature_descriptor_size=4 feature_descriptor_orientation_bins=8 closest/next_closest_ratio=0.92 maximal_alignment_error=25 inlier_ratio=0.05 expected_transformation=Rigid");
//setBatchMode(false);


 for (i=1; i<=nSlices; i++){
      Stack.setSlice(i);
      setMetadata("Label", list[i-1]);
        }

}
function SIFT (){
	run("Linear Stack Alignment with SIFT", "initial_gaussian_blur=1.60 steps_per_scale_octave=3 minimum_image_size=64 maximum_image_size=1024 feature_descriptor_size=4 feature_descriptor_orientation_bins=8 closest/next_closest_ratio=0.92 maximal_alignment_error=25 inlier_ratio=0.05 expected_transformation=Rigid show_info");
	close();
	selectWindow("Alignment info");
run("Duplicate...", "title=temp");
selectWindow("Alignment info");
close();
selectWindow("temp");
px_vert=nombre_px_vert();
selectWindow("temp");
close();
return px_vert;

}


function nombre_px_vert (){
// Color Thresholder 1.47b
// Autogenerated macro, single images only!
min=newArray(3);
max=newArray(3);
filter=newArray(3);
a=getTitle();
run("RGB Stack");
run("Convert Stack to Images");
selectWindow("Red");
rename("0");
selectWindow("Green");
rename("1");
selectWindow("Blue");
rename("2");
min[0]=0;
max[0]=0;
filter[0]="pass";
min[1]=255;
max[1]=255;
filter[1]="pass";
min[2]=0;
max[2]=0;
filter[2]="pass";
for (i=0;i<3;i++){
  selectWindow(""+i);
  setThreshold(min[i], max[i]);
  run("Convert to Mask");
  if (filter[i]=="stop")  run("Invert");
}
imageCalculator("AND create", "0","1");
imageCalculator("AND create", "Result of 0","2");
for (i=0;i<3;i++){
  selectWindow(""+i);
  close();
}
selectWindow("Result of 0");
close();
selectWindow("Result of Result of 0");
rename(a);
// Colour Thresholding-------------
getHistogram(values, counts, 256);
return counts[255];

}

 showMessage("Etat du process", "<html>"
     +"<h1><font color=red><i>Fin</i></h1>");

}

macro 'AutoAligne Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Debut de verification de flip"); //e.g., put a dialog here
    Dialog.addNumber("Slice :", debflip);
    Dialog.show();
    debflip = Dialog.getNumber()-1;
   
    

  	}

/////////////////////////////////////////////////////////////////////label=Noir2blanc///////////////////////////////////////

//macro "Noir2Blanc Action Tool - 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"{
macro "Noir2Blanc Action Tool - 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"{
for(i=1; i<=nSlices; i++) {
            setSlice(i);
			changeValues(0x000000,0x000000,0xffffff);
}


}
macro "Manuel Action Tool - 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"{
	dir=getDirectory("Choisir un dossier de travail")
	run("TrakEM2 (blank)", "select="+dir);
	selectWindow("");
}



macro "Normalise Action Tool - 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"{
meanmax = 0;
for (i = 1; i <= nSlices; i++) {
    setSlice(i);
    getStatistics(area, mean);
    if (mean>meanmax) meanmax=mean;
}
 run("Select None");
for (i = 1; i <= nSlices; i++) {	  
    setSlice(i);
    run("Restore Selection");
    getStatistics(area, mean);
    difference = meanmax/mean;
    run("Select None");
    run("Multiply...", "slice value="+difference);
}
}



macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/PHIV_Align_toolset.txt");
}

macro "avant 4 [n4]"{
run("Previous Slice [<]");
}

}
macro "apres 6 [n6]"{
run("Next Slice [>]");
}
