// PHIV Anatomie Tool Set
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter les analyses anatomiques de feuilles 

/*
Outil Rotation : faire une selection ligne parallele a la feuille
l outil fait une rotation de la valeur de l angle de la selection

Outil Crop : faire une selection rectangulaire; 
l outil retaille l image et en fait une sauvegarde dans le meme dossier

Outil Seuil : duplique, filtre et seuil l image
permet de selectionner a la baguette les zones exterieures a l objet

Outil ROI : mets la selection dans le ROI Manager; 
en option (clic droit): choix des noms des selection sauvegardees dans le ROI Manager
via des raccourcis clavier du pave numerique

Outil Spline : arrondi les angles des selections

Outil Delimitation : duplique l image et trace les selections du ROI Manager (qui est sauvegarde); 
permet de selectionner a la baguette les zones a ajouter dans un nouveau ROI Manager via le pavé numerique 

Outil Trait : nouvelle image avec des traits // equidistants d un certain nombre de pixels (voir option);
mesure la longueur de ces traits (=aera) pour chaque selection du ROI Manager; 
en option (clic droit): choix de l espacement des traits     





















*/

//variables glogales
var pxtrait=10;

var t0="Epiderme inferieur";
var t1="Parenchyme lacuneux";
var t2="t2";
var t3="t3";
var t4="Parenchyme palissadique";
var t5="t5";
var t6="t6";
var t7="Epiderme superieur";
var t8="t8";
var t9="t9";



//macro "Unused Tool-1 - " {}  // laisse une place libre!


////////////////////////////////////////////////////////////////label=Rotation////////////////////////////////////////////
macro "Rotation Action Tool - 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"{
getLine(x1, y1, x2, y2, lineWidth);
if (x1==-1) exit("Selection d une ligne avant la rotation"); 
rotation=-atan2(y2-y1, x2-x1)*(180/PI); 
run("Arbitrarily...", "angle="+rotation+" interpolate");
run("Select None");
setTool(0);
}

////////////////////////////////////////////////////////////////label=Crop////////////////////////////////////////////


macro "Crop Action Tool - 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"{
	nom_image=getTitle();
nom_dossier=getDirectory("image") ;
ind_dot=indexOf(nom_image, ".");
if (ind_dot!=-1) nom_image=substring(nom_image, 0, ind_dot);
run("Duplicate...", "title=["+nom_image+"crop.tif]");
saveAs("Tiff", nom_dossier+"\\"+nom_image+"crop.tif");
}



////////////////////////////////////////////////////////////////label=Seuil ////////////////////////////////////////////
macro "Seuil Action Tool - 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"{
	run("Duplicate...", "title=[ndg]");
run("8-bit");run("Subtract Background...", "rolling=50 light");
run("Threshold...");
setThreshold(200, 255);
setTool(8);

}

/////////////////////////////////////////////////////////////////////label=Roi///////////////////////////////////////


macro "Roi Action Tool - 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"{
	roiManager("add");

}

macro 'Roi Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Affectation des raccourcis claviers"); //e.g., put a dialog here
    Dialog.addMessage("Nom des sélections ajoutées dans le ROI Manager\nVia des raccourcis clavier du pavé numérique");
    Dialog.addString("Touche 0", t0,25);
    Dialog.addString("Touche 1", t1,25);
    Dialog.addString("Touche 2", t2,25);
    Dialog.addString("Touche 3", t3,25);
    Dialog.addString("Touche 4", t4,25);
    Dialog.addString("Touche 5", t5,25);
    Dialog.addString("Touche 6", t6,25);
    Dialog.addString("Touche 7", t7,25);
    Dialog.addString("Touche 8", t8,25);
    Dialog.addString("Touche 9", t9,25);
    Dialog.show();
    t0 = Dialog.getString();
    t1 = Dialog.getString();;
    t2 = Dialog.getString();;;
    t3 = Dialog.getString();;;;
    t4 = Dialog.getString();;;;;
    t5 = Dialog.getString();;;;;;
    t6 = Dialog.getString();;;;;;;
    t7 = Dialog.getString();;;;;;;;
    t8 = Dialog.getString();;;;;;;;;
    t9 = Dialog.getString();;;;;;;;;;
    /*print (t0);
    print (t1);
    print (t2);
    print (t3);
    print (t4);
    print (t5);
    print (t6);
    print (t7);
    print (t8);
    print (t9);*/
  	}




macro "ROI 0 [n0]"{
roiManager("Add");
roiManager("select", roiManager("count")-1)
roiManager("Rename", t0);
roiManager("Deselect");
}
macro "ROI 1 [n1]"{
roiManager("Add");
roiManager("select", roiManager("count")-1)
roiManager("Rename", t1);
roiManager("Deselect");
}
macro "ROI 2 [n2]"{
roiManager("Add");
roiManager("select", roiManager("count")-1)
roiManager("Rename", t2);
roiManager("Deselect");
}
macro "ROI 3 [n3]"{
roiManager("Add");
roiManager("select", roiManager("count")-1)
roiManager("Rename", t3);
roiManager("Deselect");
}
macro "ROI 4 [n4]"{
roiManager("Add");
roiManager("select", roiManager("count")-1)
roiManager("Rename", t4);
roiManager("Deselect");
}
macro "ROI 5 [n5]"{
roiManager("Add");
roiManager("select", roiManager("count")-1)
roiManager("Rename", t5);
roiManager("Deselect");
}
macro "ROI 6 [n6]"{
roiManager("Add");
roiManager("select", roiManager("count")-1)
roiManager("Rename", t6);
roiManager("Deselect");
}
macro "ROI 7 [n7]"{
roiManager("Add");
roiManager("select", roiManager("count")-1)
roiManager("Rename", t7);
roiManager("Deselect");
}
macro "ROI 8 [n8]"{
roiManager("Add");
roiManager("select", roiManager("count")-1)
roiManager("Rename", t8);
roiManager("Deselect");
}
macro "ROI 9 [n9]"{
roiManager("Add");
roiManager("select", roiManager("count")-1)
roiManager("Rename", t9);
roiManager("Deselect");
}
/////////////////////////////////////////////////////////////////////label=Spline///////////////////////////////////////

macro "Spline Action Tool - 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"{
	run("Fit Spline");

}





/////////////////////////////////////////////////////////////////////label=Delimitation surfaces///////////////////////////////////////


macro "Delimitation Action Tool - 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"{
	roiManager("Deselect");
roiManager("Save", getDirectory("image")+getTitle()+".zip");
nom_image=getTitle();
run("Select None");
run("Duplicate...", "title=["+nom_image+"]");
run("Select All");
setForegroundColor(0, 0, 0);
setBackgroundColor(255, 255, 255);
run("Clear");
run("Line Width...", "line=2");
setForegroundColor(0,0,0);
roiManager("Deselect");
roiManager("Draw");
roiManager("Delete");
setTool(8);	

}








/////////////////////////////////////////////////////////////////////label=trace traits///////////////////////////////////////

macro "Trait Action Tool - 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"{
roiManager("Deselect");
nom_image=getTitle();
run("Select None");
run("Duplicate...", "title=["+nom_image+"]");
idTrait=getImageID();
run("Select All");
setForegroundColor(0, 0, 0);
setBackgroundColor(255, 255, 255);
run("Clear");
getDimensions(width, height, channels, slices, frames);
for (i=pxtrait;i<width;i=i+pxtrait){
run("Specify...", "width=1 height="+height+" x="+i+" y=0");
run("Fill", "slice");
run("8-bit");
}
run("Select None");
run("Set Measurements...", "area display redirect=None decimal=3");
run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
for(i=0;i<roiManager("count");i++){
	roiManager("Select", i);
	run("Analyze Particles...", "size=0-Infinity circularity=0.00-1.00 show=Nothing display ");
		}
selectImage(idTrait);
close();
}

macro 'Trait Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Espacement entre traits"); //e.g., put a dialog here
    Dialog.addNumber("Nombre de pixels entre traits:", pxtrait);
    Dialog.show();
    pxtrait = Dialog.getNumber();;
  	}

/////////////////////////////////////////////////////////////////////label=mesure traits///////////////////////////////////////
/*

macro "Mesure_trait Action Tool - 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"{
run("Analyze Particles...", "size=0-Infinity circularity=0.00-1.00 show=Nothing display clear");
selectWindow("Results");
run("Summarize");
}
*/

macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/PHIV_Anat_toolset.txt");
}



