// Outil pour calibrer spatialement et ajouter une barre d echelle
// aux images capturees sur les microscopes PHIV
// Marc LARTAUD MRI PHIV

// "Configuration capture" pour choisir le microscope, la camera, l objectif et le grossissement
// "Scale Bar" pour calibrer et ajouter une barre d echelle a une image active
// "Batch Scale" pour calibrer et ajouter une barre d echelle a toutes les images d un dossier
//    en option (clic droit) 	- ajout ou non de la barre
//				- position de la barre
//				- couleur de la barre

/// Montage										





//variables glogales
var Microscope="DM6000";
var Camera="Retiga 4000R";
var Objectif="10";
var Grossissement="1";
var Taille_pix=0;
var Taille_bar=100;
var ajout_bar=true;
var position_bar="Lower Right";
var color_bar="White";
var Calib=0;

macro "AutoRun"{
	setTool("rectangle");
	setForegroundColor(255, 255, 255);//premier plan blanc
	setBackgroundColor(0,0,0);// fond noir
	run("Set Measurements...", "area shape display redirect=None decimal=3");
	requires("1.49p");
}



////////////////////////////////////////////////////////////////Capture////////////////////////////////////////////
macro "Configuration Capture Action Tool - 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"{
	Calib=0;
  Dialog.create("Capture");
  items = newArray("DM6000", "DM4500", "DMRXA", "Nikon");
  Dialog.addRadioButtonGroup("Microscope", items, 3, 1, Microscope);
  items = newArray("Retiga 4000R","Retiga 2000R", "Nikon 4908x3264","Nikon 1636x1088", "MicroPublisher Qimaging couleur");
  Dialog.addRadioButtonGroup("Camera", items, 3, 1, Camera);
  items = newArray("1.25","2","2.5","4", "5", "10", "20", "40", "63", "100");
  Dialog.addRadioButtonGroup("Objectif", items, 8, 1, Objectif);
  items = newArray("1", "1.25", "1.6");
  Dialog.addRadioButtonGroup("Grossissement", items, 3, 1, Grossissement);
  Dialog.show;
	Microscope=Dialog.getRadioButton;
	Camera=Dialog.getRadioButton;
	Objectif=Dialog.getRadioButton;
	Grossissement=Dialog.getRadioButton;
	///////////////Nikon
		if (Microscope=="Nikon"){
		if (Camera=="Nikon 4908x3264"){
			if (Objectif=="2"){
				Taille_bar=300;
				Calib=1;Taille_pix=1.45;				
			}
			if (Objectif=="4"){
				Taille_bar=150;
				Calib=1;Taille_pix=0.72;				
			}
			if (Objectif=="10"){
				Taille_bar=100;
				Calib=1;Taille_pix=0.2898;				
			}
			if (Objectif=="20"){
				Taille_bar=50;
				Calib=1;Taille_pix=0.1456;				
			}
			if (Objectif=="40"){
				Taille_bar=20;
				Calib=1;Taille_pix=0.0736801;				
			}
			if (Objectif=="100"){
				Taille_bar=10;
				Calib=1;Taille_pix=0.029563;				
			}
								
		}
		if (Camera=="Nikon 1636x1088"){
			if (Objectif=="2"){
				Taille_bar=500;
				Calib=1;Taille_pix=4.35;				
			}
			if (Objectif=="4"){
				Taille_bar=300;
				Calib=1;Taille_pix=2.1600;				
			}
			if (Objectif=="10"){
				Taille_bar=250;
				Calib=1;Taille_pix=0.8693;				
			}
			if (Objectif=="20"){
				Taille_bar=150;
				Calib=1;Taille_pix=0.4367;				
			}
			if (Objectif=="40"){
				Taille_bar=50;
				Calib=1;Taille_pix=0.2210;				
			}
			if (Objectif=="100"){
				Taille_bar=20;
				Calib=1;Taille_pix=0.0887;				
			}
								
		}
		
	}
	
	
	
	//////////////DM6000
	if (Microscope=="DM6000"){
		if (Camera=="Retiga 4000R"){
			if (Objectif=="1.25"){
				Taille_bar=400;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=5.8708;
				}
				if (Grossissement=="1.25"){
					Calib=1;Taille_pix=4.7096;
				}
				if (Grossissement=="1.6"){
					Calib=1;Taille_pix=3.6923;
				}
			}
				
			if (Objectif=="5"){
				Taille_bar=150;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=1.4717;
				}
				if (Grossissement=="1.25"){
					Calib=1;Taille_pix=1.1813;
				}
				if (Grossissement=="1.6"){
					Calib=1;Taille_pix=0.9251;
				}
			}
				
			if (Objectif=="10"){
				Taille_bar=100;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=0.7435;
				}
				if (Grossissement=="1.25"){
					Calib=1;Taille_pix=0.5970;
				}
				if (Grossissement=="1.6"){
					Calib=1;Taille_pix=0.4668;
				}				
			}
			
			if (Objectif=="20"){
				Taille_bar=50;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=0.3659;
				}
				if (Grossissement=="1.25"){
					Calib=1;Taille_pix=0.2945;
				}
				if (Grossissement=="1.6"){
					Calib=1;Taille_pix=0.2305;
				}				
			}
			
			if (Objectif=="40"){
				Taille_bar=20;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=0.1829;
				}
				if (Grossissement=="1.25"){
					Calib=1;Taille_pix=0.1473;
				}
				if (Grossissement=="1.6"){
					Calib=1;Taille_pix=0.1153;
				}				
			}	
			
			if (Objectif=="63"){
				Taille_bar=10;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=0.1159;
				}
				if (Grossissement=="1.25"){
					Calib=1;Taille_pix=0.0932;
				}
				if (Grossissement=="1.6"){
					Calib=1;Taille_pix=0.0729;
				}				
			}	
			
			if (Objectif=="100"){
				Taille_bar=10;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=0.0723;
				}
				if (Grossissement=="1.25"){
					Calib=1;Taille_pix=0.0581;	
				}
				if (Grossissement=="1.6"){
					Calib=1;Taille_pix=0.0455;
				}				
			}					
		}
		
	}
	////////////DM4500
	if (Microscope=="DM4500"){
		if (Camera=="Retiga 2000R"){
			if (Objectif=="1.25"){
				Taille_bar=400;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=5.8766;
				}
			}
				
			if (Objectif=="5"){
				Taille_bar=150;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=1.4663;
				}
			}
				
			if (Objectif=="10"){
				Taille_bar=100;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=0.7413;
				}			
			}
			
			if (Objectif=="20"){
				Taille_bar=50;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=0.3655;
				}				
			}
			
			if (Objectif=="40"){
				Taille_bar=20;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=0.1830;
				}			
			}	
			
			if (Objectif=="63"){
				Taille_bar=10;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=0.1162;
				}								
			}	
			
			if (Objectif=="100"){
				Taille_bar=10;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=0.0728;
				}					
			}					
		}

	}
	
	
	/////DMRXA
	
		if (Microscope=="DMRXA"){
		if (Camera=="MicroPublisher Qimaging couleur"){
			if (Objectif=="1.25"){
				Taille_bar=400;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=2.7594;
				}
				if (Grossissement=="1.25"){
					Calib=1;Taille_pix=2.2075;
				}
				if (Grossissement=="1.6"){
					Calib=1;Taille_pix=1.7202;
				}
			}
				
			if (Objectif=="2.5"){
				Taille_bar=200;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=1.3793;
				}
				if (Grossissement=="1.25"){
					Calib=1;Taille_pix=1.1038;
				}
				if (Grossissement=="1.6"){
					Calib=1;Taille_pix=0.8613;
				}
			}
			
			if (Objectif=="5"){
				Taille_bar=150;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=0.6906;
				}
				if (Grossissement=="1.25"){
					Calib=1;Taille_pix=0.5525;
				}
				if (Grossissement=="1.6"){
					Calib=1;Taille_pix=0.4306;
				}
			}
				
			if (Objectif=="10"){
				Taille_bar=100;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=0.3428;
				}
				if (Grossissement=="1.25"){
					Calib=1;Taille_pix=0.2747;
				}
				if (Grossissement=="1.6"){
					Calib=1;Taille_pix=0.2134;
				}				
			}
			
			if (Objectif=="20"){
				Taille_bar=50;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=0.1734;
				}
				if (Grossissement=="1.25"){
					Calib=1;Taille_pix=0.1389;
				}
				if (Grossissement=="1.6"){
					Calib=1;Taille_pix=0.1083;
				}				
			}
			
			if (Objectif=="40"){
				Taille_bar=20;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=0.086;
				}
				if (Grossissement=="1.25"){
					Calib=1;Taille_pix=0.0689;
				}
				if (Grossissement=="1.6"){
					Calib=1;Taille_pix=0.0536;
				}				
			}	
					
			if (Objectif=="100"){
				Taille_bar=10;
				if (Grossissement=="1"){
					Calib=1;Taille_pix=0.0344;
				}
				if (Grossissement=="1.25"){
					Calib=1;Taille_pix=0.0277;	
				}
				if (Grossissement=="1.6"){
					Calib=1;Taille_pix=0.0215;
				}				
			}					
		}
		
	}
	
	
	
	
	
	
	
	if (Calib==0){
		 Taille_pix=0;
		 showMessage("Cette Configuration n existe pas!");
		}
	else print("La taille du pixel est de :"+Taille_pix+"µm");
	
 	
	
}


//////////////////////////////////////////////////////////////////////////////

macro "Scale Bar Action Tool - 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"{
	getVoxelSize(width, height, depth, unit);
	if (width==1){
		if (Taille_pix==0) showMessage("Configurer la capture");
		if (Taille_pix!=0){
				run("Set Scale...", "distance=1 known="+Taille_pix +" pixel=1 unit=µm");
				run("Scale Bar...");
			}
		}
		if (width!=1){
			if (Taille_pix!=width){
				showMessageWithCancel("Changer la calibration","Voulez vous changer la calibration?");
				run("Set Scale...", "distance=1 known="+Taille_pix +" pixel=1 unit=µm");
			}
			run("Scale Bar...");
		}
}

//////////////////////////////////////////////////////////////////////////////

macro "Batch Scale Action Tool - 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"{

	if (Taille_pix==0) showMessage("Configurer la capture");
	if (Taille_pix!=0){
					dir1 = getDirectory("Choisir un repertoire source");
					list = getFileList(dir1);
					dir2 = getDirectory("Choisir un repertoire destination");
					
					for (i=0; i<list.length; i++) {												
						 //if (endsWith(list[i], "tif")){											//condition sur l extension tif
						 nom=substring(list[i],0,indexOf(list[i],"."));				//nom sans l extension
						 open(dir1 + list[i]);																// ouvre les fichiers du dossier source
						 run("Set Scale...", "distance=1 known="+Taille_pix +" pixel=1 unit=µm");	
						 run("Remove Overlay");
						 if (ajout_bar==true) run("Scale Bar...", "width="+Taille_bar+" height=5 font=20 color="+color_bar+" background=None location=["+position_bar+"] bold");																			
						 saveAs("Tiff", dir2+nom+".tif");											// sauvegarde les fichiers dans le dossier destination
						 close();
						 
						//}	
					}
			
		}
}

macro 'Batch Scale Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Ajout de la barre"); //e.g., put a dialog here
    Dialog.addCheckbox("Ajout de la barre", true);
    items = newArray("Upper Left", "Upper Right", "Lower Left" ,"Lower Right" );
  	Dialog.addRadioButtonGroup("Position", items, 2, 2, position_bar);
  	items = newArray("Black", "White");
  	Dialog.addRadioButtonGroup("Position", items, 1, 2, color_bar);
    Dialog.show();
    ajout_bar = Dialog.getCheckbox();
    position_bar=Dialog.getRadioButton;
    color_bar=Dialog.getRadioButton;
  	}



macro "About These Macros Action Tool - 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"{

open(getDirectory("macros")+"toolsets\\PHIV_Calibration_toolset.txt");
}







///////////////////////////////////////////////////////////////////////////////////

