// Outil pour convertir en tif et calibrer spatialement
// les images capturees sur les microscopes PHIV
// Marc LARTAUD MRI PHIV

// Leica tool pour les images issues du DM6000, DM4500 et DMRXA (deja au format tif)
// Nikon tool pour les images issues du microscope Nikon (au formats nd2, ome.tif, tif)
// Zeiss tool pour les images issues du LSM880 au format czi
// Ndpi tool pour les images issues du scanner de lame Hamamatzu au format ndpi
//	 en option (clic droit) choix du numero de serie de 1 à 3 de la plus forte a la plus petite resolution
// Zeiss_scan tool pour les images issues du Axio scan au format czi
//	 en option (clic droit) choix du numero de serie de 1 à 6 de la plus forte a la plus petite resolution
// Outil crop loci pour extraire a la resolution maximale une ROI d une scan ndpi ou czi
// Outil Scale Bar pour ajouter une barre d echelle
// Outil Batch Exportiff pour traiter toutes les images d un repertoire

//Installer bioformats_package.jar https://www.openmicroscopy.org/bio-formats/
//variables glogales

var leica_tab_microscopes = newArray("DM6000", "DM4500", "DMRXA");
//var leica_tab_cameras = newArray("Retiga 4000R","Retiga 2000R", "MicroPublisher Qimaging couleur");
var leica_tab_objectifs = newArray("1.25","2.5", "5", "10", "20", "40", "63", "100");
var leica_tab_grossissements = newArray("1", "1.25", "1.6");
var nikon_tab_objectifs = newArray("2","4", "10", "20", "40", "100");
var Microscope="DM4500";
var Camera="Retiga 4000R";
var Objectif="10";
var Grossissement="1";
var Taille_pix=1;
var numserie=2;
var numserieZeiss_scan=2;
var SXndpi=newArray (6);
var SYndpi=newArray (6);
var type="";
var path="";
var SX=newArray (1);
var SY=newArray (1);
var tabIndexScenes=newArray (1);
var seriesCount=0;

macro "AutoRun"{
	setTool("rectangle");
	setForegroundColor(255, 255, 255);//premier plan blanc
	setBackgroundColor(0,0,0);// fond noir
	run("Set Measurements...", "area shape display redirect=None decimal=3");
	requires("1.49p");
}


macro "Leica Action Tool - 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"{
	if (nImages==0) {
		path = File.openDialog("Choisir un fichier");
		open(path);
		}
	if (XCalibrationMicrons()!=-1){															// Metadonnees Improvision DM4500 Volocity
		Taille_pix=parseFloat(XCalibrationMicrons());
		run("Set Scale...", "distance=1 known="+Taille_pix +" pixel=1 unit=µm");
	
	} else {
		config_leica();
		leica();
		print("Microscope = "+Microscope);
		print("Camera = "+Camera);
		print("Objectif = "+Objectif);
		}
	print ("Taille du pixel = "+Taille_pix+" µm");
	}
	



macro "Nikon Action Tool - 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"{

if (nImages==0) {
		path = File.openDialog("Choisir un fichier");
		if(endsWith(path, ".nd2")){
			nikon(path);
			exit ();
			}	
		if(endsWith(path, ".tif"))	open(path);
		
	}
	
if(PhysicalSizeY()>0){															// Metadonnees Nikon		
		Taille_pix=PhysicalSizeY();
		
		run("Set Scale...", "distance=1 known="+Taille_pix +" pixel=1 unit=µm");
							
		}		
else {		
		config_nikon();
		nikontif();				
		}
	print ("Taille du pixel = "+Taille_pix);
	
}



macro "Zeiss Action Tool - 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"{

	run("Close All");
	path = File.openDialog("Choisir un fichier");
	zeiss(path);	
	
}


macro "Ndpi Action Tool - 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"{
	run("Close All");
	path = File.openDialog("Choisir un fichier");
	ndpi(path);	
}
macro "Ndpi Action Tool Options"  {
	Dialog.create("Ndpi"); 
	Dialog.addSlider("Numero de serie pour les ndpi:", 1, 3, numserie);
    Dialog.show();
    numserie = Dialog.getNumber();
    
  	}



//////////////////////////////////////////////////////////////////////////////

macro "Zeiss_scan Action Tool - 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"{

	run("Close All");
	// This macro will convert AxioScan JPEGXR compressed .CZI files to standard .tif files and separate each scene into a single image.
		

		inputDir = getDirectory("Choose input Directory");
		dir_array = getFileList(inputDir);
		dir_length = dir_array.length;
		outputDir= getDirectory("Choose an different output Directory");


		setBatchMode (true);

		//iterate through all files in input directory

		for (i=0; i < dir_array.length; i++) {
			//create folder for each file in the output directory
			file_Dir = outputDir + File.separator + dir_array[i]+"_s"+numserieZeiss_scan;
			File.makeDirectory(file_Dir);

			//determine number of "scenes" (sections on a single slide)
			run("Bio-Formats Macro Extensions");
			path = inputDir + File.separator + dir_array[i];
			//print(path);
			/*Ext.setId(path);
			Ext.getCurrentFile(file);
			Ext.getSeriesCount(seriesCount);
			//print("This file (" + dir_array[i] +") contains " + seriesCount + " series.");
			sceneNum = (seriesCount - 2) / 6;
			print("There is/are " + sceneNum + " scene(s) in the file: " + dir_array[i]);
			*/

			

			// Set count to 1 for highest resolution, 6 for lowest resolution. (2-5 can also be used).
			//count = numserieZeiss_scan; 
			
			Ext.setId(path);
			Ext.getCurrentFile(file);
			Ext.getSeriesCount(seriesCount);
			
			//determine which scene is the label
			label = seriesCount - 1;
			Ext.getPixelsPhysicalSizeX(sizeX);
			calib=sizeX;
			//print (calib);
			
			//print(seriesCount);
			tabX=newArray(seriesCount-2);
			//tabCalib=newArray(seriesCount-2);

			for (i=0;i<seriesCount-2;i++){
				Ext.setSeries(i);
				Ext.getSizeX(sizeX);
				tabX[i]=sizeX;
				}
			//Array.show(tabX) ;
			scenesCount=1;
			for (i=1;i<seriesCount-2;i++){
				if (tabX[i]>tabX[i-1]) 	scenesCount++;	
				}
			//print (scenesCount);
			tabIndexScenes=newArray(scenesCount);
			tabIndexScenes[0]=1;
			for (i=1;i<seriesCount-2;i++){
				index=1;
				if (tabX[i]>tabX[i-1]) {
					tabIndexScenes[index]=i;
					index++;
				}
			}
			//Array.show(tabIndexScenes) ;
			
			
			
			
			
			//open each scene and resave as .tif
			if (numserieZeiss_scan!=1) calib=calib*pow(2,numserieZeiss_scan-1);
			for (s=1; s<=scenesCount; s++) {
				//print (s);
				run("Bio-Formats Importer", "open=&path autoscale color_mode=Default view=Hyperstack stack_order=XYCZT series_"+ (tabIndexScenes[s-1]+(numserieZeiss_scan-1)));
				out_path = file_Dir + File.separator + "Scene_" + s + ".tif";
				run("Set Scale...", "distance=1 known="+calib+" pixel=[] unit=µm");
				Hyper2RGB();
				saveAs("tiff", out_path);
				close();
				//count = count + 6;
			}
		/*	//save image of slide label in same folder
			run("Bio-Formats Importer", "open=&path autoscale color_mode=Default view=Hyperstack stack_order=XYCZT series_"+ label);
			out_path = file_Dir + File.separator + "Label.tif";
			saveAs("tiff", out_path);
			close();
			//save preview image of slide in same folder
			run("Bio-Formats Importer", "open=&path autoscale color_mode=Default view=Hyperstack stack_order=XYCZT series_"+ seriesCount);
			out_path = file_Dir + File.separator + "Preview.tif";
			saveAs("tiff", out_path);
			close();*/
			call("java.lang.System.gc");
		}
print("Fin");
	
}
macro "Zeiss_scan Action Tool Options"  {
	Dialog.create("Zeiss_scan"); 
	Dialog.addSlider("Numero de serie pour les scans:", 1, 6, numserieZeiss_scan);
    Dialog.show();
    numserieZeiss_scan = Dialog.getNumber();
    
  	}
	
	
////////////////////////////////////////////////////////////////////////////////
	
	
	
	
	
macro "CropLoci Action Tool - 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"{

list = getList("image.titles");
if (list.length==0){
	path = File.openDialog("Choose a file");
	if (endsWith(path, "ndpi")) pathsansext=substring(path,0,indexOf(path,".ndpi"));
	if (endsWith(path, "czi")) pathsansext=substring(path,0,indexOf(path,".czi"));
	NomImage=File.getName(path);
	Bio_meta(path);

	//Array.show("Dimensions", SX, SY);
	//Array.show(tabIndexScenes);

	for (i=1;i<tabIndexScenes.length;i++){
	if ((tabIndexScenes[i]-tabIndexScenes[i-1])>2) {
		run("Bio-Formats Importer", "open=["+path+"] color_mode=Default view=Hyperstack stack_order=XYCZT series_"+(tabIndexScenes[i]-1));
		Hyper2RGB();
		rename("scene_"+tabIndexScenes[i]-1);
		}
	}
}
waitForUser("Faire une Selection");
getSelectionBounds(x, y, width, height);
num_serie=parseInt(replace(getTitle(),"scene_",""));
//print (num_serie);
//print (SX[num_serie]);
serie_max=0;
for (i=1;i<tabIndexScenes.length;i++){
	if (tabIndexScenes[i]>num_serie) {
		serie_max=tabIndexScenes[i-1];
		i=tabIndexScenes.length;
		}
}
//print (serie_max);
//print (SX[serie_max]);

FacteurMultiplicatif= SX[serie_max]/SX[num_serie];
x=(FacteurMultiplicatif)*x;
y=(FacteurMultiplicatif)*y;
width=(FacteurMultiplicatif)*width;
height=(FacteurMultiplicatif)*height;


if (width*height < 2000000000 && width<64000 && height<64000){
	run("Bio-Formats Importer", "open=["+path+"] color_mode=Default crop view=Hyperstack stack_order=XYCZT series_"+serie_max+" x_coordinate_"+serie_max+"="+x+" y_coordinate_"+serie_max+"="+y+" width_"+serie_max+"="+width+" height_"+serie_max+"="+height+"");
	Hyper2RGB();
	}
	else {
		print (width);
		print (height);	
		print ("Taille trop grande");
	}
}

//////////////////////////////////////////////////////////////////////////////

macro "Scale Bar Action Tool - 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"{
	if (nImages==0) exit("Ouvrir une image!");
	getPixelSize(unit, pixelWidth, pixelHeight);
	if(pixelWidth==1) exit("Image non calibree!");
	run("Scale Bar...");
}

//////////////////////////////////////////////////////////////////////////////////////////////


macro "Batch Exportiff Action Tool - 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"{

	dir1 = getDirectory("Choisir un repertoire source");
	list = getFileList(dir1);
	dir2 = getDirectory("Choisir un repertoire destination");
	ext_tiff=0;
	for (i=0; i<list.length; i++) {
		if (endsWith(list[i], ".tif")) ext_tiff=1;
		if (endsWith(list[i], ".tiff")) ext_tiff=1;
		}
	if (ext_tiff==1) {
		showMessageWithCancel("Tous les fichiers tif doivent avoir ete capture dans les memes conditions!");		
		config();
		}
	
					
	for (i=0; i<list.length; i++) {	
		path=dir1+list[i];
		nom=substring(list[i],0,indexOf(list[i],"."));
		
		if (endsWith(list[i], ".czi")){	
			zeiss(path);				
			saveAs("Tiff", dir2+nom+".tif");
			close();
		}
		if (endsWith(list[i], ".nd2")){	
			nikon(path);			
			saveAs("Tiff", dir2+nom+".tif");
			close();
		}
		if (endsWith(list[i], ".ndpi")){	
			ndpi(path);			
			saveAs("Tiff", dir2+nom+".tif");
			close();
		}
		if (endsWith(list[i], ".tif")||endsWith(list[i], ".TIF")){	
			open(path);
			if (type=="Leica") leica();
			if (type=="Nikon") nikontif();		
			saveAs("Tiff", dir2+nom+".tif");
			close();
		}
	}
					
}




macro "About These Macros Action Tool - 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"{

open(getDirectory("macros")+"toolsets\\PHIV_Exportiff_toolset.txt");
}







///////////////////////////////////////////////////////////////////////////////////

function config(){
	Dialog.create("Microscope");
	Dialog.addChoice("Marque:", newArray("Leica", "Nikon"));
	Dialog.show;
	type = Dialog.getChoice();
	if (type=="Leica") config_leica();
	if (type=="Nikon") config_nikon();
}


function config_leica(){
	Dialog.create("Microscope Leica");
	Dialog.addRadioButtonGroup("Microscope", leica_tab_microscopes, 3, 1, Microscope);
	Dialog.show;
	Microscope=Dialog.getRadioButton;
	//print (Microscope);
	
	Dialog.create("Objectif");
	Dialog.addRadioButtonGroup("Objectif", leica_tab_objectifs, 8, 1, Objectif);
	Dialog.show;
	Objectif=Dialog.getRadioButton;
	//print (Objectif);
	
	if (Microscope!="DM4500"){
		Dialog.create("Grossissement");
		Dialog.addRadioButtonGroup("Grossissement", leica_tab_grossissements, 3, 1, Grossissement);
		Dialog.show;
		Grossissement=Dialog.getRadioButton;
		//print (Grossissement);		
	}
	
}

function config_nikon(){
	Dialog.create("Objectif");
	Dialog.addRadioButtonGroup("Objectif", nikon_tab_objectifs, 8, 1, Objectif);
	Dialog.show;
	Objectif=Dialog.getRadioButton;	

}


function leica(){
	Taille_pix=1;
	getDimensions(width, height, channels, slices, frames);
	if (height==2048) Camera="Retiga 4000R";
	else if (height==1200) Camera="Retiga 2000R";
	else if (height==1536) Camera="MicroPublisher Qimaging couleur";
	else exit ("Mauvaise taille!");
	//print (Camera);
	//print (Microscope);
		//////////////DM6000
	if (Microscope=="DM6000"){
		if (Camera=="Retiga 4000R"){
			if (Objectif=="1.25"){
				if (Grossissement=="1")Taille_pix=5.8708;
				if (Grossissement=="1.25")Taille_pix=4.7096;
				if (Grossissement=="1.6")Taille_pix=3.6923;
			}
			if (Objectif=="5"){
				if (Grossissement=="1")Taille_pix=1.4717;
				if (Grossissement=="1.25")Taille_pix=1.1813;
				if (Grossissement=="1.6")Taille_pix=0.9251;
			}
			if (Objectif=="10"){
				if (Grossissement=="1")Taille_pix=0.7435;
				if (Grossissement=="1.25")Taille_pix=0.5970;
				if (Grossissement=="1.6")Taille_pix=0.4668;
			}
			if (Objectif=="20"){
				if (Grossissement=="1")Taille_pix=0.3659;
				if (Grossissement=="1.25")Taille_pix=0.2945;
				if (Grossissement=="1.6")Taille_pix=0.2305;
			}
			if (Objectif=="40"){
				if (Grossissement=="1")Taille_pix=0.1829;
				if (Grossissement=="1.25")Taille_pix=0.1473;
				if (Grossissement=="1.6")Taille_pix=0.1153;
			}	
			if (Objectif=="63"){
				if (Grossissement=="1")Taille_pix=0.1159;
				if (Grossissement=="1.25")Taille_pix=0.0932;
				if (Grossissement=="1.6")Taille_pix=0.0729;
			}	
			if (Objectif=="100"){
				if (Grossissement=="1")Taille_pix=0.0723;
				if (Grossissement=="1.25")Taille_pix=0.0581;
				if (Grossissement=="1.6")Taille_pix=0.0455;
			}					
		}
	
	}
	
	////////////DM4500
	if (Microscope=="DM4500"){
		if (Camera=="Retiga 2000R"){
			if (Objectif=="1.25")Taille_pix=5.8766;
			if (Objectif=="5")Taille_pix=1.4663;
			if (Objectif=="10")Taille_pix=0.7413;
			if (Objectif=="20")Taille_pix=0.3655;
			if (Objectif=="40")Taille_pix=0.1830;
			if (Objectif=="63")Taille_pix=0.1162;
			if (Objectif=="100")Taille_pix=0.0728;						
		}
		////////////////////////////////////////Retiga 4000R
		if (Camera=="Retiga 4000R"){
			if (Objectif=="1.25")Taille_pix=5.9278;
			if (Objectif=="5")Taille_pix=1.4809;
			if (Objectif=="10")Taille_pix=0.7403;
			if (Objectif=="20")Taille_pix=0.3682;
			if (Objectif=="40")Taille_pix=0.1838;
			if (Objectif=="63")Taille_pix=0.1174;
			if (Objectif=="100")Taille_pix=0.0736;
			}
		
	
	}
	
	
	/////DMRXA
	
	if (Microscope=="DMRXA"){
		if (Camera=="MicroPublisher Qimaging couleur"){
			if (Objectif=="1.25"){
				if (Grossissement=="1")Taille_pix=2.7594;
				if (Grossissement=="1.25")Taille_pix=2.2075;
				if (Grossissement=="1.6")Taille_pix=1.7202;
			}
			if (Objectif=="2.5"){
				if (Grossissement=="1")Taille_pix=1.3793;
				if (Grossissement=="1.25")Taille_pix=1.1038;
				if (Grossissement=="1.6")Taille_pix=0.8613;
			}
			
			if (Objectif=="5"){
				if (Grossissement=="1")Taille_pix=0.6906;
				if (Grossissement=="1.25")Taille_pix=0.5525;
				if (Grossissement=="1.6")Taille_pix=0.4306;
			}
			if (Objectif=="10"){
				if (Grossissement=="1")Taille_pix=0.3428;
				if (Grossissement=="1.25")Taille_pix=0.2747;
				if (Grossissement=="1.6")Taille_pix=0.2134;
			}
			if (Objectif=="20"){
				if (Grossissement=="1")Taille_pix=0.1734;
				if (Grossissement=="1.25")Taille_pix=0.1389;
				if (Grossissement=="1.6")Taille_pix=0.1083;
			}
			if (Objectif=="40"){
				if (Grossissement=="1")Taille_pix=0.086;
				if (Grossissement=="1.25")Taille_pix=0.0689;
				if (Grossissement=="1.6")Taille_pix=0.0536;
			}	
			if (Objectif=="100"){
				if (Grossissement=="1")Taille_pix=0.0344;
				if (Grossissement=="1.25")Taille_pix=0.0277;
				if (Grossissement=="1.6")Taille_pix=0.0215;
			}					
		}
	
	}

	if(Taille_pix==1)	 exit ("Mauvaise configuration!");
	
	run("Set Scale...", "distance=1 known="+Taille_pix +" pixel=1 unit=µm");


}

function nikontif(){
		getDimensions(width, height, channels, slices, frames);
		if (width==4908) Camera="Nikon 4908x3264";
		else if (width==1636) Camera="Nikon 1636x1088";
		else exit("Mauvaise taille!");
		if (Camera=="Nikon 4908x3264"){
			if (Objectif=="2") Taille_pix=1.45;
			if (Objectif=="4") Taille_pix=0.72;
			if (Objectif=="10") Taille_pix=0.2898;
			if (Objectif=="20") Taille_pix=0.1456;
			if (Objectif=="40") Taille_pix=0.0736801;
			if (Objectif=="100") Taille_pix=0.029563;		
		}
		if (Camera=="Nikon 1636x1088"){
			if (Objectif=="2")Taille_pix=4.35;
			if (Objectif=="4")Taille_pix=2.1600;
			if (Objectif=="10")Taille_pix=0.8693;
			if (Objectif=="20")Taille_pix=0.4367;
			if (Objectif=="40")Taille_pix=0.2210;
			if (Objectif=="100")Taille_pix=0.0887;						
		}
			
	run("Set Scale...", "distance=1 known="+Taille_pix +" pixel=1 unit=µm");	
}


function nikon(path){
		maxX=0;
		run("Bio-Formats Macro Extensions");
		Ext.setId(path);
		Ext.getSeriesCount(seriesCount);
		serie="";
		for (s=1;s<=seriesCount;s++){
			serie=serie+" series_"+s;
			Ext.getSizeX(sizeX);
			if(sizeX>maxX) maxX=sizeX;			
		}
		if (maxX!=4908&&maxX!=1636) exit ("Passer par un export en ome.tif dans NIS");
		run("Bio-Formats Importer", "open=["+path+"] color_mode=Composite view=Hyperstack stack_order=XYCZT "+serie);
		list_image=getList("image.titles");
		for (s=0;s<list_image.length;s++){
			selectWindow(list_image[s]);
			Stack.getDimensions(width, height, channels, slices, frames);
			Stack.setChannel(1);
			run("Blue");
			Stack.setChannel(3);
			run("Red");
			if(frames>1)run("Stack to RGB", "frames");
			else if (slices>1)run("Stack to RGB", "slices");
			else if (channels>1){
				origid=getImageID();
				nom=getTitle();			
				run("Stack to RGB");
				rgbid=getImageID();
				selectImage(origid);
				close();
				selectImage(rgbid);
				rename(nom);
				Stack.getDimensions(width, height, channels, slices, frames);
				mem=width*height*channels*slices*frames*bitDepth();
				memfile=File.length(path)*8;
				if (mem<0.8*memfile) {
					close();
					exit ("Passer par un export en ome.tif dans NIS");					
					}
			}
		}
		
}




function zeiss(path){
	run("Bio-Formats Macro Extensions");
	Ext.setId(path);
	Ext.getSeriesCount(seriesCount);
	if(seriesCount>1) exit ("Image multi-serie (mosaique a stitcher ou scan de lame?)");
	//Ext.setSeries(seriesCount);
	Ext.getSizeC(sizeC);
	if(sizeC>7) exit ("Image spectrale a unmixer?");
	
	if (endsWith(path, "czi")){
		
		tab_lut = newArray(32);
		//nom=substring(path,0,indexOf(path,"."));
		run("Bio-Formats Importer", "open=["+path+"] autoscale color_mode=Default view=Hyperstack stack_order=XYCZT");
		ID=getImageID();
		nom=substring(getTitle(),0,indexOf(getTitle(),"."));
		infos=getImageInfo();
		tab_lut=get_lut(infos);
		Stack.getDimensions(width, height, channels, slices, frames);
		for (j=1; j<channels+1; j++) {
				run("Duplicate...", "duplicate channels="+j);
				if (slices>1)	run("Reverse");		//inverse le stack
				rename("temp"+j);
				selectImage(ID);				
			}
			selectImage(ID);
			close();
			if (channels>1){
				run("Concatenate...", "all_open title=[Concatenated Stacks]");
				run("Stack to Hyperstack...", "order=xyzct channels="+channels+" slices="+slices+" frames=1 display=Composite");
			}
			if(channels==1) run(apply_lut(tab_lut[0]));
			else {
				for (j=1; j<channels+1; j++) {
					Stack.setChannel(j);
					run(apply_lut(tab_lut[j-1]));			
					}
			}
			setMetadata("Info", infos);
			rename(nom+".tif");
	}
}

function ndpi(path){

		
			Bio_meta(path);
			for (s=2;s<4;s++){
					if (s==numserie)  Max=SXndpi[s-1]*SYndpi[s-1];
				}					   
			 if (Max < 20000*20000){
			   run("Bio-Formats Importer", "open=["+path+"] color_mode=Default crop view=Hyperstack stack_order=XYCZT series_"+numserie);
			   Hyper2RGB();
			}
			else print (path+" taille trop grande");
}


function get_lut(infos){
 lines=split(infos,"\n");
 tab_lut = newArray(6);
 tab_spectre = newArray(6);
 count=0;
 countunmix=0;
 countspectre=0;
for (k=0; k<lengthOf(lines); k++){
					if (startsWith(lines[k], "Experiment|AcquisitionBlock|MultiTrackSetup|TrackSetup|Detector|Color #")){
							index=indexOf(lines[k], "=");
							tab_lut[count]=substring(lines[k], index+2, lengthOf(lines[k]));
							count++;							
						}	
					if (startsWith(lines[k], "Information|Processing|Spectra|Spectrum|Color #")){ //unmixing
							index=indexOf(lines[k], "=");
							tab_lut[countunmix]=substring(lines[k], index+2, lengthOf(lines[k]));
							countunmix++;							
						}
					if (startsWith(lines[k], "Information|Processing|Spectra|Spectrum|ComponentName #")){ //unmixing
							index=indexOf(lines[k], "=");
							tab_spectre[countspectre]=substring(lines[k], index+2, lengthOf(lines[k]));
							countspectre++;
														
						}
				}
	if (countunmix>0) {
		tab_lut[countunmix]="#FFFFFF";
		Array.print(tab_spectre);
		}
	//Array.print(tab_lut);
	
	return tab_lut	;	
	}
	
	
function apply_lut(tab_lut)	{
	lut="Grays";
	if (tab_lut=="#FF0000") lut="Red";
	if (tab_lut=="#C00000") lut="Red";
	if (tab_lut=="#00FF00") lut="Green";
	if (tab_lut=="#0000FF") lut="Blue";
	if (tab_lut=="#FF00FF") lut="Magenta";
	if (tab_lut=="#FFFF00") lut="Yellow";
	if (tab_lut=="#00FFFF") lut="Cyan";
return lut;
}


function Hyper2RGB(){
	setBatchMode(true);
	titre=getTitle();
	setSlice(1);
	 setMetadata("Label", "r");
	setSlice(2);
	 setMetadata("Label", "g");
	setSlice(3);
	 setMetadata("Label", "b");
	run("Stack to Images");
	run("Merge Channels...", "c1=r c2=g c3=b");
	selectWindow("RGB");
	rename(titre);
	setBatchMode(false);
}

function PhysicalSizeY(){
	infos=split(getMetadata("Info"),"<");
	for (i=0; i<lengthOf(infos); i++){
		row=split(infos[i],"\" ");"
		for (j=0; j<lengthOf(row); j++){
			if (startsWith(row[j], "PhysicalSizeY")) return parseFloat(row[j+1]) ;
			}
		}
		return -1;
}

function XCalibrationMicrons(){
		infos=getImageInfo();
		lines=split(infos,"\n");
		for (i=0; i<lengthOf(lines); i++){
			if (startsWith(lines[i], "XCalibrationMicrons=")) {
				index=indexOf(lines[i], "=");
				valeur=substring(lines[i], index+1, lengthOf(lines[i]));
				valeur=replace(valeur, ",", ".");
				return parseFloat(valeur);
			
			} //return 10) ;
		
		}
		return -1;
}

function Bio_meta(path){
	SX=Array.trim(SX, 1); 
	SY=Array.trim(SY, 1); 
	tabIndexScenes=Array.trim(tabIndexScenes, 1);
	run("Bio-Formats Macro Extensions");
	Ext.setId(path);
	Ext.getCurrentFile(file);
	Ext.getSeriesCount(seriesCount);
	for (s=0; s<seriesCount; s++) {
	  Ext.setSeries(s);
	  Ext.getSizeX(sizeX);
	  SX=Array.concat(SX,sizeX);
	  Ext.getSizeY(sizeY);
	  SY=Array.concat(SY,sizeY);
	   }
	
	for (s=1;s<seriesCount;s++){
		if ((SX[s]>SX[s-1]) || (abs((SX[s]/SX[s-1])-(SY[s]/SY[s-1]))>0.01))	tabIndexScenes=Array.concat(tabIndexScenes,s);	
		}
	   
	 tabIndexScenes=Array.concat(tabIndexScenes,seriesCount); 
	Ext.close();
}





