// PHIV IHC Tool Set
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter le comptage des cellules marquees de coupes de cerveau
/*
Installer bio formats version mini 5.8
Installer bioformats_package.jar https://www.openmicroscopy.org/bio-formats/




/*
NdpiMacroBatch --> Permet d exporter au format tif calibré les fichiers ndpi d un repertoire source dans un repertoire cible
	Option clic droit
		Numero de serie a choisir dans le plugin Bioformat Importer a une serie correspond une resolution d image a importer

Zeiss_scan tool --> Permet d exporter au format tif calibré les fichiers czi issus de l Axio scan
	 en option (clic droit) choix du numero de serie de 1 à 6 de la plus forte a la plus petite resolution
			
Outil crop loci pour extraire a la resolution maximale une ROI d une scan ndpi ou czi

Zonation --> Delimitation de l objet Total, 
	Option clic droit : taille du filtre de lissage
	
Comptage --> Pour detecter les cellules marquees ,les mettre dans le ROI Manager et faire une image mask
			On peut faire plusieurs essais en faisant varier les parametres ci dessous
	Option clic droit : Discrimination par la taille (px) et la circularitetaille 
						Erode l objet total pour eliminer les effets de bords
						Enleve le Background
						Seuillage manuel avec valeur de seuil
						Ou Choix de methode de seuillage automatique

Map --> Pour faire une cartographie de densite de cellules marquees
	Option clic droit : 	taille du filtre maximum (taille des objets)
							Taille du filtre moyen (densite moyenne)
	
Resultats --> tableau de Resultats 

*/

macro "AutoRun"{
	setTool("rectangle");
	setForegroundColor(255, 255, 255);//premier plan blanc
	setBackgroundColor(0,0,0);// fond noir
	run("Set Measurements...", "area shape display redirect=None decimal=3");
	requires("1.49p");
}

/////////////////////variables glogales////////////////////////////
// ndpi batch
var numserie=2;
var numserieZeiss_scan=3;
var SX=newArray (6);
var SY=newArray (6);


//crop
var path="";
var SX=newArray (1);
var SY=newArray (1);
var tabIndexScenes=newArray (1);
var seriesCount=0;

//zones
var origid=-1;
var sigma_zone=20;


//comptage

var area_mini_cell=20; //surface mini  
var area_max_cell=300; //surface max  
var circ_mini_cell=0.2; //surface mini  
var circ_max_cell=1; //surface max 
var seuil_manu=false;
var seuils=newArray(0,164);
var tab_seuilauto=newArray("Default","Huang","Intermodes","IsoData","IJ_IsoData","Li","MaxEntropy","Mean","MinError","Minimum","Moments","Otsu","Percentile","RenyiEntropy","Shanbhag","Triangle","Yen");
var seuilauto="MaxEntropy";
var substract_background = false; 
var erode_bord=50;
//map
var radius_maximum=20;
var radius_mean=40;


//result
var title1 = "Resultats";
var title2 = "["+title1+"]";
var fe = title2;
	
macro "Ndpi Action Tool - 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"{

	run("Close All");
	dir1 = getDirectory("Choisir un repertoire source");
	list = getFileList(dir1);
	dir2 = getDirectory("Choisir un repertoire destination");
	for (i=0; i<list.length; i++) {	
			if (endsWith(list[i], ".ndpi")){
				path=dir1+list[i];
				nom=substring(list[i],0,indexOf(list[i],"."));			
				ndpi(path);			
				saveAs("Tiff", dir2+nom+".tif");
				close();
			}
	}		
}
macro "Ndpi Action Tool Options"  {
	Dialog.create("Ndpi"); 
	Dialog.addSlider("Numero de serie pour les ndpi:", 1, 3, numserie);
    Dialog.show();
    numserie = Dialog.getNumber();
    
  	}
	

macro "Zeiss_scan Action Tool - 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"{

	run("Close All");
	// Macro modifiee pour les scenes et la calibration !
	// This macro will convert AxioScan JPEGXR compressed .CZI files to standard .tif files and separate each scene into a single image.
		//You will need enough free RAM to open the UNCOMPRESSED full resolution file.
		//Files exceeding the 32-bit .tif pixel limit will not open/convert (approximately 4GB uncompressed)
		//Tested with Bioformats version 5.7.2
		//Written by D Richardson 11/22/2017
		
		//All .CZI files should be placed in a single folder.  A second empty "output" folder also needs to be created. 
		//The macro will initialize by askign you fo rthe location of these.

		inputDir = getDirectory("Choose input Directory");
		dir_array = getFileList(inputDir);
		dir_length = dir_array.length;
		outputDir= getDirectory("Choose an different output Directory");
		showProgress(1/dir_array.length);


		setBatchMode (true);

		//iterate through all files in input directory

		for (i=0; i < dir_array.length; i++) {
			//create folder for each file in the output directory
			file_Dir = outputDir + File.separator + dir_array[i]+"_s"+numserieZeiss_scan;
			File.makeDirectory(file_Dir);

			
			run("Bio-Formats Macro Extensions");
			path = inputDir + File.separator + dir_array[i];
			
			Ext.setId(path);
			Ext.getCurrentFile(file);
			Ext.getSeriesCount(seriesCount);
			
			//determine which scene is the label
			label = seriesCount - 1;
			
			Ext.getPixelsPhysicalSizeX(sizeX);
			calib=sizeX;
			
			tabX=newArray(seriesCount-2);
			
			for (i=0;i<seriesCount-2;i++){
				Ext.setSeries(i);
				Ext.getSizeX(sizeX);
				tabX[i]=sizeX;
				}
			//Array.show(tabX) ;
			scenesCount=1;
			for (i=1;i<seriesCount-2;i++){
				if (tabX[i]>tabX[i-1]) 	scenesCount++;	
				}
			//print (scenesCount);
			tabIndexScenes=newArray(scenesCount);
			tabIndexScenes[0]=1;
			for (i=1;i<seriesCount-2;i++){
				index=1;
				if (tabX[i]>tabX[i-1]) {
					tabIndexScenes[index]=i;
					index++;
				}
			}
						
			//open each scene and resave as .tif
			if (numserieZeiss_scan!=1) calib=calib*pow(2,numserieZeiss_scan-1);
			for (s=1; s<=scenesCount; s++) {
				//print (s);
				run("Bio-Formats Importer", "open=&path autoscale color_mode=Default view=Hyperstack stack_order=XYCZT series_"+ (tabIndexScenes[s-1]+(numserieZeiss_scan-1)));
				out_path = file_Dir + File.separator + "Scene_" + s + ".tif";
				run("Set Scale...", "distance=1 known="+calib+" pixel=[] unit=µm");
				Hyper2RGB();
				changeValues(0x000000,0x000000,0xffffff);
				saveAs("tiff", out_path);
				close();
				
			}
			//save image of slide label in same folder
			run("Bio-Formats Importer", "open=&path autoscale color_mode=Default view=Hyperstack stack_order=XYCZT series_"+ label);
			out_path = file_Dir + File.separator + "Label.tif";
			saveAs("tiff", out_path);
			close();
			//save preview image of slide in same folder
			run("Bio-Formats Importer", "open=&path autoscale color_mode=Default view=Hyperstack stack_order=XYCZT series_"+ seriesCount);
			out_path = file_Dir + File.separator + "Preview.tif";
			saveAs("tiff", out_path);
			close();
			call("java.lang.System.gc");
		}
print("Fin");
	
}
	
}
macro "Zeiss_scan Action Tool Options"  {
	Dialog.create("Zeiss_scan"); 
	Dialog.addSlider("Numero de serie pour les scans:", 1, 6, numserieZeiss_scan);
    Dialog.show();
    numserieZeiss_scan = Dialog.getNumber();
    
  	}
	
/////////////////////////////////////////////////Crop///////////////////////////////////////////////////////////
	
	
macro "CropLoci Action Tool - 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"{

list = getList("image.titles");
if (list.length==0){
	path = File.openDialog("Choose a file");
	if (endsWith(path, "ndpi")) pathsansext=substring(path,0,indexOf(path,".ndpi"));
	if (endsWith(path, "czi")) pathsansext=substring(path,0,indexOf(path,".czi"));
	NomImage=File.getName(path);
	Bio_meta(path);

	//Array.show("Dimensions", SX, SY);
	//Array.show(tabIndexScenes);

	for (i=1;i<tabIndexScenes.length;i++){
	if ((tabIndexScenes[i]-tabIndexScenes[i-1])>2) {
		run("Bio-Formats Importer", "open=["+path+"] color_mode=Default view=Hyperstack stack_order=XYCZT series_"+(tabIndexScenes[i]-1));
		Hyper2RGB();
		rename("scene_"+tabIndexScenes[i]-1);
		}
	}
}
waitForUser("Faire une Selection");
getSelectionBounds(x, y, width, height);
num_serie=parseInt(replace(getTitle(),"scene_",""));
//print (num_serie);
//print (SX[num_serie]);
serie_max=0;
for (i=1;i<tabIndexScenes.length;i++){
	if (tabIndexScenes[i]>num_serie) {
		serie_max=tabIndexScenes[i-1];
		i=tabIndexScenes.length;
		}
}
//print (serie_max);
//print (SX[serie_max]);

FacteurMultiplicatif= SX[serie_max]/SX[num_serie];
x=(FacteurMultiplicatif)*x;
y=(FacteurMultiplicatif)*y;
width=(FacteurMultiplicatif)*width;
height=(FacteurMultiplicatif)*height;


if (width*height < 2000000000 && width<64000 && height<64000){
	run("Bio-Formats Importer", "open=["+path+"] color_mode=Default crop view=Hyperstack stack_order=XYCZT series_"+serie_max+" x_coordinate_"+serie_max+"="+x+" y_coordinate_"+serie_max+"="+y+" width_"+serie_max+"="+width+" height_"+serie_max+"="+height+"");
	Hyper2RGB();
	}
	else {
		print (width);
		print (height);	
		print ("Taille trop grande");
	}
}

/////////////////////////////////////////////////Zonation///////////////////////////////////////////////////////////////////////////////

macro "Zonation Action Tool - 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"{
	
	ncount=roiManager("count");
	for(i=ncount-1;i>=0;i--){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (startsWith(nom_item, "Total")) roiManager("Delete");
		}
	
	
	
	origid=getImageID();
	//info_genotype_etat();
	run("Select None");
	
	//Total
	run("Duplicate...", "title=nb");
	run("8-bit");
	run("Gaussian Blur...", "sigma="+sigma_zone);
	run("Threshold...");
	setAutoThreshold("Default");
	title = "Total";
	msg = "Regler le seuil puis Valider en cliquant sur OK";
	waitForUser(title, msg);
	run("Create Selection");
	//run("Enlarge...", "enlarge=-"+(sigma_zone/2)+" pixel");
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);
	roiManager("Rename", "Total"+origid);
	close();
	selectImage(origid);
	roiManager("Deselect");
	roiManager("Show All");
	//setTool("rectangle");
	
	}


macro 'Zonation Action Tool Options'  {
    Dialog.create("Zonation");
    Dialog.addMessage("Tailles des filtres");
    Dialog.addNumber("Filtre Total:", sigma_zone);
  	Dialog.show();
    sigma_zone=Dialog.getNumber();
        
  	}

	
//////////////////////////////////Comptage///////////////////////////////////////////////////////////////////


macro "Comptage Action Tool - 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"{

	activid=getImageID();
	if(isOpen("mask")){
	selectWindow("mask");
	close();
	}

	ncount=roiManager("count");
	if (ncount>0){
		roiManager("Select", 0);
		 roiManager("reset") ;
		roiManager("Add");
	}
	/*
	for(i=ncount-1;i>=0;i--){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (startsWith(nom_item, "Cell")) roiManager("Delete");
		}*/
		//origid=getImageID();
		ncount=roiManager("count");
		run("Select None");
		run("Duplicate...", "title=cell");
		run("8-bit");
		balise=0;
		for(i=0;i<ncount;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (nom_item=="Total"+activid) {
				roiManager("Select", i);
				balise=1;				
				}
			}
		if (balise==1){
			run("Enlarge...", "enlarge=-"+(sigma_zone/2)+erode_bord+" pixel");
			setBackgroundColor(255, 255, 255);
			run("Clear Outside");
			setBackgroundColor(0, 0, 0);
			} 
		if (substract_background) run("Subtract Background...", "rolling=50 light");
		if(seuil_manu) {
			run("Threshold...");
			setThreshold(seuils[0], seuils[1]);
			run("Threshold...");
			title = "Marquage";
			msg = "Regler le seuil puis Valider en cliquant sur OK";
			waitForUser(title, msg);
		
		
		
		}
		else {
			setAutoThreshold(seuilauto);
			}
		getThreshold(lower, upper);
		seuils[0]=lower;
		seuils[1]=upper;
			
		print ("valeur du seuil : "+seuils[1]);
		setOption("BlackBackground", false);
		run("Convert to Mask");
		run("Fill Holes");;
		n_avant=roiManager("count");
		run("Analyze Particles...", "size="+area_mini_cell+"-"+area_max_cell+" pixel circularity="+circ_mini_cell+"-"+circ_max_cell+" show=Masks add");
		rename("mask");
		selectWindow("cell");
		close();
		n_apres=roiManager("count");
		for (i=n_avant; i<n_apres; i++) {	
		roiManager("Select", i);
		roiManager("Rename", "Cell"+IJ.pad(i, 5));		
		}							
		selectImage(activid);
		roiManager("Deselect");
		roiManager("Show All");	
	
}
/////////////////////
macro 'Comptage Action Tool Options'  {
	Dialog.create("Comptage"); //e.g., put a dialog here
    Dialog.addNumber("Surface minilale :", area_mini_cell);
	Dialog.addNumber("Surface maxilale :", area_max_cell);
	Dialog.addNumber("Circularite minimale :", circ_mini_cell);
	Dialog.addNumber("Circularite maximale :", circ_max_cell);
	Dialog.addNumber("Erode en bordure (px)  :", erode_bord);
	Dialog.addCheckbox("Enlever le background :", substract_background);
	Dialog.addCheckbox("Seuillage manuel :", seuil_manu);
	Dialog.addNumber("Valeur du seuil :", seuils[1]);
	Dialog.addChoice("Methode de seuillage auto :", tab_seuilauto, seuilauto);
    Dialog.show();
    area_mini_cell = Dialog.getNumber();
	area_max_cell = Dialog.getNumber();
	circ_mini_cell = Dialog.getNumber();
	circ_max_cell = Dialog.getNumber();
	erode_bord = Dialog.getNumber();
	substract_background=Dialog.getCheckbox();	
	seuil_manu=Dialog.getCheckbox();
	seuils[1] = Dialog.getNumber();
	seuilauto = Dialog.getChoice();
	
	}
	
//////////////////////////////////Map///////////////////////////////////////////////////////////////////
macro "Map Action Tool - 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"{
	if(isOpen("carto")){
	selectWindow("carto");
	close();
	}
	if (getTitle()=="mask") exit ("Selectionner l image originale)");
	activid=getImageID();
	//origid=getImageID();
	if(isOpen("mask")){
	selectWindow("mask");
	} else exit ("Il faut l image mask ouverte !");
	roiManager("Deselect");
	run("Select None");
	run("Ultimate Points");
	run("Multiply...", "value=255.000");
	run("Maximum...", "radius="+radius_maximum);
	run("Mean...", "radius="+radius_mean);
	//run("Gaussian Blur...", "sigma=30");
	run("Fire");
	setMinAndMax(0, 255);
	run("RGB Color");
	rename("carto");
	//run("Enhance Contrast", "saturated=0.1");	
	selectImage(activid);
	nom =getTitle();
	imageCalculator("Add create",nom,"carto");
}

macro 'Map Action Tool Options'  {
	Dialog.create("Map"); //e.g., put a dialog here
    Dialog.addNumber("Filtre maximum :", radius_maximum);
	Dialog.addNumber("Filtre mean :", radius_mean);
	Dialog.show();
    radius_maximum = Dialog.getNumber();
	radius_mean = Dialog.getNumber();
	
	}
			





/////////////////////////////////////////////////////Resultats/////////////////////////////////////////////////////////////////////////////////////
macro "Resultats Action Tool - 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"{
		//selectImage(origid);
		//dir=getInfo("image.directory");
		nom=getTitle();
		nom=replace(nom,".tif","");
		area_total=-1;
		area_cell=-1;
		nb_cell=0;
		ncount=roiManager("count");
		for(i=0;i<ncount;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			
						if (nom_item=="Total"+origid){
							getStatistics(area);
							area_total=area;
							}
						if (startsWith(nom_item, "Cell")){
							nb_cell++;
							getStatistics(area);
							area_cell=area_cell+area;
						}			
			}
		run("Select None");
		if( !isOpen("Resultats")){
		run("Table...", "name="+title2+" width=600 height=600");
print(fe, "\\Headings:Image \ttotale  \tnb_cell \tsurf_cell ");

	}
print(fe, nom+"\t"+area_total+"\t"+nb_cell+"\t"+area_cell);	
}




///////////////////////////////////////////////////????????????????????????????????????????????????????

macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets\\PHIV_IHC_toolset.txt");
}








	
	/////////////////////////////////////////////////////FUNCTIONS///////////////////////////////////////////////////


function Hyper2RGB(){
	setBatchMode(true);
	titre=getTitle();
	setSlice(1);
	 setMetadata("Label", "r");
	setSlice(2);
	 setMetadata("Label", "g");
	setSlice(3);
	 setMetadata("Label", "b");
	run("Stack to Images");
	run("Merge Channels...", "c1=r c2=g c3=b");
	selectWindow("RGB");
	rename(titre);
	setBatchMode(false);
}



function Bio_meta(path){
	SX=Array.trim(SX, 1); 
	SY=Array.trim(SY, 1); 
	tabIndexScenes=Array.trim(tabIndexScenes, 1);
	run("Bio-Formats Macro Extensions");
	Ext.setId(path);
	Ext.getCurrentFile(file);
	Ext.getSeriesCount(seriesCount);
	for (s=0; s<seriesCount; s++) {
	  Ext.setSeries(s);
	  Ext.getSizeX(sizeX);
	  SX=Array.concat(SX,sizeX);
	  Ext.getSizeY(sizeY);
	  SY=Array.concat(SY,sizeY);
	   }
	
	for (s=1;s<seriesCount;s++){
		if ((SX[s]>SX[s-1]) || (abs((SX[s]/SX[s-1])-(SY[s]/SY[s-1]))>0.01))	tabIndexScenes=Array.concat(tabIndexScenes,s);	
		}
	   
	 tabIndexScenes=Array.concat(tabIndexScenes,seriesCount); 
	Ext.close();
}

function ndpi(path){

		
			Bio_meta(path);
			for (s=2;s<4;s++){
					if (s==numserie)  Max=SX[s-1]*SY[s-1];
				}					   
			 if (Max < 20000*20000){
			   run("Bio-Formats Importer", "open=["+path+"] color_mode=Default crop view=Hyperstack stack_order=XYCZT series_"+numserie);
			   Hyper2RGB();
			}
			else print (path+" taille trop grande");
}

		
