// PHIV Mango Tool Set
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter la segmentation des coupes de manguier
/*
Installer loci bio formats
http://www.loci.wisc.edu/files/software/loci_tools.jar
Installer Colour Deconvolution
http://www.mecourse.com/landinig/software/colour_deconvolution.zip

*/

/*
NdpiMacroBatch --> Permet d exporter au format tif calibré les fichiers ndpi d un repertoire source dans un repertoire cible
	Option clic droit
		Numero de serie a choisir dans le plugin Bioformat Importer a une serie correspond une resolution d image a importer

Crop --> Pour detecter les objets d une taille superieur a taille_crop 
		dupliquer et sauver les images
	Option clic droit : taille du fitre, taille mini de l objet,  elargissement avant le crop		

New --> ouvre l image suivante dans le dossier (avec son Roi associe si il existe)
		sauve et remet a zero le Roi Manager 
		
Zonation --> Delimitation de l objet Total, 
	puis du bois 
	puis de ma moelle si la methode de seuillage pour la moelle n est pas bonne
	on peut choisir l autre (ou HSB ou niveaux de gris)
	
	Option clic droit --> taille du filtre
		Filtre Total : taille du filtre gaussien pour attenuer les details
		Filtre Bois : taille du filtre gaussien pour attenuer les details
		Filtre Moelle : taille du filtre gaussien pour attenuer les details
		Methode de seuillage de la moelle HSB ou Niveaux de gris

Xyleme --> Detection du Xyleme dans le bois
	Option clic droit 
		Taille mini d un vaisseaux 
	si changement remise a zero de tous les vaisseaux deja detectes
	
	
Sclerenchyme  --> Délimitation des tissus de soutien dans la zone externe
	
Resultats --> Resultats  et sauvegarde le roi manager
	clic droit permet d avoir les resultats sur tout un dossier

*/

macro "AutoRun"{
	setTool("rectangle");
	setForegroundColor(255, 255, 255);//premier plan blanc
	setBackgroundColor(0,0,0);// fond noir
	run("Set Measurements...", "area shape display redirect=None decimal=3");
	requires("1.49p");
}

/////////////////////variables glogales////////////////////////////
// ndpi batch
var numserie=2; //a verifier avec plugin-loci-bioformat importer

//crop
var taille_crop=10000;
var filtre_crop=50;
var enlarge_crop=10;
//zones
var seuil_total=newArray(0,164);
var seuil_bois=newArray(162,255);
var seuil_moelle_hsb=newArray(0,170);
var seuil_moelle_ndg=newArray(95,255);
var param_zone=newArray(10,10,15);
var methode="HSB";
var ok="Oui";

//xyl
var area_mini_xyl=150; //surface mini du xyleme 
//scl
var seuil_scl=newArray(0,86);
var param_scl=newArray(2,5000,2000000);// filtre, taille mini, taille mini

var title1 = "Resultats";
var title2 = "["+title1+"]";
var fe = title2;
	
////////////////////////////////////////////////////New Image//////////////////////////////////////////////////////////////////

macro "New Action Tool - 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"{
	if (nImages==0){
		open();
		//info_genotype_etat();	
		
	}
	
	else{
	
	dir=getInfo("image.directory");
		nom=getTitle();
		nom=replace(nom,".tif","");
		roiManager("Save", dir+nom+"-RoiSet.zip");//sauvegarde de roi manager
		run("Remove Overlay");
		run("Save");	
	
	
	
	run("Open Next");
	if (isOpen("ROI Manager")){
		roiManager("Deselect");
		n = roiManager("count");
		if (n>0) roiManager("Delete");
	}
	
	etat="";

	dir=getInfo("image.directory");
	nom=getTitle();
	nom=replace(nom,".tif","");
	if (File.exists(dir+nom+"-RoiSet.zip") ) 	roiManager("Open",dir+nom+"-RoiSet.zip");
}

}





/////////////////////////////////////////////////Zonation///////////////////////////////////////////////////////////////////////////////

macro "Zonation Action Tool - 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"{
	origid=getImageID();
	//info_genotype_etat();
	run("Select None");
	
	//Total
	run("Duplicate...", "title=nb");
	run("8-bit");
	run("Gaussian Blur...", "sigma="+param_zone[0]);
	Validation_surface("Total",seuil_total);
		
	//Bois
	selectImage(origid);
	run("Select None");
	run("Duplicate...", "title=Bois");
	run("Gaussian Blur...", "sigma="+param_zone[1]);
	run("HSB Stack");
		run("Next Slice [>]");
		run("Delete Slice");
		run("Next Slice [>]");
		run("Delete Slice");
		Validation_surface("Bois",seuil_bois);
		
	//Moelle
	ok="Oui";
	if (methode=="HSB") {
		moelle_hsb();
		valid_methode();		
		}
	if (ok=="Oui"){
		if(methode=="Niveaux de gris"){
			moelle_ndg();
			valid_methode();		
		}
	}
	
	ok="Oui";
	selectImage(origid);
	roiManager("Deselect");
	roiManager("Show All");
	//setTool("rectangle");
	
	}


macro 'Zonation Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    items=newArray("HSB","Niveaux de gris");
    Dialog.create("Zonation");
    Dialog.addMessage("Tailles des filtres");
    Dialog.addNumber("Filtre Total:", param_zone[0]);
    Dialog.addNumber("Filtre Bois:", param_zone[1]);
	Dialog.addNumber("Filtre Moelle:", param_zone[2]);
	Dialog.addChoice("Methode de seuillage :", items, methode);
    Dialog.show();
    param_zone[0]=Dialog.getNumber();
    param_zone[1]=Dialog.getNumber();;
	param_zone[2]=Dialog.getNumber();;;
	methode=Dialog.getChoice();
      
  	}

	
//////////////////////////////////Xyleme///////////////////////////////////////////////////////////////////

macro "Xyleme Action Tool - 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"{


	ncount=roiManager("count");
	for(i=ncount-1;i>=0;i--){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (startsWith(nom_item, "Xyl")) roiManager("Delete");
		}
	origid=getImageID();
	ncount=roiManager("count");
	run("Select None");
	run("Duplicate...", "title=xyl");
	run("Split Channels");
	selectWindow("xyl (blue)");
	close();
	selectWindow("xyl (red)");
	close();
	selectWindow("xyl (green)");
	rename("xyl");
	setBackgroundColor(0, 0, 0);
	total_fait=0;
	for(i=0;i<ncount;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			
						if (nom_item=="Total"){
							total_fait=1;
													}
						if (nom_item=="Bois"){
							run("Clear Outside");
							}
						if (nom_item=="Moelle"){
							run("Clear", "slice");
							}
					}
		if (total_fait==0){
			close();
			 exit("Zones a determiner avant");
			} 		
		roiManager("Deselect");
		run("Select None");
		setAutoThreshold("Default dark");
		n_avant=roiManager("count");
		run("Analyze Particles...", "size="+area_mini_xyl+"-Infinity add");
		close();
		n_apres=roiManager("count");
		for (i=n_avant; i<n_apres; i++) {	
		roiManager("Select", i);
		roiManager("Rename", "Xyl");
		
		}		
							
		selectImage(origid);
		roiManager("Deselect");
		roiManager("Show All");	
	
}
/////////////////////
macro 'Xyleme Action Tool Options'  {
	Dialog.create("Xyleme"); //e.g., put a dialog here
    Dialog.addNumber("Surface minilale :", area_mini_xyl);
    Dialog.show();
    area_mini_xyl = Dialog.getNumber();

		
	}
	
//////////////////////////////////Sclerenchyme///////////////////////////////////////////////////////////////////

macro "Sclerenchyme Action Tool - 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"{
	ncount=roiManager("count");
	for(i=ncount-1;i>=0;i--){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (startsWith(nom_item, "Scl")) roiManager("Delete");
		}
	origid=getImageID();
	getPixelSize(unit, pixelWidth, pixelHeight);
	ncount=roiManager("count");
	run("Select None");
	run("Duplicate...", "title=scl");
	
	run("Colour Deconvolution", "vectors=[FastRed FastBlue DAB]");
	selectWindow("scl-(Colour_3)");
	close();
	selectWindow("scl-(Colour_2)");
	close();
	selectWindow("scl");
	close();
	selectWindow("Colour Deconvolution");
	close();
	selectWindow("scl-(Colour_1)");
	rename("scl");
	run("Set Scale...", "distance=1 known="+pixelWidth+" pixel=1.000 unit="+unit);
	setBackgroundColor(255, 255, 255);
	run("Gaussian Blur...", "sigma="+param_scl[0]);
	total_fait=0;
	for(i=0;i<ncount;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			
						if (nom_item=="Total"){
							total_fait=1;
							run("Enlarge...", "enlarge=-"+param_zone[0]);
							run("Clear Outside");
													}
						if (nom_item=="Bois"){
							run("Clear", "slice");
							}
						}
		if (total_fait==0){
			close();
			 exit("Zones a determiner avant");
			} 		
		roiManager("Deselect");
		run("Select None");
		setThreshold(seuil_scl[0], seuil_scl[1]);
		title = "Sclerenchyme";
		msg = "Regler le seuil";
		waitForUser(title, msg);
		getThreshold(lower, upper);
		seuil_scl[0]=lower;
		seuil_scl[1]=upper;		
		run("Analyze Particles...", "size="+param_scl[1]+"-"+param_scl[2]+" show=Masks exclude");
		run("Create Selection");
		RoiAdd("Scl");
		close();
		selectWindow("scl");
		close();
		setBackgroundColor(0, 0, 0);					
		selectImage(origid);
		roiManager("Deselect");
		roiManager("Show All");	
	
}
/////////////////////
macro 'Sclerenchyme Action Tool Options'  {
	Dialog.create("Sclerenchyme");
    Dialog.addMessage("Parametres");
    Dialog.addNumber("Taille du filtre:", param_scl[0]);
    Dialog.addNumber("Taille mini:", param_scl[1]);
	Dialog.addNumber("Taille maxi:", param_scl[2]);
	Dialog.show();
    param_scl[0]=Dialog.getNumber();
    param_scl[1]=Dialog.getNumber();;
	param_scl[2]=Dialog.getNumber();;;
	

		
	}
		





/////////////////////////////////////////////////////Resultats/////////////////////////////////////////////////////////////////////////////////////
macro "Resultats Action Tool - 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"{

		dir=getInfo("image.directory");
		nom=getTitle();
		nom=replace(nom,".tif","");
		mesure_r();
		roiManager("Save", dir+nom+"-RoiSet.zip");//sauvegarde de roi manager
		run("Remove Overlay");
		//run("Save");		
}

macro 'Resultats_R Action Tool Options'  {

		dir = getDirectory("Choisir un repertoire source");
		list = getFileList(dir);
		setBatchMode(true);
		for (i=0; i<list.length; i++) {												
			 if (endsWith(list[i], ".zip")){	
			 				roiManager("Open", dir+list[i]);										//condition sur l extension tif
			 			 nom=substring(list[i],0,indexOf(list[i],"-"));		//nom sans l extension
			 			open(dir + nom+".tif");	
			 				mesure_r();
			 				close();
			 				roiManager("Reset");
			}

}
}




///////////////////////////////////////////////////????????????????????????????????????????????????????

macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets\\PHIV_Mango_toolset.txt");
}








	
	/////////////////////////////////////////////////////FUNCTIONS///////////////////////////////////////////////////
var function RoiAdd(nom) {
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);	
	roiManager("Rename", nom);
}

	
	var function Seuil(seuils){
	setThreshold(seuils[0], seuils[1]);
	run("Convert to Mask");
}


function Validation_surface(zone,seuils){
	run("Threshold...");
	setThreshold(seuils[0], seuils[1]);
	run("Threshold...");	
	setTool("wand");
	title = zone;
	msg = "Regler le seuil puis selectionner avec la baguette";
	waitForUser(title, msg);
	getThreshold(lower, upper);
	seuils[0]=lower;
	seuils[1]=upper;
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);
	roiManager("Rename", zone);
	close();
  selectImage(origid);
  roiManager("Select", n-1);
	setTool("brush");
	call("ij.gui.Toolbar.setBrushSize", 100); 
	waitForUser(zone,"Correction de la selection");
	//run("Interpolate", "interval=1");//voir feret!
	roiManager("Update");	
	roiManager("Deselect");
	run("Select None");	
	setTool("rectangle");
}

var function ChoixSeuils(titre,seuils){
	run("Threshold...");
	setThreshold(seuils[0], seuils[1]);
	run("Threshold...");
	waitForUser(titre,"Reglage du Seuil");
	getThreshold(lower, upper);
	seuils[0]=lower;
	seuils[1]=upper;
	}


var function raz(titre){
	if (roiManager("count")>0){
		roiManager("Deselect");
		roiManager("Delete");
		}	
	run("Remove Overlay");
	run("Clear Results");
	print ("\\Clear");
	}



function NA(valeur){
	if (valeur==-1)valeur="NA";
	return valeur;
}

function deux_decimal(valeur){
	if (valeur!=-1){
		valeur= round(valeur*100)/100;
	}
	else valeur="NA";
	return valeur;
}


function moelle_hsb(){
	selectImage(origid);
	run("Select None");
	run("Duplicate...", "title=Moelle");
	run("Gaussian Blur...", "sigma="+param_zone[2]);
	run("HSB Stack");
	run("Next Slice [>]");
	run("Delete Slice");
	run("Next Slice [>]");
	run("Delete Slice");
	Validation_surface("Moelle",seuil_moelle_hsb);
}

function moelle_ndg(){
	selectImage(origid);
	run("Select None");
	run("Duplicate...", "title=Moelle");
	run("8-bit");
	run("Gaussian Blur...", "sigma="+param_zone[2]);
	Validation_surface("Moelle",seuil_moelle_ndg);
}

function delete_moelle(){
	ncount=roiManager("count");
	roiManager("Select", ncount-1);
	roiManager("Delete");
}

function valid_methode(){
	roiManager("Show All");
	Dialog.create("Validation");
	items = newArray("Oui", "Non");
    Dialog.addMessage("Segmentation Moelle");
    Dialog.addRadioButtonGroup("Correcte", items, 2, 1, "Oui");
    Dialog.show();
    ok = Dialog.getRadioButton();
	if (ok=="Non"){
		delete_moelle();
		if (methode=="HSB")	{
			methode="Niveaux de gris";
			moelle_ndg();
		}
		else {
			methode="HSB";
			moelle_hsb();
		}		 
	}
}









function mesure_r(){
	area_total=-1;
	diam=-1;
	area_bois=-1;
	area_moelle=-1;
	nb_fx_xyl=0;
	area_xyl=-1;
	
	ncount=roiManager("count");
	for(i=0;i<ncount;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			
						if (nom_item=="Total"){
							getStatistics(area);
							area_total=area;////////////////////////////////////////////area_total
							run("Set Measurements...", "area centroid feret's redirect=None decimal=3");
							List.setMeasurements;
							diam=List.getValue("Feret");////////////////diam
							}
						if (nom_item=="Bois"){
							getStatistics(area);
							area_bois=area;////////////////////////////////////////////surfzone1
							}
						if (nom_item=="Moelle"){
							getStatistics(area);
							area_moelle=area;////////////////////////////////////////////surfzone1
							}
						if (startsWith(nom_item, "Xyl")){
							nb_fx_xyl++;////////////////////////////////////////////nb fx xyl
							getStatistics(area);
							area_xyl=area_xyl+area;
						}
						if (nom_item=="Scl"){
							getStatistics(area);
							area_scl=area;////////////////////////////////////////////surfzone1
							}
		}	
		run("Select None");
		area_bois=area_bois-area_moelle;
		area_total=deux_decimal(area_total/1000000);
		area_bois=deux_decimal(area_bois/1000000);
		area_moelle=deux_decimal(area_moelle/1000000);
		area_xyl=deux_decimal(area_xyl/1000000);
		area_scl=deux_decimal(area_scl/1000000);
		diam=deux_decimal(diam/1000);
	

		if( !isOpen("Resultats")){
		run("Table...", "name="+title2+" width=1400 height=600");
print(fe, "\\Headings:Image \tdiametre \ttotale \tbois \tmoelle \tnb_xyl \tsurf_xyl \tsurf_scl ");

	}
print(fe, nom+"\t"+diam+"\t"+area_total+"\t"+area_bois+"\t"+area_moelle+"\t"+nb_fx_xyl+"\t"+area_xyl+"\t"+area_scl);

}	

		
