// PHIV Matlab Tool Set
// Marc LARTAUD MRI PHIV
// Boite a outils pour l analyse d images multispectrales dans Matlab


/*
Matlab = a partir d une image .lsm choix d un dossier de travail pour matlab copie dedans tous les fichiers
en option choix de l emplacement du dossier de base ou sont tous les scripts matlab
par defaut "D:\\Mes donnees\\matlab\\la base"
Mask = creation d un masque et sauvegarde dans le dossier de travail
//Luminosite Contraste = reglages!
Spectre = mets dans le presse papier les spectres des roi pour les coller dans le fichier spectres.csv
Composite = creation d une image composite des stacks unmix en options le nombre de cannaux
Lut = choix des lut
on peut aussi utiliser stack sorter pour mettre les couches dans l ordre  R G B C M Y




*/

var canaux=5;
     var dCmds = newMenu("Lut Menu Tool",
      newArray("Red","Green", "Blue", "Cyan", "Magenta", "Yellow", "Matlab"));


//macro "Unused Tool-1 - " {}  // laisse une place libre!

var dir="";
var dirbase="D:\\Mes donnees\\matlab\\la base";
var fichier_unmix="unmix_pca.tif";

macro "Matlab Action Tool - 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"{
nom_orig=getInfo("image.directory")+"\\"+getInfo("image.filename");
 if (endsWith(nom_orig, ".lsm")){
dir=getDirectory("nouveau dossier pour l analyse matlab");
exec("cmd", "/c", "copy", dirbase,dir );
print (nom_orig);
exec("cmd", "/c", "copy", nom_orig, dir );
exec("cmd", "/c", "rename", dir+getInfo("image.filename"), "cube.lsm" );
open(dir+"cube.lsm");
}
else showMessage("Vous devez ouvrir une image spectrale au format lsm");
}
  
macro 'Matlab Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    dirbase=getDirectory("dossier de base pour l analyse matlab");
  	}






macro "Mask Action Tool - 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"{

resetdir=0;
if (dir==""){
	 dir=getInfo("image.directory")+"\\";
	 resetdir=1;
	}
	print (dir);
run("Z Project...", "projection=[Max Intensity]");
run("Threshold...");
setAutoThreshold("Default dark");
title = "Masque";
msg = "Reglage du seuil";
waitForUser(title, msg);
run("Create Selection");
run("Create Mask");
rename("mask");
saveAs(dir+"mask.tif");
close();
selectWindow("MAX_cube.lsm");
close();
selectWindow("cube.lsm");
close();
if (resetdir!=1) showMessage("Lancer les scripts matlab dans "+dir);
if (resetdir==1) dir="";
}


  macro "Luminosite Contraste Action Tool - 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"{
nS=getSliceNumber();
for (i=1;i<nSlices+1;i++){
setSlice(i);
resetMinAndMax();
}
setSlice(nS);
run("Brightness/Contrast...");
}





macro "Spectre Action Tool - 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"{
run("Set Measurements...", "  mean limit redirect=None decimal=3");
run("Plot Z-axis Profile");
String.copyResults();
}



macro "StackSpectre Action Tool - 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"{
run("Profile Plot Options...", "width=450 height=200 minimum=0 maximum=0 fixed interpolate draw");
dirstack=getDirectory("Dossier matlab");
open(dirstack+"cube.lsm");
open(dirstack+fichier_unmix);
n=nSlices;
run("Set Measurements...", "  mean display redirect=None decimal=3");
for(i=1;i<=n;i++){
selectWindow(fichier_unmix);
setSlice(i);
setAutoThreshold("Yen dark");
run("Create Selection");
run("Add to Manager");
run("Select None");
resetThreshold();
selectWindow("cube.lsm");
run("Restore Selection");
run("Plot Z-axis Profile");
//String.copyResults();
//selectWindow("cube.lsm-0-0");
rename("spectre"+i);
}
run("Images to Stack", "name=Stack title=spectre use");
saveAs("Tiff", dirstack+fichier_unmix+"spectres.tif");
roiManager("Save",dirstack+fichier_unmix+"RoiSet.zip");
run("Set Measurements...", "area mean integrated display redirect=None decimal=3");
selectWindow(fichier_unmix);
run("Clear Results");
roiManager("Measure");
//scores acp dasn matlab monacp.engenval.d
}

macro 'StackSpectre Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
  Dialog.create("Analyse spectrale");
  Dialog.addChoice("Type:", newArray("unmix_pca.tif", "unmix_maf.tif", "unmix_kmeans.tif", "unmix_discrim.tif"));
  Dialog.show();
  fichier_unmix = Dialog.getChoice();
  	}


////////////////////////////////////////////////////////////////label=Composite////////////////////////////////////////////

macro "Composite Action Tool - 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"{
commande="";
nom=getTitle();
origID=getImageID();
selectImage(origID);
if (canaux>nSlices) canaux=nSlices;

for(i=1; i<=canaux; i++) {
            setSlice(i);
            run("Duplicate...", "title="+i);
            selectImage(origID);
            }
for(i=1; i<=canaux; i++) {
           if (i<4) commande=commande+" c"+i+"="+i+" "; 
           else commande=commande+" c"+i+1+"="+i+" ";       
            }
            //print (commande);


run("Merge Channels...", commande+" create");
rename(nom+"_Composite");
for (i=1;i<nSlices+1;i++){
setSlice(i);
run("Enhance Contrast", "saturated=0.35");
}
run("Channels Tool... ");
run("Brightness/Contrast...");
run("Stack Sorter");

}

macro 'Composite Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Nombre de canaux"); //e.g., put a dialog here
    Dialog.addNumber("Canaux :", canaux);
    Dialog.show();
    canaux = Dialog.getNumber();
  	}




      
  macro "Lut Menu Tool - C037T0b11LT6b09UTcb09T" {
       cmd = getArgument();
       if (cmd=="Red") run("Red");
       if (cmd=="Green") run("Green");
       if (cmd=="Blue") run("Blue");
       if (cmd=="Cyan") run("Cyan");
       if (cmd=="Magenta") run("Magenta");
       if (cmd=="Yellow") run("Yellow");
       if (cmd=="Matlab") run("colormap_matlab");


       
	 else if (cmd!="-")
            run(cmd);
  }


macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/PHIV_Matlab_toolset.txt");
}
