// PHIV_Meristem_toolset Version 1 du 20/05/2014
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter la segmentation des cellules de meristeme

/*
Installer Graylevel watershed
http://bigwww.epfl.ch/sage/soft/watershed/Watershed-cls.zip
Outils :
 - Dome: Met dans le Roi Manager la selection du Dome (Surface)
 - Base: Met dans le Roi Manager la selection de la Base(Ligne droite)
 - Hauteur: Trace et met dans le Roi Manager la hauteur = ligne la plus longue entre le milieu de la Base et le perimetre du Dome
 - Menu AutoSegment segmente automatiquement les cellules 
		parametres (clic droit): choix des limites de taille des cellules
		et choix de la taille du filtre de pretraitement


Raccoucis clavier sur le pave numerique
0 supprimme une selection
1 permet de combiner 2 selections
2 permet de separer une selection en 2 en tracant une ligne


*/


var countCombine=0;
var taille_mini=30;
var taille_maxi=10000;
var taille_filtre=4;



macro "Dome Action Tool - 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"{
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);
	roiManager("Rename", "Dome");
}

macro "Base Action Tool - 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"{
if (selectionType() ==5){
		roiManager("Add");
		n = roiManager("count");
		roiManager("Select", n-1);
		roiManager("Rename", "Base");
			}
else{
		showMessage("Il faut selectionner une ligne droite!");
			}
}

macro "Hauteur Action Tool - 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"{
						ncount=roiManager("count");
						for(i=0;i<ncount;i++){
						roiManager("Select", i);
						nom_item=call("ij.plugin.frame.RoiManager.getName", i);
						if (nom_item=="Dome") getSelectionCoordinates(xm, ym);
						if (nom_item=="Base"){ 
							getSelectionCoordinates(xb, yb);
							List.setMeasurements;
							anglebase = List.getValue("Angle");
									}
							}
						if (xb[0]<xb[1]) xbmax=xb[1];
						else xbmax=xb[0];
						if (yb[0]<yb[1]) ybmax=yb[1];
						else ybmax=yb[0];
						xc=xbmax-abs(0.5*(xb[0]-xb[1]));
						yc=ybmax-abs(0.5*(yb[0]-yb[1]));
						run("Line Width...", "line=1");
     				diameter = 0.0;
						nm = xm.length;
						nb = xb.length;
     for (i=0; i<nm; i++) {        
            dx = xm[i] - xc;
            dy = ym[i] - yc;
            d = sqrt(dx*dx + dy*dy);
            if (d>diameter) {
                diameter = d;
                imax = i;                
            }        
    }
    
    	makeLine(xc, yc,xm[imax],ym[imax]);
    	List.setMeasurements;
			anglehauteur = List.getValue("Angle");
			    	
    	
    	
    	
    	
    	roiManager("Add");
			n = roiManager("count");
			roiManager("Select", n-1);
			roiManager("Rename", "Hauteur");
  }


macro "AutoSegment Action Tool - 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"{
	n = roiManager("count");
	for (i=n-1; i>-1; i--) {
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (nom_item!="Dome"&&nom_item!="Base"&&nom_item!="Hauteur"){
		roiManager("Delete");
		}
	}
			photo=getTitle();
		run("Select None");
	run("Duplicate...", "title=hsb");
	run("HSB Stack");
	run("Next Slice [>]");
	run("Duplicate...", "title=nb");
	selectWindow("hsb");
	close();
	selectWindow("nb");
	ncount=roiManager("count");
	for(i=0;i<ncount;i++){
				roiManager("Select", i);
				nom_item=call("ij.plugin.frame.RoiManager.getName", i);
				if (nom_item=="Dome") {
					roiManager("Select", i);
					setBackgroundColor(0, 0, 0);
					run("Clear Outside");
				}
			}
	run("Watershed ", "blurring='"+taille_filtre+".0'   watershed='0 1 0 170 0 0'   display=' 0' ");
	title = "Watershed";
	while (!isOpen("Binary watershed lines")){
								wait(500);
						}
	selectWindow("Binary watershed lines");
	run("Select All");
	run("Enlarge...", "enlarge=-2");
	setBackgroundColor(0, 0, 0);
	run("Clear Outside");
	run("Select None");
	run("Analyze Particles...", "size="+taille_mini+"-"+taille_maxi+" circularity=0.00-1.00 show=Nothing exclude add");
	selectWindow("Binary watershed lines");
	close();
	selectWindow("nb");
	close();
	selectWindow(photo);
	run("Select None");
	roiManager("Show None");
	roiManager("Show All");
	//roiManager("Measure");
	setTool("rectangle");
	}
	
	
macro 'AutoSegment Action Tool Options'	
	{
		Dialog.create("Limites de taille de cellule");
    Dialog.addMessage("Tailles limite des cellules");
    Dialog.addNumber("Mini:", taille_mini);
    Dialog.addNumber("Maxi:", taille_maxi);
    Dialog.addNumber("Filtre:", taille_filtre);
    Dialog.show();
    taille_mini=Dialog.getNumber();
    taille_maxi=Dialog.getNumber();;
    taille_filtre=Dialog.getNumber();;;
	}	
	






macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/PHIV_Meristem_toolset.txt");
}





//////////////////////////Shortcut Key//////////////////////////////////////////


macro "ROI Delete [n0]"{
	run("Make Inverse");//protege si pas de selection!
	run("Make Inverse");
roiManager("Delete");
}


//Rassemble 2 ROI en une seule

macro "ROI Combine [n1]"{
		run("Make Inverse");
		run("Make Inverse");
		tabCombine=newArray(-1,-1); //tableau des index des roi a combiner
		tabCombine[0]=roiManager("index");
		run("Add Selection...");
		run("Overlay Options...", "stroke=magenta width=1 fill=none apply");
		waitForUser("Combiner", "Selection a ajouter");
		run("Make Inverse");
		run("Make Inverse");
		tabCombine[1]=roiManager("index");
		roiManager("Select", tabCombine);
		roiManager("Combine");
		run("Enlarge...", "enlarge=1"); //recolle les morceaux
		run("Enlarge...", "enlarge=-1");
		roiManager("Add");
		roiManager("Deselect");
		if (tabCombine[0]>tabCombine[1]){
			roiManager("Select", tabCombine[0]);
			roiManager("Delete");
			roiManager("Select", tabCombine[1]);
			roiManager("Delete");
			}
			else{
			roiManager("Select", tabCombine[1]);
			roiManager("Delete");
			roiManager("Select", tabCombine[0]);
			roiManager("Delete");
				
			}
			
			run("Remove Overlay");
			roiManager("Show All");
		}
}


//Coupe une ROI en 2

macro "ROI Split [n2]"{
	run("Line Width...", "line=2");
wROI=roiManager("index");
run("Add Selection...");
run("Overlay Options...", "stroke=magenta width=1 fill=none apply");
run("Select None");
setTool("line");
waitForUser("Couper", "tracer la ligne de séparation");
roiManager("Add");
cutROI=roiManager("count")-1;
run("Select All");
//origID=getImageID();
setBatchMode(true) ;
rename("orig");
run("Duplicate...", "title=Cut");
run("8-bit");
roiManager("Select", wROI);
setBackgroundColor(0, 0, 0);
setForegroundColor(255, 255, 255);
run("Fill", "slice");
run("Clear Outside");
roiManager("Select", cutROI);
run("Clear", "slice");
setAutoThreshold("Default");
run("Convert to Mask");
//run("Draw");
//run("Watershed");
run("Invert");
run("Select None");
run("Analyze Particles...", "size=0-Infinity circularity=0.00-1.00 show=Nothing add");
roiManager("Select", cutROI);
roiManager("Delete");
roiManager("Select", wROI);
roiManager("Delete");
selectWindow("Cut");
close();	
selectWindow("orig");
setBatchMode(false);
run("Remove Overlay");
roiManager("Show None");
roiManager("Show All");
run("Line Width...", "line=1");
	
	

}


//////////////////////////////////Fonctions////////////////////////////////////

function TypeSelect(label,nbcell,color) {
	if (selectionType()==-1){
	exit("Vous devez sélectionner une cellule");
	}
roiManager("Rename", label+nbcell);
run("Overlay Options...", "stroke=magenta width=1 fill="+color);
run("Add Selection...");
//run("Select None");
nbcell=nbcell+1;  
return nbcell;  
}


function Roi_Select(nom){
n = roiManager("count");
indice=-1;
for (i=0; i<n; i++) {
nameRoi=call("ij.plugin.frame.RoiManager.getName", i);
if (nameRoi==nom) indice=i;
}
if (indice!=-1) roiManager("Select", indice);
}



