// PHIV Shorgo Tool Set version allégée
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter la segmentation des coupes de sorgho

/*
Installer loci bio formats
http://www.loci.wisc.edu/files/software/loci_tools.jar
Installer Colour Deconvolution
http://www.dentistry.bham.ac.uk/landinig/software/cdeconv/cdeconv.html
*/

/*
		

Zonation --> Delimitation de l objet Total, puis de la zone externe ou interne
	si la coupe est incomplete permet de supprimer ou garder un polygone qui passe par le centre de gravite
	si la coupe est vide au centre permet de selectionner la zone vide
	Option clic droit --> taille du filtre
		Filtre Total : taille du filtre gaussien pour attenuer les details
		Filtre Zone : taille du filtre gaussien pour attenuer les details

Faisceaux_zone externe --> comptage des faisceaux dans la zone externe sur une portion de l image
	par ajout de selection point via le raccourci clacier [1]
	
		
Sclerenchyme_zone externe--> delimitation du sclerenchyme dans la zone extrene apres choix d un seuil et d une methode de seuillage
	Option clic droit 
		Sigma Gauss : taille du filtre gaussien pour attenuer les details
		Pixels lissage : taille du lissage par dilatation erosion des selections : taille du lissage par dilatation erosion des selections
		Methode de seuillage
			Deconv Color : utilisation de la couche rouge d apres le plugon Color Deconvolution
			Blue : utilisation de la couche Bleue apres decomposition RGB
			
			
			
A FAIRE Sclerenchyme_zone interne --> delimitation du sclerenchyme dans la zone extrene apres choix d un seuil et d une methode de seuillage
	Option clic droit 
		Sigma Gauss : taille du filtre gaussien pour attenuer les details
		Pixels lissage : taille du lissage par dilatation erosion des selections : taille du lissage par dilatation erosion des selections
		Methode de seuillage
			Deconv Color : utilisation de la couche rouge d apres le plugon Color Deconvolution
			Blue : utilisation de la couche Bleue apres decomposition RGB

Faisceaux_zone interne --> comptage des faisceaux dans la zone interne en fonction des parametres
	correction par ajout de selection point via le raccourci clacier [1]
	ou par suupression de la selection via le raccourci clacier [0]

Couleur_Parenchyme	--> Selection des zones bleues par seuillage sur la couche Hue du HSB  	
	Option clic droit
		Sigma Gauss : taille du filtre gaussien pour attenuer les details
		Pixels lissage : taille du lissage par dilatation erosion des selections	

Resultats_R --> resultats formates pour fichier R et sauvegarde le roi manager
		comptage des faisseaux du centre
	clic droit permet d avoir les resultats sur tout un dossier




Raccourcis clavier au pave numerique
0 supprimme une selection
1 ajoute une selection



*/

macro "AutoRun"{
	setTool("rectangle");
	setForegroundColor(255, 255, 255);//premier plan blanc
	setBackgroundColor(0,0,0);// fond noir
	run("Set Measurements...", "area shape display redirect=None decimal=3");
	requires("1.49p");
}
/////////////////////variables glogales////////////////////////////

 var nom="";
 var dir=""


//var genotype="";
var etat="";
//var globales zones
var seuil_total=newArray(0,164);
var seuil_zone=newArray(0,117);
var param_zone=newArray(10,10,3);
// scerenchyme de zone exterieur
var seuil_scl_zone=newArray(0,40);
var seuil_fx=newArray(150,255);
var seuil_method_scl_zone="Deconv Color";//seuil_method_scl="Blue";
var param_scl_zone=newArray(3,3);	
//var globales faisceaux interieurs
//var noise_find_max_fx=50;
var param_fx=newArray(5,30,100); //(sigma,noise,enlarge)

var coef_centre=0.5;//fxi au centre ou pas!


// parenchyme 
var seuil_par=newArray(95,255);
var param_par=newArray(3,5);	


//Roi raccourcis corrections
var tabCombine=newArray(-1,-1); //tableau des index des roi a combiner
var countCombine=0;

// ndpi batch
var numserie=3; //a verifier avec plugin-loci-bioformat importer

//validations

var valid_fx_ext=0;
var valid_fx_int=0;


var title1 = "Resultats R";
var title2 = "["+title1+"]";
var fe = title2;


/////////////////////////////////////////////////Zonation///////////////////////////////////////////////////////////////////////////////

macro "Zonation Action Tool - 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"{
	origid=getImageID();
	nom=getInfo("image.filename");
	dir=getInfo("image.directory");
	run("Select None");
	Dialog.create("Etat de la coupe");
	items = newArray("Complete", "Incomplete");
	Dialog.addRadioButtonGroup("Coupe", items, 2, 1, "Complete");
	Dialog.show;
	etat=Dialog.getRadioButton;
	//Total
	run("Duplicate...", "title=nb");
	run("8-bit");
	run("Gaussian Blur...", "sigma="+param_zone[0]);
	Validation_surface("Total",seuil_total);
	////incomplet
	if(etat=="Incomplete"){
		roiManager("Select", 0);
		centre_gravite();
		run("Select None");
		roiManager("Show None");
		setTool("polygon");
		title = "Portion";
		msg = "Tracer un polygone avec le deuxieme point au centre de gravite ";
		waitForUser(title, msg);
		RoiAdd("temp");
		Roi.getCoordinates(xpoints, ypoints);
		xpoints=Array.trim(xpoints,3);
		ypoints=Array.trim(ypoints,3);
		makeSelection("angle",xpoints,ypoints);
		RoiAdd("Angle");
		/*List.setMeasurements;
		facteur_correction=List.getValue("Angle");	
		//facteur_correction=mesure_angle();*/
		Dialog.create("Portion");
		items = newArray("Garder", "Supprimer");
		Dialog.addRadioButtonGroup("Selection a :", items, 2, 1, "Garder");
		Dialog.show;
		etat_portion=Dialog.getRadioButton;
		if(etat_portion=="Supprimer"){
			roiManager("Select", 1);
			run("Make Inverse");
			roiManager("Update");			
		}
		roiManager("Select", newArray(0,1));
		roiManager("AND");
		RoiAdd("Portion");
		roiManager("Select", 1);
		roiManager("Delete");
		
		
	}

	

	//Zone
	selectImage(origid);
	run("Select None");
	run("Duplicate...", "title=Zone");
	ncount=roiManager("count");
	for(i=0;i<ncount;i++){
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (nom_item=="Total")roiManager("Select", i);
		if (nom_item=="Portion")roiManager("Select", i);
	}
	run("Make Inverse");
	run("Fill", "slice");
	run("Make Inverse");
	run("Select None");
	run("Split Channels");
	selectWindow("Zone (red)");
	close();
	selectWindow("Zone (green)");
	close();
	selectWindow("Zone (blue)"); //couche bleue
	rename("Zone");
	run("Gaussian Blur...", "sigma="+param_zone[1]);
	Validation_surface("Zone",seuil_zone);
	Dialog.create("Zone selectionnee");
	items = newArray("Zone interne", "Zone externe");
	Dialog.addRadioButtonGroup("Selection", items, 1, 2, "Zone interne");
	Dialog.show;
	zone=Dialog.getRadioButton;
	ncount=roiManager("count");
	if (zone=="Zone interne"){
		roiManager("Deselect");
		roiManager("Select", newArray(0,ncount-1));
		roiManager("XOR");
		roiManager("Add");
		roiManager("Deselect");
		roiManager("Select", ncount-1);
		roiManager("Delete");
		roiManager("Select", ncount-1);
	  roiManager("Rename", "Zone");	
	}
	
	Dialog.create("Centre vide");
	items = newArray("Vide", "Plein");
	Dialog.addRadioButtonGroup("Centre", items, 2, 1, "Vide");
	Dialog.show;
	centre=Dialog.getRadioButton;
	
	if(centre=="Vide"){
		selectImage(origid);
		run("Select None");
		run("Duplicate...", "title=Vide");
		ncount=roiManager("count");
		for(i=0;i<ncount;i++){
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (nom_item=="Portion"){
				roiManager("Select", i);
				setBackgroundColor(0, 0, 0);
				run("Clear Outside");
			
				}
		}
	
		run("Wand Tool...", "mode=Legacy tolerance=20");
		setTool("wand");
		waitForUser("Dechirure","Selectionner le trou du centre avce la baguette");
		RoiAdd("Vide");
		n = roiManager("count");
		run("Wand Tool...", "mode=Legacy tolerance=0");
		close();
		selectImage(origid);
		roiManager("Select", n-1);
		setTool("brush");
		call("ij.gui.Toolbar.setBrushSize", 50); 
		waitForUser(zone,"Correction de la selection");
	//run("Interpolate", "interval=1");//voir feret!
	roiManager("Update");
	



	
	roiManager("Deselect");
	run("Select None");	
}
	
	selectImage(origid);
	roiManager("Deselect");
	roiManager("Show All");
	run("Select None");
	setTool("rectangle");
	
	}


macro 'Zonation Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    
    Dialog.create("Zonation");
    Dialog.addMessage("Tailles des filtres");
    Dialog.addNumber("Filtre Total:", param_zone[0]);
    Dialog.addNumber("Filtre Zone:", param_zone[1]);
    Dialog.show();
    param_zone[0]=Dialog.getNumber();
    param_zone[1]=Dialog.getNumber();;
    //param_zone[2]=Dialog.getNumber();;;
      
  	}

	
//////////////////////////////////Faisceaux_ext///////////////////////////////////////////////////////////////////
macro "Faisceaux_ext Action Tool - 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"{

	origid=getImageID();
	ncount=roiManager("count");
	run("Select None");
	run("Duplicate...", "title=fx");
	total_fait=0;
	for(i=0;i<ncount;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			
						if (nom_item=="Total"){
							total_fait=1;
							centre_gravite();
							run("Select None");
							roiManager("Show None");
							setTool("polygon");
							title = "Portion";
							msg = "Tracer un polygone avec le deuxieme point au centre de gravite ";
							waitForUser(title, msg);
							setBackgroundColor(255, 255, 255);
							setForegroundColor(255, 255, 255);
							run("Clear Outside");
							RoiAdd("temp");
							index_temp=roiManager("count");
							Roi.getCoordinates(xpoints, ypoints);
							xpoints=Array.trim(xpoints,3);
							ypoints=Array.trim(ypoints,3);
							makeSelection("angle",xpoints,ypoints);
							RoiAdd("AngleFx");
							
						}
						if (nom_item=="Zone"){
							run("Clear Outside");
							index_zone=i;
						}
					}
		if (total_fait==0){
			close();
			 exit("Zones a determiner avant");
			} 		
					index_temp--;
		roiManager("Select", newArray(index_temp,index_zone));
		roiManager("AND");
		run("To Selection");
		roiManager("Deselect");
		roiManager("Select", index_temp);
		roiManager("Delete");
		run("Select None");
									
		setTool("point");
		valid_fx_ext=1;		
							
							
	title = "Comptage des faisceaux ";
	msg = "Pointer chaque faisceaux et appuyer sur la touche 1";						
	waitForUser(title, msg);						
	close();				
	selectImage(origid);
	roiManager("Deselect");
	roiManager("Show All");
	setTool("rectangle");
	valid_fx_ext=0;	
}
/////////////////////
macro 'Faisceaux_ext Action Tool Options'  {

		
	}
	



	


//////////////////////////////////Faisceaux_int///////////////////////////////////////////////////////////////////


macro "Faisceaux_int Action Tool - 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"{
	RoiDelete ("Fxi");	
	RoiDelete ("Fxi_c");
	getPixelSize(unit, pixelWidth, pixelHeight);
	origid=getImageID();
	run("Select None");
	run("Duplicate...", "title=fx");
	run("8-bit");
	n=roiManager("count");
	for(i=0;i<n;i++){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (nom_item=="Total"){
			setBackgroundColor(255,255,255);// fond blanc
			run("Enlarge...", "enlarge=-50 pixel");
			run("Clear Outside");			
			}
		if (nom_item=="Portion"){
			setBackgroundColor(255,255,255);// fond blanc
			run("Clear Outside");			
			}
		if (nom_item=="Zone"){
			setForegroundColor(255,255,255);// 
			run("Clear");			
			}
		
		}
	roiManager("Deselect");
	run("Select None");
	setBackgroundColor(0,0,0);// fond noir
	Blur(param_fx[0]);
	run("Find Maxima...", "noise="+param_fx[1]+" output=[Point Selection] light");
	run("Enlarge...", "enlarge="+param_fx[2]);
	norig=roiManager("count");
	RoiAdd("fx");
	roiManager("Split");
	roiManager("Delete");
	nfinal=roiManager("count");
	for(i=norig;i<nfinal;i++){
		roiManager("Select", i);
		//RoiRename("Fxi",i);
		roiManager("Rename", "Fxi");
		
	}
	selectWindow("fx");
	close();
	selectImage(origid);
	roiManager("Deselect");
	roiManager("Show All with labels");
	setTool("point");
	valid_fx_int=1;			
	title = "Validation des faisceaux de la zone interne";
	msg = "Pour ajouter faire une selection et appuyer sur la touche 1	\nPour enlever selectionner et appuyer sur la touche 0\nUne fois la correction finie appuyer sur OK";						
	waitForUser(title, msg);
	valid_fx_int=0;
	edm_roi("Total");
	
	ncount=roiManager("count");
	for(i=0;i<ncount;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (startsWith(nom_item, "Fxi")){
							selectWindow("EDM");
							roiManager("Select", i);
							if (selectionType()==10 )	{
								run("Enlarge...", "enlarge="+(param_fx[2]/pixelWidth));
								roiManager("Update");							
							}
							//roiManager("Select", i);
							getStatistics(area, mean, min, max, std, histogram);
							if (mean<coef_centre ) {
								roiManager("Set Color", "#00ff00"); // rgb (vert)
								roiManager("Rename", "Fxi_c");
								
							}
							
							
						}
			
			
			
			
			
			
			
		}
	
	
	
	
	
	
	selectWindow("EDM");
		close();
	
	roiManager("Show All");
	
}
/////////////////////
macro 'Faisceaux_int Action Tool Options'  {
		Dialog.create("Faisceaux");
    Dialog.addMessage("Tailles des filtres");
    Dialog.addNumber("Filtre Gausssien:", param_fx[0]);
    Dialog.addNumber("Bruit Maxima :", param_fx[1]);
    Dialog.addNumber("Enlarge :", param_fx[2]);
	Dialog.addNumber("Fx au centre (0-1) :", coef_centre);
    Dialog.show();
    param_fx[0]=Dialog.getNumber();
    param_fx[1]=Dialog.getNumber();;
   param_fx[2]=Dialog.getNumber();;;
	coef_centre=Dialog.getNumber();;;;
		
	}
	
/////////////////////////////////////////////Sclerenchyme_ext///////////////////////////////////////////////////////////
macro "Sclerenchyme_ext Action Tool - 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"{
	origid=getImageID();
	run("Select None");
	index_portion=-1;
	
	n=roiManager("count");
	for(i=0;i<n;i++){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (nom_item=="Total")index_total=i;
		if (nom_item=="Zone")index_zone=i;
		if (nom_item=="Portion")index_portion=i;
		}
	//clear outside zone
	run("Select None");
	run("Duplicate...", "title=temp");
		run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
		run("Colour Deconvolution", "vectors=[FastRed FastBlue DAB]");
		selectWindow("temp-(Colour_3)");
		close();
		selectWindow("temp-(Colour_2)");
		close();
		selectWindow("Colour Deconvolution");
		close();
		selectWindow("temp");
		close();
		selectWindow("temp-(Colour_1)");
		//imageCalculator("Add create", "scl-(Colour_1)","xyl");
		rename("Colour_deconv_red");
		run("Select None");
		//run("Duplicate...", "title=scl");
	if(index_portion!=-1){
		run("Select None");
		run("Invert");
		roiManager("Select", index_portion);
		run("Clear Outside");
		run("Select None");
		run("Invert");	
	}
	
			
	
	
	Blur(param_scl_zone[0]);
	ChoixSeuils("Sclerenchyme",seuil_scl_zone);
	run("Create Selection");
	run("Enlarge...", "enlarge="+param_scl_zone[1]+" pixel");
	run("Enlarge...", "enlarge=-"+param_scl_zone[1]+" pixel");
	roiManager("Add");
	n = roiManager("count");
	index_scl_tot=n-1;
	roiManager("Select", newArray(index_zone,index_scl_tot));
	roiManager("AND");
	RoiAdd("Scl_Zone_e");
	n = roiManager("count");
	index_scl_zone_e=n-1;
	roiManager("Select", newArray(index_scl_tot,index_scl_zone_e));
	roiManager("XOR");
	RoiAdd("Scl_Zone_i");
	roiManager("Select", index_scl_tot);
	roiManager("Delete");
	close();
	//selectWindow("Colour_deconv_red");
	//close();
	selectImage(origid);
	roiManager("Deselect");
	roiManager("Show None");
	roiManager("Show All");
	//setTool("rectangle");
		
}

macro 'Sclerenchyme_ext Action Tool Options'  {
	  Dialog.create("Sclerenchyme dans la zone externe");
	  items = newArray("Deconv Color", "Blue");
  	Dialog.addNumber("Sigma Gauss:", param_scl_zone[0]);
		Dialog.addNumber("Pixels lissage:", param_scl_zone[1]);
		Dialog.addRadioButtonGroup("Methode de seuillage", items, 1, 2, seuil_method_scl_zone);
    Dialog.show();    
    param_scl_zone[0]=Dialog.getNumber();
    param_scl_zone[1]=Dialog.getNumber();; 
    seuil_method_scl_zone=Dialog.getRadioButton; 
	
}

	
	
	

//////////////////////////////////////Parenchyme_couleur///////////////////////////////////////////

macro "Couleur_Parenchyme Action Tool - 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"{
		
		RoiDelete ("Parenchyme_bleu");
		setTool("rectangle");
		origid=getImageID();
		
		run("Select None");
		run("Duplicate...", "title=fx");
		run("8-bit");
		setBackgroundColor(0,0,0);// fond noir
		run("Invert");
		zone_interne();
		
		Blur(param_fx[0]);
		ChoixSeuils("Faisceaux dans zone interne ",seuil_fx);
		run("Create Selection");
		RoiAdd("Fx_Zone_Int");
		close();
		
		
		
		
		selectImage(origid);
		run("Select None");
		run("Duplicate...", "title=hsb");
		run("HSB Stack");
		run("Next Slice [>]");
		run("Delete Slice");
		run("Next Slice [>]");
		run("Delete Slice");
		run("Invert");
		n=roiManager("count");
		zone_interne();
		Blur(param_par[0]);
		ChoixSeuils("Zones bleues dans le parenchyme ",seuil_par);
		run("Create Selection");
		run("Enlarge...", "enlarge=-"+param_par[1]+" pixel");
		run("Enlarge...", "enlarge="+(2*param_par[1])+" pixel");
		run("Enlarge...", "enlarge=-"+param_par[1]+" pixel");
		roiManager("Add");
		n = roiManager("count");
		roiManager("Select", n-1);
		roiManager("Rename", "Parenchyme_bleu");
		close();
		selectImage(origid);
		roiManager("Deselect");
		roiManager("Show All");
		//setTool("rectangle");
}	


macro 'Couleur_Parenchyme Action Tool Options'  {
	  Dialog.create("Couleur_Parenchyme");
  	Dialog.addNumber("Sigma Gauss:", param_par[0]);
		Dialog.addNumber("Pixels lissage:", param_par[1]);
		Dialog.show();    
    param_par[0]=Dialog.getNumber();
    param_par[1]=Dialog.getNumber();; 
    	
}






/////////////////////////////////////////////////////Resultats R/////////////////////////////////////////////////////////////////////////////////////

macro "Resultats_R Action Tool - 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"{
		
		origid=getImageID();
		dir=getInfo("image.directory");
		nom=getTitle();
		nom=replace(nom,".tif","");
		mesure_r();
		//roiManager("Save", dir+nom+"-RoiSet.zip");//sauvegarde de roi manager
		//run("Remove Overlay");
		//run("Save");	
		selectImage(origid);
		roiManager("Deselect");
		roiManager("Show All");	
		run("Select None");		
}

macro 'Resultats_R Action Tool Options'  {

		dir = getDirectory("Choisir un repertoire source");
		list = getFileList(dir);
		setBatchMode(true);
		for (i=0; i<list.length; i++) {												
			 if (endsWith(list[i], ".zip")){	
			 				roiManager("Open", dir+list[i]);										//condition sur l extension tif
			 			 nom=substring(list[i],0,indexOf(list[i],"-"));		//nom sans l extension
			 			open(dir + nom+".tif");	
			 				mesure_r();
			 				close();
			 				roiManager("Reset");
			}

}
}


////////////////////////////////////////////////////////////////////////////////
macro "SaveRoi Action Tool - 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"{

roiManager("Deselect");
showMessage("Sauvegarde du RoiManager");
roiManager("Save", dir+nom+".zip");


roiManager("Delete");


}


///////////////////////////////////////////////////????????????????????????????????????????????????????

macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets\\PHIV_Miscanthus_toolset.txt");
}







//////////////////////////Shortcut Key/////////////////

//supression de selection 
macro "ROI Delete [n0]"{
	if(selectionType()!=-1 && selectionType()!=10){
	
		roiManager("Delete");
		run("Select None");
	}
		
}


//ajout de selection
//ajout de selection

macro "ROI Ajoute [n1]"{
	
	if (valid_fx_ext==1){
		if(selectionType()==10){
		RoiAdd("Fxe");
		//roiManager("Rename", "Fxe");
		roiManager("Set Color", "#00ff00");//green		
		}
	}
else if (valid_fx_int==1){

		if(selectionType()==10){
		RoiAdd("Fxi");
		roiManager("Set Color", "#ffff00");//green	
		}			
	}
	roiManager("Deselect");
		roiManager("Show All");	
		run("Select None");		
}



//Zoom to selection

macro "Zoom [n3]"{
run("To Selection");
}
	

	
	
	/////////////////////////////////////////////////////FUNCTIONS///////////////////////////////////////////////////
var function RoiAdd(nom) {
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);	
	roiManager("Rename", nom);
}

var function RoiCompte(string){
	max=0;
	n=roiManager("count");
	for(i=0;i<n;i++){
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (startsWith(nom_item, string)){
				num=parseInt(replace(nom_item,string,""));
				if (max<num) max=num;
			}
		}
		return max+1;	
}


	///////////
var function faisseaux() {
	run("Duplicate...", "title=nb");
	run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
	run("Split Channels");
	selectWindow("nb (red)");
	close();
	selectWindow("nb (green)");
	close();
	selectWindow("nb (blue)");
	rename("fx");
	setBackgroundColor(255,255,255);
	zone_interne();
	setBackgroundColor(0,0,0);
}

var function sclerenchyme1() {
	colour_deconv("scl");

}

	///////////
var function sclerenchyme2() {
		run("Duplicate...", "title=scl");
		run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
		run("Split Channels");
		selectWindow("scl (red)");
		close();
		selectWindow("scl (green)");
		close();
		selectWindow("scl (blue)");
		rename("scl");
		//zone_interne();
	

}

var function colour_deconv(name){
	
		run("Select None");
		run("Duplicate...", "title=temp");
		run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
		run("Colour Deconvolution", "vectors=[FastRed FastBlue DAB]");
		selectWindow("temp-(Colour_3)");
		close();
		selectWindow("temp-(Colour_2)");
		close();
		selectWindow("Colour Deconvolution");
		close();
		selectWindow("temp");
		close();
		selectWindow("temp-(Colour_1)");
		//imageCalculator("Add create", "scl-(Colour_1)","xyl");
		rename("Colour_deconv_red");
		run("Select None");
		run("Duplicate...", "title="+name);
	
	
}




///////////////////////////

var function Blur(sigma){
	run("Gaussian Blur...", "sigma="+sigma);
}


	
	var function Seuil(seuils){
	setThreshold(seuils[0], seuils[1]);
	run("Convert to Mask");
}

function RoiDelete (nom){
	ncount=roiManager("count");
	for(i=ncount-1;i>=0;i--){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (startsWith(nom_item, nom)) roiManager("Delete");
		}


}


function Validation_surface(zone,seuils){
	run("Threshold...");
	setThreshold(seuils[0], seuils[1]);
	run("Threshold...");	
	setTool("wand");
	title = zone;
	msg = "Regler le seuil puis selectionner avec la baguette";
	waitForUser(title, msg);
	getThreshold(lower, upper);
	seuils[0]=lower;
	seuils[1]=upper;
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);
	roiManager("Rename", zone);
	close();
  selectImage(origid);
  roiManager("Select", n-1);
	setTool("brush");
	call("ij.gui.Toolbar.setBrushSize", 50); 
	waitForUser(zone,"Correction de la selection");
	//run("Interpolate", "interval=1");//voir feret!
	roiManager("Update");	
	roiManager("Deselect");
	run("Select None");	
	setTool("rectangle");
}

var function ChoixSeuils(titre,seuils){
	run("Threshold...");
	setThreshold(seuils[0], seuils[1]);
	run("Threshold...");
	waitForUser(titre,"Reglage du Seuil");
	getThreshold(lower, upper);
	seuils[0]=lower;
	seuils[1]=upper;
	}


var function zone_interne(){
		n=roiManager("count");
		for(i=0;i<n;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (nom_item=="Total") run("Clear Outside");
			if (nom_item=="Vide") run("Clear");
			if (nom_item=="Portion") run("Clear Outside");
			if (nom_item=="Zone") run("Clear");	
			if (nom_item=="Fx_Zone_Int") run("Clear");	
		}	
		run("Select None");	
}


var function raz(titre){
	if (roiManager("count")>0){
		roiManager("Deselect");
		roiManager("Delete");
		}	
	run("Remove Overlay");
	run("Clear Results");
	print ("\\Clear");
	/*select_active=1;
	id_act=getImageID();
	if (getTitle()==titre) select_active=0;
  names = newArray(nImages);
	for (i=0; i < names.length; i++){
        selectImage(i+1);
         if (getTitle()==titre) close();
       } 
   if(select_active==1) selectImage(id_act);
   run("Remove Overlay");*/
}



var function clear_roi(){
	valid_fx_ext=0;
	valid_autosegment=0;
	Num_Fxi="";
	n=roiManager("count");
	for(i=n-1;i>-1;i--){
		roiManager("Select", i);
		nom_item=Roi.getName;
		if (startsWith(nom_item, "Delete")) roiManager("Delete");
	}
	roiManager("Deselect");
	roiManager("Show None");
	roiManager("UseNames", "true");
	roiManager("Show All");
	run("Select None");
}


function NA(valeur){
	if (valeur==-1)valeur="NA";
	return valeur;
}

function deux_decimal(valeur){
	if (valeur!=-1){
		valeur= round(valeur*100)/100;
	}
	else valeur="NA";
	return valeur;
}


function angle2polygon (){
	if(selectionType() == 8){
		List.setMeasurements;
		angle=List.getValue("Angle");
		//y=ax+b;	
		Roi.getCoordinates(xpoints, ypoints);
		a1=(ypoints[1]-ypoints[0])/(xpoints[1]-xpoints[0]);
		b1=(ypoints[1]-a1*xpoints[1]);
		a2=(ypoints[1]-ypoints[2])/(xpoints[1]-xpoints[2]);
		b2=(ypoints[1]-a2*xpoints[1]);
		print (a1);
		print(b1);
		print (a2);
		print(b2);
		if(xpoints[0]<xpoints[1]) x1=-10000;
		else x1=10000;
		y1=a1*hx1+b1;
		makeLine(hx, hy, xpoints[1], ypoints[1]);
		hy=5000;
		hx=(hy-b)/a;
		makeLine(hx, hy, xpoints[0], ypoints[0]);
		
	}
	else {
		setTool("angle");
		title = "Zone a supprimer";
		msg = "Selectionner la zone a enlever avec l outil angle";
		waitForUser(title, msg);
		//angle2polygon ();
	}
	
	
}

function centre_gravite(){
	run("Set Measurements...", "area centroid shape display redirect=None decimal=3");
	getPixelSize(unit, pixelWidth, pixelHeight);
	run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
	List.setMeasurements;
	xg=List.getValue("X");
	yg=List.getValue("Y");
	run("Select None");
	makePoint(xg, yg);
	run("Set Scale...", "distance=1 known=&pixelWidth pixel=1 unit=&unit");
	run("Add Selection...");
}

function mesure_angle(){
	Roi.getCoordinates(xpoints, ypoints);
	xpoints=Array.trim(xpoints,3);
	ypoints=Array.trim(ypoints,3);
	makeSelection("angle",xpoints,ypoints);
	List.setMeasurements;
	return List.getValue("Angle");		
}

function portion_roi(i,index_portion,nom){
	roiManager("Select", newArray(i,index_portion));
	roiManager("AND");
	if(selectionType()!=-1) RoiAdd(nom+"_p");
}

function edm_roi(roi_item){
			indextotal=0;
			origid=getImageID();
			run("Select None");
			run("Duplicate...", "title=map");
			run("8-bit");
			n=roiManager("count");
			for(i=0;i<n;i++){
				roiManager("Select", i);
				nom_item=call("ij.plugin.frame.RoiManager.getName", i);
				if (nom_item==roi_item) indextotal=i;
			}
			roiManager("Select", indextotal);
			setBackgroundColor(0, 0, 0);
			run("Clear Outside");
			setForegroundColor(255, 255, 255);
			run("Fill", "slice");
			roiManager("Deselect");
			run("Select None");
			//run("Invert");
			run("Options...", "iterations=1 count=1 black edm=16-bit");
			run("Distance Map");
			run("Invert");
			getStatistics(area, mean, min, max, std, histogram);
			run("32-bit");
			run("Divide...", "value="+max);
			run("Enhance Contrast...", "saturated=0.3");
			rename("EDM");
			selectWindow("map");
			close();






}


function mesure_r(){
origid=getImageID();
getPixelSize(unit, pixelWidth, pixelHeight);
//print(pixelWidth);






	facteur_correction_complet=1;
	facteur_correction_fxe=1;
	area_total=-1;
	diam=-1;
	area_portion=0;
	angle_portion=0;
	area_zone1=-1;
	pourcent_zone1=0;
	area_zone2=-1;
	pourcent_zone2=0;
	angle_fxe=0;
	nb_fxe=0;
	densite_fxe=0;
	nb_fxi=0;
	nb_fxi_centraux=0;
	densite_fxi=0;
	area_scl_e=-1;
	area_scl_i=-1;
	pourcent_scl_e=0;
	pourcent_scl_i=0;
	area_blue=-1;
	area_parenchyme=-1;
	area_Fx_Zone_Int=-1;
	area_vide=0;
	pourcent_blue=0;
		
	ncount=roiManager("count");
	for(i=0;i<ncount;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			
						if (nom_item=="Total"){
						
							getStatistics(area);
							area_total=area;////////////////////////////////////////////area_total
							run("Set Measurements...", "area centroid feret's redirect=None decimal=3");
							List.setMeasurements;
							diam=List.getValue("Feret");////////////////diam
							}
						if (nom_item=="Angle"){
						
							List.setMeasurements;
							angle_portion=List.getValue("Angle");///////////////angle
							}															
						if (nom_item=="Portion"){
						
							getStatistics(area);							
							area_portion=area;////////////////////////////////////////////area_portion
							}
						if (nom_item=="Vide"){
						
							getStatistics(area);							
							area_vide=area;////////////////////////////////////////////area_vide
							
							}
							
						if (nom_item=="Zone"){
						
							getStatistics(area);
							area_zone1=area;////////////////////////////////////////////surfzone1
							//print(area_zone1);
							}
						if (nom_item=="AngleFx"){
						
							List.setMeasurements;
							angle_fxe=List.getValue("Angle");///////////////angle fx
							}
										
						if (nom_item=="Scl_Zone_e"){
						
							getStatistics(area);
							area_scl_e=area;////////////////////////////////////////////area_scl
							}
						
						if (nom_item=="Scl_Zone_i"){
						
							getStatistics(area);
							area_scl_i=area;////////////////////////////////////////////area_scl
							}
						
						if (nom_item=="Parenchyme_bleu"){
						
							getStatistics(area);
							area_blue=area;////////////////////////////////////////////area_blue
							}
						if (nom_item=="Fx_Zone_Int"){
						
							getStatistics(area);
							area_Fx_Zone_Int=area;////////////////////////////////////////////area_blue
							}
						
						
						
						if (startsWith(nom_item, "Fxe")){
						
							nb_fxe++;////////////////////////////////////////////nb fx ext
						}
						if (startsWith(nom_item, "Fxi")){
							nb_fxi++;
							if (startsWith(nom_item, "Fxi_c")) nb_fxi_centraux++;					
							
							
							
						}		

			}	
			
			
		
		
		
		///////////////facteur_correction en fonction de angle
		if(angle_portion!=0){
			if (area_portion>(area_total/2)) facteur_correction_complet=360/((360-angle_portion));
			else facteur_correction_complet=360/angle_portion;
		}
		if(angle_fxe!=0){
			 facteur_correction_fxe=360/angle_fxe;
		}
								//showMessage ("Facteur de correction = "+facteur_correction);
		area_total=deux_decimal(area_total/1000000);
		diam=deux_decimal(diam/1000);
		area_portion=deux_decimal(area_portion/1000000);
		area_zone1=deux_decimal(area_zone1/1000000);
		//area_zone2=area_total-area_zone1;
		area_scl_e=deux_decimal(area_scl_e/1000000);
		area_scl_i=deux_decimal(area_scl_i/1000000);
		area_blue=deux_decimal(area_blue/1000000);
		area_Fx_Zone_Int=deux_decimal(area_Fx_Zone_Int/1000000);
		area_vide=deux_decimal(area_vide/1000000);
		
		
		if (facteur_correction_complet==1)area_portion=area_total;					
		area_total_c=deux_decimal(area_portion*facteur_correction_complet);
		angle_portion=deux_decimal(angle_portion);
		area_zone2=area_portion-area_zone1;
		
		
		//print (area_zone2);
		area_parenchyme=area_zone2-area_Fx_Zone_Int-(area_vide);
		pourcent_zone2=deux_decimal(100*(area_zone2/area_portion));
		pourcent_zone1=deux_decimal(100*(area_zone1/area_portion));
		pourcent_scl_e=deux_decimal(100*(area_scl_e/area_zone1));
		pourcent_scl_i=deux_decimal(100*(area_scl_i/area_parenchyme));
		
		nb_fxe_c=round(nb_fxe*facteur_correction_fxe);
		densite_fxe=deux_decimal(nb_fxe_c/(area_zone1*facteur_correction_complet));
		nb_fxi_c=round(nb_fxi*facteur_correction_complet);
		nb_fxi_centraux_c=round(nb_fxi_centraux*facteur_correction_complet);
		densite_fxi=deux_decimal(nb_fxi/area_zone2);
		pourcent_blue=deux_decimal(100*(area_blue/(area_parenchyme)));
		facteur_correction_complet=deux_decimal(facteur_correction_complet);
		facteur_correction_fxe=deux_decimal(facteur_correction_fxe);
		
			
		infos=split(getMetadata("Info"),"@");
	if (infos.length>1){
		genotype=infos[0];
		etat=infos[1];
		
	}

		if( !isOpen("Resultats R")){
		run("Table...", "name="+title2+" width=1400 height=600");
//print(fe, "\\Headings:Nom \tgenotype \tetat \tdiametre \tsurftotale \tsurfportion \tangle \tsurfzone1 \tsurfscler \tnbrefxz2 \tsurfbluez2 \tsurfmanque \tfacteur_c \tsurftot_corr \t%z1 \t%z2 \t%sclz1 \tnbrefxz2_corr \tdensitefxz2 \t%bluez2");
print(fe, "\\Headings:Image \tdiametre \tsurftotale \tsurfportion \tangle \tsurfze \tsurfsclze \tsurfsclzi \tnbfxze \tnbfxzi \tnbfxzicentraux \tsurfparemchyme \tsurfbluezi  \tsurfvide \tfacteur_c \tsurftot_corr \t%ze \t%zi \t%sclze \t%sclzi \tnbrefxze_corr \tdensitefxze \tnbrefxzi_corr \tnbfxzicentraux_corr \tdensitefxzi \t%bluezi");

	}
		//print(fe, nom + "\t" + genotype+ "\t" + etat+ "\t" + deux_decimal(diam)+ "\t" + deux_decimal(Surface_totale)+ "\t"  + deux_decimal(100*surfzoneZone1/Surface_totale)+ "\t" + deux_decimal(100*SclerenchymZone1/surfzoneZone1)+ "\t" + deux_decimal(100*SclerenchymZone1/surfzoneZone2)+ "\t" + round(nbrefx)+ "\t" + deux_decimal(100*surfParenchymeBleu/(surfzoneZone2-area_manque))+"\t" + facteur_correction+"\t" + area_manque);
		//print(fe, nom+" \t"+genotype+" \t"+etat+" \t"+diam+" \t"+area_total+" \t"+area_portion+" \t"+angle_portion+" \t"+area_zone1+" \t"+area_scl+" \t"+nb_fx+" \t"+area_blue+" \t"+area_manque+" \t"+area_total_c+" \t"+pourcent_zone1+" \t"+pourcent_zone2+" \t"+pourcent_scl+" \t"+densite_fx+" \t"+pourcent_blue);
//print(fe, nom+"\t"+genotype+"\t"+etat+"\t"+diam+"\t"+area_total+"\t"+area_portion+"\t"+angle_portion+"\t"+area_zone1+"\t"+area_scl+"\t"+nb_fx+"\t"+area_blue+"\t"+area_manque+"\t"+facteur_correction+"\t"+area_total_c+"\t"+pourcent_zone1+"\t"+pourcent_zone2+"\t"+pourcent_scl+"\t"+nb_fx_c+"\t"+densite_fx+"\t"+pourcent_blue);
print(fe, nom+"\t"+diam+"\t"+area_total+"\t"+area_portion+"\t"+angle_portion+"\t"+area_zone1+"\t"+area_scl_e+"\t"+area_scl_i+"\t"+nb_fxe+"\t"+nb_fxi+"\t"+nb_fxi_centraux+"\t"+area_parenchyme+"\t"+area_blue+"\t"+area_vide+"\t"+facteur_correction_complet+"\t"+area_total_c+"\t"+pourcent_zone1+"\t"+pourcent_zone2+"\t"+pourcent_scl_e+"\t"+pourcent_scl_i+"\t"+nb_fxe_c+"\t"+densite_fxe+"\t"+nb_fxi_c+"\t"+nb_fxi_centraux_c+"\t"+densite_fxi+"\t"+pourcent_blue);

}	

		