// PHIV Nikon Tool Set
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter l export des fichiers NIS issu du nikon eclipse SE

// installer loci bio formats
//http://www.loci.wisc.edu/files/software/loci_tools.jar



/*
Outil 
*/

//variables glogales
var path="";
var NomImage="nom d image";
var numserie=2;
var Taille_pix=0;
var Taille_bar=100;
var ajout_bar=false;
var position_bar="Lower Right";
var color_bar="White";
var Taille_bar=100;
var	Epaisseur_bar=30;
var	Taille_font=100;
var Chemin="";

macro "AutoRun"{
	setTool("rectangle");
	setForegroundColor(255, 255, 255);//premier plan blanc
	setBackgroundColor(0,0,0);// fond noir
	run("Set Measurements...", "area shape display redirect=None decimal=3");
	requires("1.49p");
}


////////////////////////////////////////////////////////////////label=Nis////////////////////////////////////////////

macro "Nis_convert Action Tool - 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"{
run("Close All");
path = File.openDialog("Choose a file");
pathsansext=substring(path,0,indexOf(path,".nd2"));
NomImage=File.getName(path);
run("Bio-Formats Macro Extensions");
Ext.setId(path);
Ext.getSeriesCount(seriesCount);
serie="";
for (s=1;s<=seriesCount;s++){
serie=serie+" series_"+s;
}
run("Bio-Formats Importer", "open=["+path+"] color_mode=Composite view=Hyperstack stack_order=XYCZT "+serie);
list_image=getList("image.titles");
for (s=0;s<list_image.length;s++){
	selectWindow(list_image[s]);
	Stack.getDimensions(width, height, channels, slices, frames);
	Stack.setChannel(1);
	run("Blue");
	Stack.setChannel(3);
	run("Red");
	//if(frames>1)run("Stack to RGB", "frames");
	//if (slices>1)run("Stack to RGB", "slices");
}


}



/////////////////////////////////////////////////////////////////////

macro "ome_to_tif Action Tool - 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"{


	origid=getImageID();
	Taille_pix=PhysicalSizeY();
	run("Set Scale...", "distance=1 known="+Taille_pix +" pixel=1 unit=µm");
	if(bitDepth() ==24) exit();
	nom=getTitle();	
	index_ext= indexOf(nom, ".");
	nom=substring(nom,0, index_ext-1);
	Stack.getDimensions(width, height, channels, slices, frames);
	planes=plane_count();
	//print (planes);
	tab_cannaux=newArray(parseInt(planes));
	tab_chemin=newArray(parseInt(planes));
	num_cannaux=0;
	for (i=0; i<planes; i++){
		tab_cannaux[i]=component_count(i+1);
		chemin_optique(i+1);
		tab_chemin[i]=Chemin;
		num_cannaux=num_cannaux+tab_cannaux[i];
	}
	//Array.show(tab_cannaux);
	//Array.show(tab_chemin);
	num_frame=slices/num_cannaux;
	if (num_frame>1){ 
		run("Stack to Hyperstack...", "order=xyczt(default) channels="+num_cannaux+" slices="+num_frame+" frames=1 display=Composite");
		Stack.getDimensions(width, height, channels, slices, frames);
		c=1;
		for (i=0;i<planes;i++){
		if (tab_cannaux[i]==3){
			Stack.setChannel(c); 
			run("Blue");
			Stack.setChannel(c+1); 
			run("Green");
			Stack.setChannel(c+2); 
			run("Red");
			c=c+3;
			}
		if (tab_cannaux[i]==1){
		Stack.setChannel(c); 
		//print (tab_chemin[i]);
			lut_apply(tab_chemin[i]);
			c++;
				}
		
			}
			run("Channels Tool...");
	}
	else if (planes==slices){
		run("Make Composite", "display=Color");
		for (i=0;i<planes;i++){
		Stack.setChannel(i+1); 
		setMetadata("Label", tab_chemin[i]);
		lut_apply(tab_chemin[i]);
		}	
		run("Channels Tool...");
	}
	else{
		c=1;
		for (i=0;i<planes;i++){
		if (tab_cannaux[i]==3){
			run("Duplicate...", "title=temp duplicate range="+c+"-"+c+2);
			//run("Duplicate...", "title="+nom+tab_chemin[i]+" duplicate range="+c+"-"+c+2);
			run("Reverse");
			run("Stack to RGB");
			rename(nom+tab_chemin[i]);
			selectWindow("temp");
			close();
			selectImage(origid);
			c=c+3;
			}
		if (tab_cannaux[i]==1){
			run("Duplicate...", "title="+nom+tab_chemin[i]+" duplicate range="+c);
			lut_apply(tab_chemin[i]);
			selectImage(origid);
			c++;
				}
		}
		close();
	}
	
}

///////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

macro "Scale Action Tool - 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"{
	run("Remove Overlay");
	Taille_pix=PhysicalSizeY();
	run("Set Scale...", "distance=1 known="+Taille_pix +" pixel=1 unit=µm");
	run("Scale Bar...", "width="+Taille_bar+" height="+Epaisseur_bar+" font="+Taille_font+" color="+color_bar+" background=None location=["+position_bar+"] bold overlay");
}

macro 'Scale Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Ajout de la barre"); //e.g., put a dialog here
    //Dialog.addCheckbox("Ajout de la barre", ajout_bar);
    items = newArray("Upper Left", "Upper Right", "Lower Left" ,"Lower Right" );
  	Dialog.addRadioButtonGroup("Position", items, 2, 2, position_bar);
  	items = newArray("Black", "White");
  	Dialog.addRadioButtonGroup("Position", items, 1, 2, color_bar);
	Dialog.addNumber("Taille de la barre", Taille_bar);
	Dialog.addNumber("Epaisseur de la barre", Epaisseur_bar);
	Dialog.addNumber("Taille de la police", Taille_font);
    Dialog.show();
    //ajout_bar = Dialog.getCheckbox();
    position_bar=Dialog.getRadioButton;
    color_bar=Dialog.getRadioButton;
	Taille_bar=Dialog.getNumber();
	Epaisseur_bar=Dialog.getNumber();
	Taille_font=Dialog.getNumber();
  	}




////////////////////////////////////////////////////////////////label=NdpiExportBatch////////////////////////////////////////////

macro "NisMacroBatch Action Tool - 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"{


dir1 = getDirectory("Choix du Repertoire Source ");
list = getFileList(dir1);
dir2 = getDirectory("Choix du Repertoire Cible ");	
      for (i=0; i<list.length; i++) {
          showProgress(i+1, list.length);
			path=dir1+list[i];
			pathsansext=substring(path,0,indexOf(path,".nd2"));
			NomImage=File.getName(path);
			NomImage=substring(NomImage,0,indexOf(NomImage,".nd2"));
			run("Bio-Formats Macro Extensions");
			Ext.setId(path);
			Ext.getSeriesCount(seriesCount);
			serie="";
			for (s=1;s<=seriesCount;s++){
			serie=serie+" series_"+s;
			}
			run("Bio-Formats Importer", "open=["+path+"] color_mode=Composite view=Hyperstack stack_order=XYCZT "+serie);
			list_image=getList("image.titles");
			for (s=0;s<list_image.length;s++){
				selectWindow(list_image[s]);
				Stack.getDimensions(width, height, channels, slices, frames);
				Stack.setChannel(1);
				run("Blue");
				Stack.setChannel(3);
				run("Red");
				//if(frames>1)run("Stack to RGB", "frames");
				//if (slices>1)run("Stack to RGB", "slices");
				saveAs("Tiff", dir2+NomImage+"_s"+s+1+".tif");
				close();
			}   		   
		   
		   
	   }

	}



macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/PHIV_Nikon_toolset.txt");
}

	




function Hyper2RGB(){
	setBatchMode(true);
	titre=getTitle();
	setSlice(1);
	 setMetadata("Label", "r");
	setSlice(2);
	 setMetadata("Label", "g");
	setSlice(3);
	 setMetadata("Label", "b");
	run("Stack to Images");
	run("Merge Channels...", "c1=r c2=g c3=b");
	selectWindow("RGB");
	rename(titre);
	setBatchMode(false);
}

function Bio_meta(path){
	run("Bio-Formats Macro Extensions");
	Ext.setId(path);
	for (s=0; s<6; s++) {
	  Ext.setSeries(s);
	  Ext.getSizeX(sizeX);
	  SX[s]=sizeX;
	  Ext.getSizeY(sizeY);
	  SY[s]=sizeY;
	  }
	Ext.close();
}


function plane_count(){
	infos=getMetadata("Info");
	index_Dimensions= indexOf(infos, "Dimensions: ");
	//print(index_Dimensions);
	if(index_Dimensions!=-1){
		index_fin_Dimensions= indexOf(infos, "\n",index_Dimensions);
		//print(index_fin_Dimensions);
		dim=substring(infos, index_Dimensions, index_fin_Dimensions);
		//print(dim);
		index_intero= indexOf(dim, "?");
		if(index_intero!=-1){
			index_1p= indexOf(dim, "(",index_intero);
			index_2p= indexOf(dim, ")",index_intero);
			plane=substring(dim, index_1p+1, index_2p);
			//print (plane);
			return parseInt(plane);	
		}	
	}
	return 0;
}

function component_count(num){
	infos=getMetadata("Info");
	index_plane_num= indexOf(infos, "Plane #"+num);
	index_compo=indexOf(infos, "Component Count",index_plane_num);
	index_valeur=indexOf(infos, ":",index_compo);
	return parseInt(substring(infos, index_valeur+2, index_valeur+3));
}

function chemin_optique(num){
	infos=getMetadata("Info");
	index_plane_num= indexOf(infos, "Plane #"+num);
	index_dia=indexOf(infos, "Nikon Ni-E, Illuminator(Illuminator-DIA):",index_plane_num);
	index_dia=indexOf(infos, "Nikon Ni-E, Illuminator(Illuminator-DIA):",index_dia+1);
	index_dia=indexOf(infos, "O",index_dia);
	dia=substring(infos, index_dia, index_dia+2);
	if(dia=="On") {
		Chemin= "Champ clair";
		
	}
	else {
	index_filtre=indexOf(infos, "Nikon Ni-E, FilterChanger(Turret1):",index_plane_num);
	index_filtre=indexOf(infos, ":",index_filtre);
	index_1p= indexOf(infos, "(",index_filtre);
	index_2p= indexOf(infos, ")",index_filtre);
	filtre=substring(infos, index_1p+1, index_2p);
	Chemin= filtre;
	}
}

function lut_apply(condition){
		if(condition=="UV-2A") run("Blue");
		if(condition=="GFP-L") run("Green");
		if(condition=="B-2A") run("Cyan");
		if(condition=="TRITC") run("Yellow");
		if(condition=="Cy3") run("Red");
}


function PhysicalSizeY(){
	infos=split(getMetadata("Info"),"<");
	for (i=0; i<lengthOf(infos); i++){
		row=split(infos[i],"\" ");
		for (j=0; j<lengthOf(row); j++){
			if (startsWith(row[j], "PhysicalSizeY")) return row[j+1] ;
			}
		}
}

