// PHIV Pollen Tool Set 
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter le comptage des pollens viables ou non



/*Outils
- Pollen noir ou cyan  pour separer les grains de pollen 
	Parametres (clic droit sur l outil): 	taille min et max en pixels
				circularite
				valeurs RGB min et max
- Somme : tableau resultats

Raccourcis clavier :
	0	supprime la selection
	1	ajoute un noir
	2	ajoute un cyan

*/




   
var max_noir=600;
var min_noir=150;//100
var circu_noir=0.7;

var max_cyan=400;
var min_cyan=130;//80
var circu_cyan=0.4; 


//var Nmin=newArray(0,0,0);
//var Nmax=newArray(233,232,228);
var Nmin=newArray(0,0,0);
var Nmax=newArray(233,232,140);
var Nfilter=newArray("pass","pass","pass");
//var Cmin=newArray(0,0,170);
//var Cmax=newArray(125,255,255);
var Cmin=newArray(30,26,99);
var Cmax=newArray(130,210,212);
var Cfilter=newArray("pass","pass","pass");

var title1 = "Resultats";
var title2 = "["+title1+"]";
var fe = title2;




macro "AutoRun" {
      setForegroundColor(0, 0, 0);
			setBackgroundColor(255, 255, 255);
			run("Options...", "iterations=1 count=1 edm=16-bit");		
	
   }
  
macro "Pollen_noir Action Tool - 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"{
   run("Set Measurements...", "area shape feret's display redirect=None decimal=3");
		//run("Duplicate...", " ");
		RoiDelete ("noir");	
		count1 = roiManager("count");
		origid=getImageID();
		run("Duplicate...", "title=noir");
		SeuillageCouleurRGB(Nmin,Nmax,Nfilter);
		run("Analyze Particles...", "size="+5*max_noir+"-Infinity pixel show=Masks");
		run("Create Selection");
		select_type=selectionType();
		run("Select None");
		close();
		selectWindow("noir");
		run("Restore Selection");
		if(select_type !=-1){
			setForegroundColor(255, 255, 255);
			run("Fill", "slice");
			run("Select None");
			}
		run("Watershed");
		run("Select None");
		run("Analyze Particles...", "size="+min_noir+"-"+max_noir+" pixel circularity="+circu_noir+"-1.00 add");
		count2 = roiManager("count");
		for(i=count1;i<count2;i++){
			roiManager("Select", i);
			roiManager("Set Color", "#ff0000");
			roiManager("Rename", "noir"+i+1);
			//roiManager("Set Color", "#ff0000");
			
				}
			run("Select None");
			roiManager("Deselect");
		close();
		run("Select All");
		run("Select None");
		roiManager("Deselect");
		//close();
		roiManager("UseNames", "true");
		roiManager("Show All");
		selectImage(origid); 
		run("Select None");
		
   
   
   }
    macro 'Pollen_noir Action Tool Options'  {
	Dialog.create("Parametres pollen noir");
	Dialog.addNumber("Taille max pollen noir:", max_noir);
	Dialog.addNumber("Taille min pollen noir:", min_noir);
	Dialog.addNumber("Circularite pollen noir:", circu_noir);
	Dialog.addMessage("Rouge");
	Dialog.addNumber("Min:", Nmin[0]);
	Dialog.addNumber("Max:", Nmax[0]);
	Dialog.addMessage("Vert");
	Dialog.addNumber("Min:", Nmin[1]);
	Dialog.addNumber("Max:", Nmax[1]);
	Dialog.addMessage("Bleu");
	Dialog.addNumber("Min:", Nmin[2]);
	Dialog.addNumber("Max:", Nmax[2]);
	Dialog.show();
	max_noir = Dialog.getNumber();
    min_noir = Dialog.getNumber();
	circu_noir = Dialog.getNumber();
	Nmin[0] = Dialog.getNumber();
	Nmax[0] = Dialog.getNumber();
	Nmin[1] = Dialog.getNumber();
	Nmax[1] = Dialog.getNumber();
	Nmin[2] = Dialog.getNumber();
	Nmax[2] = Dialog.getNumber();	
	}


  macro "Pollen_cyan Action Tool - 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"{
	RoiDelete ("cyan");	
	count1 = roiManager("count");
	origid=getImageID();
	run("Duplicate...", "title=cyan");
		SeuillageCouleurRGB(Cmin,Cmax,Cfilter);
		run("Watershed");
		run("Select None");
		run("Analyze Particles...", "size="+min_cyan+"-"+max_cyan+" pixel circularity="+circu_cyan+"-1.00 add");
		count2 = roiManager("count");
		for(i=count1;i<count2;i++){
			roiManager("Select", i);
			roiManager("Set Color", "#ffff00");
			roiManager("Rename", "cyan"+i-count1+1);
			//roiManager("Set Color", "#00ff00");
			
				}
		close();
		run("Select All");
		run("Select None");
		roiManager("Deselect");
		//close();
		roiManager("UseNames", "true");
		roiManager("Show All");
		run("Select None");
	
	
	
	}
  

 macro 'Pollen_cyan Action Tool Options'  {
	Dialog.create("Parametres pollen cyan");
	Dialog.addNumber("Taille max pollen cyan:", max_cyan);
	Dialog.addNumber("Taille min pollen cyan:", min_cyan);
	Dialog.addNumber("Circularite pollen cyan:", circu_cyan);
	Dialog.addMessage("Rouge");
	Dialog.addNumber("Min:", Cmin[0]);
	Dialog.addNumber("Max:", Cmax[0]);
	Dialog.addMessage("Vert");
	Dialog.addNumber("Min:", Cmin[1]);
	Dialog.addNumber("Max:", Cmax[1]);
	Dialog.addMessage("Bleu");
	Dialog.addNumber("Min:", Cmin[2]);
	Dialog.addNumber("Max:", Cmax[2]);
	Dialog.show();
	max_cyan = Dialog.getNumber();
	min_cyan = Dialog.getNumber();
	circu_cyan = Dialog.getNumber();
	Cmin[0] = Dialog.getNumber();
	Cmax[0] = Dialog.getNumber();
	Cmin[1] = Dialog.getNumber();
	Cmax[1] = Dialog.getNumber();
	Cmin[2] = Dialog.getNumber();
	Cmax[2] = Dialog.getNumber();
}
  
 
 macro "Somme Action Tool - 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"{
 
	nom=getTitle();
	nb_noir=0;
	nb_cyan=0;
	ncount=roiManager("count");
	for(i=0;i<ncount;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (startsWith(nom_item, "noir")) nb_noir++;
			if (startsWith(nom_item, "cyan")) nb_cyan++;
			}	
		if( !isOpen("Resultats")){
		run("Table...", "name="+title2+" width=600 height=600");
		print(fe, "\\Headings:Image \tNoirs \tCyans");
		} 
		print(fe, nom+"\t"+nb_noir+"\t"+nb_cyan);

						
			
 }
 
 
 //////////////////////////Shortcut Key//////////////////////////////////////////////////////////////////////////////////////////

//supression de selection 
macro "ROI Delete [n0]"{
	if(selectionType()!=-1 && selectionType()!=10){
	
		roiManager("Delete");
		run("Select None");
		RoiDedoublonne("noir");
		RoiDedoublonne("cyan");
	}
		
}


//ajout de selection

macro "ROI Ajoute [n1]"{

			RoiAdd("noir");
		RoiDedoublonne("noir");
		
	

}

macro "ROI Ajoute [n2]"{

			RoiAdd("cyan");
		RoiDedoublonne("cyan");
		
	

}

//Zoom to selection

macro "Zoom [n3]"{
run("To Selection");
}
	

	
	
	/////////////////////////////////////////////////////FUNCTIONS///////////////////////////////////////////////////
 
 
 
 function RoiAdd(nom) {
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);	
	roiManager("Rename", nom);
}

function RoiDedoublonne(string){
	compte=0;
	n=roiManager("count");
	for(i=0;i<n;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (startsWith(nom_item, string)){
				compte++;
				roiManager("Rename", string+compte);
			
			
			}
		}
	
		roiManager( "Deselect");
}
 
 
 
 
 
 
 
 
 
 
 
 
function SeuillageCouleurRGB(min,max,filter){
	// Color Thresholder 1.50d
	// Autogenerated macro, single images only!
	//min=newArray(3);
	//max=newArray(3);
	//filter=newArray(3);
	a=getTitle();
	run("Split Channels");
	selectWindow(a+" (red)");
	rename("0");
	selectWindow(a+" (green)");
	rename("1");
	selectWindow(a+" (blue)");
	rename("2");
	for (i=0;i<3;i++){
	  selectWindow(""+i);
	  setThreshold(min[i], max[i]);
	  run("Convert to Mask");
	  if (filter[i]=="stop")  run("Invert");
	}
	imageCalculator("AND create", "0","1");
	imageCalculator("AND create", "Result of 0","2");
	for (i=0;i<3;i++){
	  selectWindow(""+i);
	  close();
	}
	selectWindow("Result of 0");
	close();
	selectWindow("Result of Result of 0");
	rename(a);
	// Colour Thresholding-------------
}
  
 

	macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/PHIV_Pollen_toolset.txt");
}



//////////////////////////////////Fonctions////////////////////////////////////

function GetRGBstat(rgb_moy,rgb_std){	
	if(selectionType() ==-1){
	waitForUser("Fire une selection");
	}
	run("RGB Stack");
	for(i=0;i<3;i++){
		setSlice(i+1);
		getStatistics(area, mean, min, max, std, histogram);
		rgb_moy[i]=mean;
		rgb_std[i]=std;	
	}	
	run("RGB Color");
}

function GetRGBminmax(rgb_min,rgb_max){	
	if(selectionType() ==-1){
	waitForUser("Faire une selection");
	}
	run("RGB Stack");
	for(i=0;i<3;i++){
		setSlice(i+1);
		getStatistics(area, mean, min, max, std, histogram);
		rgb_min[i]=min;
		rgb_max[i]=max;	
	}	
	run("RGB Color");
}


function SeuillageCouleurRGB(min,max,filter){
	// Color Thresholder 1.50d
	// Autogenerated macro, single images only!
	//min=newArray(3);
	//max=newArray(3);
	//filter=newArray(3);
	a=getTitle();
	run("Split Channels");
	selectWindow(a+" (red)");
	rename("0");
	selectWindow(a+" (green)");
	rename("1");
	selectWindow(a+" (blue)");
	rename("2");
	for (i=0;i<3;i++){
	  selectWindow(""+i);
	  setThreshold(min[i], max[i]);
	  run("Convert to Mask");
	  if (filter[i]=="stop")  run("Invert");
	}
	imageCalculator("AND create", "0","1");
	imageCalculator("AND create", "Result of 0","2");
	for (i=0;i<3;i++){
	  selectWindow(""+i);
	  close();
	}
	selectWindow("Result of 0");
	close();
	selectWindow("Result of Result of 0");
	rename(a);
	// Colour Thresholding-------------
}

function RoiDelete (nom){
	ncount=roiManager("count");
	for(i=ncount-1;i>=0;i--){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (startsWith(nom_item, nom)) roiManager("Delete");
		}
	roiManager("Deselect");
	run("Select None");
	

}

