// PHIV Polymere Tool Set
// Marc LARTAUD PHIV
// Boite a outils mesurer 


/* 
Outils Total pour selectionner le total
Outils Matiere pour selectionner la matiere
Outils RB pour selectionner et separer les morceaux rouges ou bleus
en fonction d un delta mini en option (clic droit)
Outils Mesure pour creer le tableau de resultats
Outils SaveRoi pour sauvegarder le RoiManager

Raccourcis sur pave numerique
0 supprimme la selection du RoiManager
3 zoom sur selection


 
 */
 var nom="";
 var dir="";
 var sigma_total=5;
 var seuil_total=newArray(0,160);
 var sigma_matiere=1;
 var seuil_matiere=newArray(0,130);
 var delta=2;
 

 
 
var enlarge=1;


var title1 = "Resultats";
var title2 = "["+title1+"]";
var fe = title2;





//variables glogales
macro "Total Action Tool - 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"{


	RoiDelete("Total");
	run("Select None");
	origid=getImageID();
	dir=getInfo("image.directory");
	nom=getTitle();
	nom=replace(nom,".tif","");
	run("Duplicate...", "title=nb");
	run("8-bit");
	run("Gaussian Blur...", "sigma="+sigma_total);
	Validation_surface("Total",seuil_total);
	selectImage(origid);
	run("Select None");
	roiManager("Deselect");
	roiManager("Show All")









}

macro "Matiere Action Tool - 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"{


	origid=getImageID();
	RoiDelete("Matiere");
	run("Select None");
	run("Duplicate...", "title=nb");
	run("8-bit");
	run("Gaussian Blur...", "sigma="+sigma_matiere);
	zone_totale();
	Validation_selection("Matiere",seuil_total);
	selectImage(origid);
	SelectRoi("Matiere");
	run("Enlarge...", "enlarge=-"+enlarge+" pixel");
	run("Enlarge...", "enlarge="+enlarge+" pixel");
	roiManager("Update");
	roiManager("Split");	
	run("Select None");
	roiManager("Deselect");
	roiManager("Show All")









}
macro "RB Action Tool - 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"{


	origid=getImageID();
	run("Set Measurements...", "area mean display redirect=None decimal=3");
	run("Select None");
	run("Duplicate...", " ");
	rename("temp");
	run("Split Channels");
	selectWindow("temp (green)");
	close();
	imageCalculator("Subtract create 32-bit", "temp (red)","temp (blue)");
	selectWindow("Result of temp (red)");
	rename("r-b");
	selectWindow("temp (blue)");
	close();
	selectWindow("temp (red)");
	close();
	selectWindow("r-b");
	ncount=roiManager("count");
	for(i=0;i<ncount;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if ((nom_item!="Total")&&(nom_item!="Matiere")){
				getStatistics(area, mean);
				if (mean<(-delta)) roiManager("Rename", "blue");
				else if (mean>(delta)) roiManager("Rename", "red");
				else roiManager("Rename", "neutre");	
			
			
			
			
			
			
			}
			
			
			
			
			}
	
	close();
	
	
	
	
	
	
	
	
	
	
	
	
	
	
	
	run("Select None");
	roiManager("Deselect");
	roiManager("Show All")









}


macro 'RB Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    
    Dialog.create("Tri");
    Dialog.addNumber("Delta mini entre bleu et rouge:", delta);
    Dialog.show();
    delta=Dialog.getNumber();
          
  	}






macro "Mesure Action Tool - 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"{

	//nom_image=getTitle();
	nom=getTitle();
	nom=replace(nom,".tif","");
	
	
	
	run("Set Measurements...", "area mean display redirect=None decimal=3");
	
	
	surf_total=0;
	surf_matiere=0;
	nb_blue=0;
	surf_blue=0;
	nb_red=0;
	surf_red=0;
	nb_neutre=0;
	surf_neutre=0;
	
		
	ncount=roiManager("count");
	for(i=0;i<ncount;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (nom_item=="Total"){
				getStatistics(area);
				surf_total=area;			
			}
			if (nom_item=="Matiere"){
				getStatistics(area);
				surf_matiere=area;			
			}
			if (startsWith(nom_item, "red")){
				nb_red++;
				getStatistics(area);
				surf_red=surf_red+area;			
			}
			if (startsWith(nom_item, "blue")){
				nb_blue++;
				getStatistics(area);
				surf_blue=surf_blue+area;			
			}
			if (startsWith(nom_item, "neutre")){
				nb_neutre++;
				getStatistics(area);
				surf_neutre=surf_neutre+area;			
			}
		}
	surf_total=deux_decimal(surf_total/1000000);
surf_matiere=deux_decimal(surf_matiere/1000000);	
surf_red=deux_decimal(surf_red/1000000);	
surf_blue=deux_decimal(surf_blue/1000000);	
surf_neutre=deux_decimal(surf_neutre/1000000);	
taille_red=surf_red/nb_red;	
taille_blue=surf_blue/nb_blue;
taille_neutre=surf_neutre/nb_neutre;	

//print (surf_red+surf_blue+surf_neutre);
			
			
		
		if( !isOpen("Resultats")){
			run("Table...", "name="+title2+" width=1400 height=600");
			print(fe, "\\Headings:Image \tsurf_total \tsurf_matiere \tsurf_red \tsurf_blue \tsurf_neutre \ttaille_red \ttailleblue  \ttaille_neutre");
		}
		print(fe, nom+"\t"+surf_total+"\t"+surf_matiere+"\t"+surf_red+"\t"+surf_blue+"\t"+surf_neutre+"\t"+taille_red+"\t"+taille_blue+"\t"+taille_neutre);



			
	}


macro "SaveRoi Action Tool - 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"{

roiManager("Deselect");
showMessage("Sauvegarde du RoiManager");
roiManager("Save", dir+nom+".zip");


roiManager("Delete");


}





macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/PHIV_Polymere_toolset.txt");
}




//////////////////////////Shortcut Key/////////////////

//supression de selection 
macro "ROI Delete [n0]"{
	if(selectionType()!=-1 && selectionType()!=10){
	
		roiManager("Delete");
		run("Select None");
	}
		
}


//ajout de selection





//Zoom to selection

macro "Zoom [n3]"{
run("To Selection");
}
	
/////////////////////////////////////////////////////FUNCTIONS///////////////////////////////////////////////////
	
	
/*	
function RoiAdd(nom) {
	compte=0;
	roiManager("Add");
	n = roiManager("count");
	for(i=0;i<n;i++){
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (startsWith(nom_item, nom)){
				compte++;
				roiManager("Select", i);
				if(compte==1) roiManager("Rename", nom);
				else roiManager("Rename", nom+"-"+compte);
				}
		}	
	roiManager("Select", n-1);	
	roiManager("Rename", nom+"-"+compte+1);
}
*/

function RoiAdd(nom) {
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);	
	roiManager("Rename", nom);
}

function SelectRoi(nom){
	ncount=roiManager("count");
	for(i=0;i<ncount;i++){
			//roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (nom_item==nom) roiManager("Select", i);
			}
	
}


function RoiDedoublonne(string){
	compte=0;
	n=roiManager("count");
	for(i=0;i<n;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (startsWith(nom_item, string)){
				compte++;
				roiManager("Rename", string+"-"+compte);
			
			
			}
		}
	
		roiManager( "Deselect");
}



function RoiDelete (nom){
	ncount=roiManager("count");
	for(i=ncount-1;i>=0;i--){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (startsWith(nom_item, nom)) roiManager("Delete");
		}


}




var function RoiCompte(string){
	max=0;
	n=roiManager("count");
	for(i=0;i<n;i++){
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (startsWith(nom_item, string)){
				num=parseInt(replace(nom_item,string,""));
				if (max<num) max=num;
			}
		}
		return max+1;	
}


function Validation_surface(zone,seuils){
	run("Threshold...");
	setThreshold(seuils[0], seuils[1]);
	run("Threshold...");	
	setTool("wand");
	title = zone;
	msg = "Regler le seuil puis selectionner avec la baguette";
	waitForUser(title, msg);
	getThreshold(lower, upper);
	seuils[0]=lower;
	seuils[1]=upper;
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);
	roiManager("Rename", zone);
	close();
  selectImage(origid);
  roiManager("Select", n-1);
	setTool("brush");
	call("ij.gui.Toolbar.setBrushSize", 50); 
	waitForUser(zone,"Correction de la selection");
	//run("Interpolate", "interval=1");//voir feret!
	roiManager("Update");	
	roiManager("Deselect");
	run("Select None");	
	setTool("rectangle");
}	

function Validation_selection(zone,seuils){
	run("Threshold...");
	setThreshold(seuils[0], seuils[1]);
	run("Threshold...");	
	title = zone;
	msg = "Regler le seuil";
	waitForUser(title, msg);
	getThreshold(lower, upper);
	seuils[0]=lower;
	seuils[1]=upper;
	run("Create Selection");
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);
	roiManager("Rename", zone);
	close();
  selectImage(origid);
  roiManager("Select", n-1);
	setTool("brush");
	call("ij.gui.Toolbar.setBrushSize", 50); 
	waitForUser(zone,"Correction de la selection");
	//run("Interpolate", "interval=1");//voir feret!
	roiManager("Update");	
	roiManager("Deselect");
	run("Select None");	
	setTool("rectangle");
}


function zone_totale(){
		n=roiManager("count");
		for(i=0;i<n;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (nom_item=="Total") {
			setBackgroundColor(255, 255, 255);
			run("Clear Outside");
			setBackgroundColor(0, 0, 0);
			
			}
			
		}	
		run("Select None");	
}

function deux_decimal(valeur){
	if (valeur!=-1){
		valeur= round(valeur*100)/100;
	}
	else valeur="NA";
	return valeur;
}
