// a mettre dans ImageJ/Macros/Toolsets
// PHIV NDPI Tool Set
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter l export des fichiers ndpi issu du nanozoomer

// installer loci bio formats
//http://www.loci.wisc.edu/files/software/loci_tools.jar



//variables glogales


/*var Rmin=newArray(176,2,176);
var Rmax=newArray(178,33,202);
var Rfilter=newArray("stop","pass","pass");*/
var Rmin=newArray(186,40,100);
var Rmax=newArray(253,141,226);
var Rfilter=newArray("pass","pass","pass");
var Bmin=newArray(123,27,125);
var Bmax=newArray(158,216,211);
var Bfilter=newArray("pass","pass","pass");



var path="";
var FacteurMultiplicatif=0;
var NomImage="nom d image";
var numserie=2;
var numserie_crop=2;
//crop
var taille_crop=10; // mini en cm²
var filtre_crop=5;
var enlarge_crop=5;
var SX=newArray (6);
var SY=newArray (6);
var autocrop=true;




macro "AutoRun"{
	setTool("rectangle");
	setForegroundColor(255, 255, 255);//premier plan blanc
	setBackgroundColor(0,0,0);// fond noir
	run("Set Measurements...", "area shape display redirect=None decimal=3");
	requires("1.49p");
}




////////////////////////////////////////////////////////////////label=NdpiExportBatch////////////////////////////////////////////

macro "NdpiMacroBatch Action Tool - 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"{

Dialog.create("NdpiMacroBatch"); //e.g., put a dialog here
	Dialog.addSlider("Numero de serie pour les ndpi:", 1, 3, numserie);
	Dialog.addCheckbox("Crop Automatique", autocrop); 
	Dialog.addNumber("Filtre Gaussien :", filtre_crop);
    Dialog.addNumber("Taille mini (cm²) :", taille_crop);
	Dialog.addNumber("Elargissement :", enlarge_crop);
	Dialog.show();
	numserie = Dialog.getNumber();
	autocrop=Dialog.getCheckbox();
    filtre_crop = Dialog.getNumber();
	taille_crop = Dialog.getNumber();
	enlarge_crop = Dialog.getNumber();
	
	
dir1 = getDirectory("Choix du Repertoire Source ");
list = getFileList(dir1);
dir2 = getDirectory("Choix du Repertoire Cible ");	
Vide_Roi();
      for (i=0; i<list.length; i++) {
          showProgress(i+1, list.length);
			path=dir1+list[i];
			nom=list[i];
		if (autocrop){
           if (endsWith(list[i], '.ndpi')){
			nom=substring(nom,0,indexOf(nom,".ndpi"));
			nom=replace(nom, " ", "");
			Bio_meta(path);
			run("Bio-Formats Importer", "open=["+path+"] color_mode=Default view=Hyperstack stack_order=XYCZT series_4");
			Hyper2RGB();
			origid=getImageID();
			Detect_Roi(filtre_crop,taille_crop);
			count=roiManager("count");
			for(j=1;j<=count;j++){
				selectImage(origid);
				roiManager("Select", j-1);
				run("Enlarge...", "enlarge="+enlarge_crop+" pixel");
				getSelectionBounds(x, y, width, height);
				for (s=1;s<4;s++){
				if (s==numserie) FacteurMultiplicatif = SX[s-1]/SX[3];
				}
				x=(FacteurMultiplicatif)*x;
				y=(FacteurMultiplicatif)*y;
				width=(FacteurMultiplicatif)*width;
				height=(FacteurMultiplicatif)*height;
				if (width*height < 20000*20000){
					run("Bio-Formats Importer", "open=["+path+"] color_mode=Default crop view=Hyperstack stack_order=XYCZT series_"+numserie+" x_coordinate_"+numserie+"="+x+" y_coordinate_"+numserie+"="+y+" width_"+numserie+"="+width+" height_"+numserie+"="+height+"");
					Hyper2RGB();
					}
					else print ("Taille trop grande");	
				saveAs("Tiff",dir2+nom+"-"+j);	
				close();			
				}
			selectImage(origid);
			close();
			Vide_Roi();
		   }
		   if (endsWith(list[i], '.tif')){
			nom=substring(nom,0,indexOf(nom,".tif"));
			nom=replace(nom, " ", "");
			open(path);
			origid=getImageID();
			Detect_Roi(filtre_crop,taille_crop);
			count=roiManager("count");
			for(j=1;j<=count;j++){
				selectImage(origid);
				roiManager("Select", j-1);
				run("Enlarge...", "enlarge="+enlarge_crop+" pixel");
				run("Duplicate...", "title="+nom+"-"+j);
				run("Select None");
				saveAs("Tiff",dir2+nom+"-"+j);	
				close();				
				}
			close();
			Vide_Roi();
		   }
		   }
		   else {
		   nom=substring(nom,0,indexOf(nom,".ndpi"));
			nom=replace(nom, " ", "");
			Bio_meta(path);
			for (s=2;s<4;s++){
					if (s==numserie)  Max=SX[s-1]*SY[s-1];
				}					   
			 if (Max < 20000*20000){
			   run("Bio-Formats Importer", "open=["+path+"] color_mode=Default crop view=Hyperstack stack_order=XYCZT series_"+numserie);
			   Hyper2RGB();
			   saveAs("Tiff", dir2+nom+".tif");
			   close ();
			}
			else print (nom+" taille trop grande");
		   		   
		   }
		   
	   }

	}


	
	
macro "Red Selection Action Tool - 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"{
	
	origid=getImageID();
	run("Select None");
	run("Duplicate...", "title=test");
	//Red
// Color Thresholder 1.49u
// Autogenerated macro, single images only!
/*min=newArray(3);
max=newArray(3);
filter=newArray(3);*/
a=getTitle();
run("HSB Stack");
run("Convert Stack to Images");
selectWindow("Hue");
rename("0");
selectWindow("Saturation");
rename("1");
selectWindow("Brightness");
rename("2");
/*min[0]=176;
max[0]=178;
filter[0]="stop";
min[1]=2;
max[1]=33;
filter[1]="pass";
min[2]=176;
max[2]=202;
filter[2]="pass";*/
for (i=0;i<3;i++){
  selectWindow(""+i);
  setThreshold(Rmin[i], Rmax[i]);
  run("Convert to Mask");
  if (Rfilter[i]=="stop")  run("Invert");
}
imageCalculator("AND create", "0","1");
imageCalculator("AND create", "Result of 0","2");
for (i=0;i<3;i++){
  selectWindow(""+i);
  close();
}
selectWindow("Result of 0");
close();
selectWindow("Result of Result of 0");
rename(a);
run("Create Selection");
close();
run("Restore Selection");
// Colour Thresholding-------------
	
	
}
macro 'Red Selection Action Tool Options'  {
		Dialog.create("Seuillage Rouge");
		Dialog.addMessage("Hue");
		Dialog.addNumber("Min:", Rmin[0]);
		Dialog.addNumber("Max:", Rmax[0]);
		//Dialog.addChoice("Filtre", newArray("stop", "pass"));
		Dialog.addMessage("Saturation");
		Dialog.addNumber("Min:", Rmin[1]);
		Dialog.addNumber("Max:", Rmax[1]);
		//Dialog.addChoice("Filtre", newArray("stop", "pass"));
		Dialog.addMessage("Brightness");
		Dialog.addNumber("Min:", Rmin[2]);
		Dialog.addNumber("Max:", Rmax[2]);
		//Dialog.addChoice("Filtre", newArray("stop", "pass"));
		Dialog.show();
		Rmin[0]=Dialog.getNumber();
		Rmax[0]=Dialog.getNumber();;
		//Rfiltre[0] = Dialog.getChoice();
		Rmin[1]=Dialog.getNumber();;;
		Rmax[1]=Dialog.getNumber();;;;
		//Rfiltre[1] = Dialog.getChoice();
		Rmin[2]=Dialog.getNumber();;;;;
		Rmax[2]=Dialog.getNumber();;;;;;
		//Rfiltre[2] = Dialog.getChoice();
    }
	
	
macro "Blue Selection Action Tool - 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"{
	

	
	origid=getImageID();
	run("Select None");
	run("Duplicate...", "title=test");
	a=getTitle();
	run("HSB Stack");
	run("Convert Stack to Images");
	selectWindow("Hue");
	rename("0");
	selectWindow("Saturation");
	rename("1");
	selectWindow("Brightness");
	rename("2");

	for (i=0;i<3;i++){
	  selectWindow(""+i);
	  setThreshold(Bmin[i], Bmax[i]);
	  run("Convert to Mask");
	  if (Bfilter[i]=="stop")  run("Invert");
	}
	imageCalculator("AND create", "0","1");
	imageCalculator("AND create", "Result of 0","2");
	for (i=0;i<3;i++){
	  selectWindow(""+i);
	  close();
	}
	selectWindow("Result of 0");
	close();
	selectWindow("Result of Result of 0");
	rename(a);
	run("Create Selection");
	close();
	run("Restore Selection");
	// Colour Thresholding-------------
	
	
}
macro 'Blue Selection Action Tool Options'  {
		Dialog.create("Seuillage Rouge");
		Dialog.addMessage("Hue");
		Dialog.addNumber("Min:", Bmin[0]);
		Dialog.addNumber("Max:", Bmax[0]);
		//Dialog.addChoice("Filtre", newArray("stop", "pass"));
		Dialog.addMessage("Saturation");
		Dialog.addNumber("Min:", Bmin[1]);
		Dialog.addNumber("Max:", Bmax[1]);
		//Dialog.addChoice("Filtre", newArray("stop", "pass"));
		Dialog.addMessage("Brightness");
		Dialog.addNumber("Min:", Bmin[2]);
		Dialog.addNumber("Max:", Bmax[2]);
		//Dialog.addChoice("Filtre", newArray("stop", "pass"));
		Dialog.show();
		Bmin[0]=Dialog.getNumber();
		Bmax[0]=Dialog.getNumber();;
		//Bfiltre[0] = Dialog.getChoice();
		Bmin[1]=Dialog.getNumber();;;
		Bmax[1]=Dialog.getNumber();;;;
		//Bfiltre[1] = Dialog.getChoice();
		Bmin[2]=Dialog.getNumber();;;;;
		Bmax[2]=Dialog.getNumber();;;;;;
		//Bfiltre[2] = Dialog.getChoice();
    }


macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/PHIV_RB_toolset.txt");
}


function RoiAdd(nom) {
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);	
	roiManager("Rename", nom);
}


function Vide_Roi(){
if (isOpen("ROI Manager")){
				roiManager("Deselect");
				n = roiManager("count");
				if (n>0) roiManager("Delete");
			}
}

function Detect_Roi(filtre_crop,taille_crop){
		run("Duplicate...", "title=temp");
		run("8-bit");
		run("Gaussian Blur...", "sigma="+filtre_crop+" scaled");
		setAutoThreshold("Default");	
		run("Analyze Particles...", "size="+(taille_crop*1000000)+"-Infinity include add");
		count=roiManager("count");
		for(i=0;i<count;i++){
				roiManager("Select", i);
				getSelectionBounds(x, y, width, height);
				x=10000+x;
				roiManager("Rename", ""+x);				
			}
		roiManager("Deselect");
		roiManager("Sort");
		close();

}


function Bio_meta(path){
	run("Bio-Formats Macro Extensions");
	Ext.setId(path);
	for (s=0; s<6; s++) {
	  Ext.setSeries(s);
	  Ext.getSizeX(sizeX);
	  SX[s]=sizeX;
	  Ext.getSizeY(sizeY);
	  SY[s]=sizeY;
	  }
	Ext.close();
}


function Hyper2RGB(){
	setBatchMode(true);
	titre=getTitle();
	setSlice(1);
	 setMetadata("Label", "r");
	setSlice(2);
	 setMetadata("Label", "g");
	setSlice(3);
	 setMetadata("Label", "b");
	run("Stack to Images");
	run("Merge Channels...", "c1=r c2=g c3=b");
	selectWindow("RGB");
	rename(titre);
	setBatchMode(false);
}
