// PHIV Rice Root Tool Set
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter la segmentation des coupes de racine de riz


/*

New --> ouvre l image suivante dans le dossier (avec son Roi associe si il existe)
		sauve et remet a zero le Roi Manager 
		
Zonation --> Delimitation de l objet Total, 
	puis du bois 
	puis de ma moelle si la methode de seuillage pour la moelle n est pas bonne
	on peut choisir l autre (ou HSB ou niveaux de gris)
	
	Option clic droit --> taille du filtre
		Filtre Total : taille du filtre gaussien pour attenuer les details
		Filtre Bois : taille du filtre gaussien pour attenuer les details
		Filtre Moelle : taille du filtre gaussien pour attenuer les details
		Methode de seuillage de la moelle HSB ou Niveaux de gris

Xyleme --> Detection du Xyleme dans le bois
	Option clic droit 
		Taille mini d un vaisseaux 
	si changement remise a zero de tous les vaisseaux deja detectes
	
	
Lacunes  --> Délimitation des tissus de soutien dans la zone externe
	
Resultats --> Resultats  et sauvegarde le roi manager
	clic droit permet d avoir les resultats sur tout un dossier
	
	
Raccourcis clavier numerique 
	0 pour supprimmer une selection
	1 pour ajouter un vaisceaux de Xyleme
	4 pour diminuer une selection faire update pour valider
	6 pour augmenter une selection faire update pour valider

*/

macro "AutoRun"{
	setTool("rectangle");
	setForegroundColor(255, 255, 255);//premier plan blanc
	setBackgroundColor(0,0,0);// fond noir
	run("Set Measurements...", "area shape display redirect=None decimal=3");
	requires("1.49p");
}

/////////////////////variables glogales////////////////////////////

//zones
var substract_background=true;
var param_total=newArray(0,236,2,0);// seuils radius enlarge
var param_cylindre=newArray(0,220,7,-7);
var param_parenchyme=newArray(0,220,7,-7);

//xyleme
var param_xyleme=newArray(2,500,10000); //radius surface mini maxi du xyleme 
//lacune
var filtre_lacunes=2;

//resultats
var nombre_xyl=0;
var title1 = "Resultats";
var title2 = "["+title1+"]";
var fe = title2;
	
////////////////////////////////////////////////////New Image//////////////////////////////////////////////////////////////////

macro "New Action Tool - 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"{
	if (nImages==0){
		open();
		//info_genotype_etat();	
		
	}
	
	else{
	
	dir=getInfo("image.directory");
		nom=getTitle();
		nom=replace(nom,".tif","");
		roiManager("Save", dir+nom+"-RoiSet.zip");//sauvegarde de roi manager
		run("Remove Overlay");
		run("Save");	
	
	
	
	run("Open Next");
	if (isOpen("ROI Manager")){
		roiManager("Deselect");
		n = roiManager("count");
		if (n>0) roiManager("Delete");
	}
	
	etat="";

	dir=getInfo("image.directory");
	nom=getTitle();
	nom=replace(nom,".tif","");
	if (File.exists(dir+nom+"-RoiSet.zip") ) 	roiManager("Open",dir+nom+"-RoiSet.zip");
}

}





/////////////////////////////////////////////////Zonation///////////////////////////////////////////////////////////////////////////////

macro "Zonation Action Tool - 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"{
	raz();
	origid=getImageID();
	//info_genotype_etat();
	run("Select None");
	
	//Total
	run("Duplicate...", "title=total");
	run("8-bit");
	if(substract_background) run("Subtract Background...", "rolling=50 light");
	run("Median...", "radius="+param_total[2]);
	Validation_surface("Total",param_total);
	//Cylindre
	selectImage(origid);
	run("Select None");
	run("Duplicate...", "title=cylindre");
	run("8-bit");
	if(substract_background) run("Subtract Background...", "rolling=50 light");
	run("Gaussian Blur...", "sigma="+param_cylindre[2]);
	Validation_surface("Cylindre",param_cylindre);
	//Parenchyme
	selectImage(origid);
	run("Select None");
	run("Duplicate...", "title=parenchyme");
	run("8-bit");
	if(substract_background) run("Subtract Background...", "rolling=50 light");
	run("Gaussian Blur...", "sigma="+param_parenchyme[2]);
	Validation_surface("Parenchyme",param_parenchyme);
	/*roiManager("Select", newArray(1,2));
	roiManager("XOR");
	roiManager("Add");
	roiManager("Deselect");
	roiManager("Select", 2);
	roiManager("Delete");
	roiManager("Select", 2);
	roiManager("Rename", "Parenchyme");*/
	selectImage(origid);
	roiManager("Deselect");
	roiManager("Show All");
	//setTool("rectangle");
	
	}


macro 'Zonation Action Tool Options'  {
    Dialog.create("Zonation");
	Dialog.addCheckbox("Correction du fond", substract_background); 
    Dialog.addMessage("Tailles des filtres");
    Dialog.addNumber("Filtre Total:", param_total[2]);
	Dialog.addNumber("Correction selection Total :", param_total[3]);
    Dialog.addNumber("Filtre Cylindre:",  param_cylindre[2]);
	Dialog.addNumber("Correction selection Total :", param_cylindre[3]);
	Dialog.addNumber("Filtre Parenchyme:",  param_parenchyme[2]);
	Dialog.addNumber("Correction selection Total :", param_parenchyme[3]);
	Dialog.show();
	substract_background=Dialog.getCheckbox();
    param_total[2]=Dialog.getNumber();
    param_total[3]=Dialog.getNumber();
	param_cylindre[2]=Dialog.getNumber();
	param_cylindre[3]=Dialog.getNumber();
    param_parenchyme[2]=Dialog.getNumber();
	param_parenchyme[3]=Dialog.getNumber();      
  	}

	
//////////////////////////////////Xyleme///////////////////////////////////////////////////////////////////

macro "Xyleme Action Tool - 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"{


	ncount=roiManager("count");
	for(i=ncount-1;i>=0;i--){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (startsWith(nom_item, "Xyl")) roiManager("Delete");
		}
	origid=getImageID();
	ncount=roiManager("count");
	run("Select None");
	run("Duplicate...", "title=xyl");
	run("8-bit");
	run("Subtract Background...", "rolling=50 light");
	run("Median...", "radius="+param_xyleme[0]);
	RoiSelect("Cylindre");	
	setAutoThreshold("Default dark");
	
	seuils=ChoixSeuils();
	n_avant=roiManager("count");
	run("Analyze Particles...", "size="+param_xyleme[1]+"-"+param_xyleme[2]+" pixel add");
		close();
		n_apres=roiManager("count");
		nombre_xyl=0;
	for (i=n_avant; i<n_apres; i++) {
		nombre_xyl++;
		roiManager("Select", i);
		roiManager("Rename", "Xyl"+nombre_xyl);		
		}
		//close();		
		selectImage(origid);
		roiManager("Deselect");
		roiManager("Show All");	
	
}
/////////////////////
macro 'Xyleme Action Tool Options'  {
	
	Dialog.create("Xyleme"); //e.g., put a dialog here
	Dialog.addNumber("Filtre Xyleme:", param_xyleme[0]);
    Dialog.addNumber("Surface minilale :", param_xyleme[1]);
	Dialog.addNumber("Surface maximale :", param_xyleme[2]);
    Dialog.show();
    param_xyleme[0] = Dialog.getNumber();
	param_xyleme[1] = Dialog.getNumber();
	param_xyleme[2] = Dialog.getNumber();		
	}
	
//////////////////////////////////Lacunes///////////////////////////////////////////////////////////////////

macro "Lacunes Action Tool - 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"{

	
	index_cylindre=-1;
	index_parenchyme=-1;
	ncount=roiManager("count");
	for(i=ncount-1;i>=0;i--){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (startsWith(nom_item, "Lacunes")) roiManager("Delete");
		if (startsWith(nom_item, "Cylindre")) index_cylindre=i;
		if (startsWith(nom_item, "Parenchyme")) index_parenchyme=i;		
		}
	origid=getImageID();
	ncount=roiManager("count");
	run("Select None");
	run("Duplicate...", "title=lacunes");
	run("8-bit");
	run("Subtract Background...", "rolling=50 light");
	run("Median...", "radius="+param_xyleme[0]);
	//RoiSelect("Parenchyme");
	roiManager("Select", newArray(index_cylindre,index_parenchyme));
	roiManager("XOR");
	run("Clear Outside");
	setAutoThreshold("Default dark");
	seuils=ChoixSeuils();
	run("Create Selection");
	RoiAdd("Lacunes");
	close();	
		
		selectImage(origid);
		roiManager("Deselect");
		roiManager("Show All");	
	
}
/////////////////////
macro 'Lacunes Action Tool Options'  {
	
	Dialog.create("Lacunes"); //e.g., put a dialog here
	Dialog.addNumber("Filtre Lacunes:", filtre_lacunes);   
    Dialog.show();
    filtre_lacunes = Dialog.getNumber();
		
	}
	


/////////////////////////////////////////////////////Resultats/////////////////////////////////////////////////////////////////////////////////////
macro "Resultats Action Tool - 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"{
		run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
		dir=getInfo("image.directory");
		nom=getTitle();
		nom=replace(nom,".tif","");
		mesure_r();
		roiManager("Save", dir+nom+"-RoiSet.zip");//sauvegarde de roi manager
		run("Remove Overlay");
		//run("Save");		
}

macro 'Resultats Action Tool Options'  {

		dir = getDirectory("Choisir un repertoire source");
		list = getFileList(dir);
		setBatchMode(true);
		for (i=0; i<list.length; i++) {												
			 if (endsWith(list[i], "-RoiSet.zip")){	
						nom=list[i];
			 			roiManager("Open", dir+list[i]);										//condition sur l extension tif
			 			 nom=replace(nom,"-RoiSet.zip",".tif");	
							//print(nom);						 //nom sans l extension
			 			open(dir + nom);	
			 				mesure_r();
			 				close();
			 				roiManager("Reset");
			}

}
}




///////////////////////////////////////////////////????????????????????????????????????????????????????

macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets\\PHIV_RiceRoot_toolset.txt");
}


//////////////////////////Shortcut Key/////////////////

//supression de selection 
macro "Select_Eode [n4]"{
	run("Enlarge...", "enlarge=-1 pixel");
		
}
macro "Select_Dilate [n6]"{
	run("Enlarge...", "enlarge=1 pixel");
		
}


//supression de selection 
macro "ROI Delete [n0]"{
	if(selectionType()!=-1 && selectionType()!=10){
	
		roiManager("Delete");
		run("Select None");
	}
		
}


//ajout de selection

macro "ROI Ajoute [n1]"{

			RoiAdd("Xyl");
		
		
	

}





	
	/////////////////////////////////////////////////////FUNCTIONS///////////////////////////////////////////////////
var function RoiAdd(nom) {
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);	
	roiManager("Rename", nom);
}

function RoiSelect(string){
	n=roiManager("count");
	for(i=0;i<n;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (startsWith(nom_item, string)) i=n;
		}
	roiManager("Deselect");
}	



function Validation_surface(zone,seuils){
	run("Threshold...");
	setThreshold(seuils[0], seuils[1]);
	run("Threshold...");	
	setTool("wand");
	title = zone;
	msg = "Regler le seuil pour la zone : "+zone+"\n puis selectionner avec la baguette";
	waitForUser(title, msg);
	getThreshold(lower, upper);
	seuils[0]=lower;
	seuils[1]=upper;
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);
	roiManager("Rename", zone);
	close();
  selectImage(origid);
  roiManager("Select", n-1);
  run("Enlarge...", "enlarge="+seuils[3]+" pixel");
	setTool("brush");
	call("ij.gui.Toolbar.setBrushSize", 20); 
	waitForUser(zone,"Correction de la selection");
	//run("Interpolate", "interval=1");//voir feret!
	roiManager("Update");	
	roiManager("Deselect");
	run("Select None");	
	setTool("rectangle");
}

var function ChoixSeuils(){
	
	waitForUser("Seuil","Reglage du Seuil");
	getThreshold(lower, upper);
	seuils=newArray(2);
	seuils[0]=lower;
	seuils[1]=upper;
	return seuils
	}


var function raz(){
	if (roiManager("count")>0){
		roiManager("Deselect");
		roiManager("Delete");
		}	
	run("Remove Overlay");
	run("Clear Results");
	print ("\\Clear");
	}



function NA(valeur){
	if (valeur==-1)valeur="NA";
	return valeur;
}

function deux_decimal(valeur){
	if (valeur!=-1){
		valeur= round(valeur*100)/100;
	}
	else valeur="NA";
	return valeur;
}





function mesure_r(){
	area_total=0;
	diam=0;
	area_cylindre=0;
	area_parenchyme=0;
	nb_fx_xyl=0;
	area_xyl=0;
	area_lacune=0;
	
	ncount=roiManager("count");
	for(i=0;i<ncount;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			
						if (nom_item=="Total"){
							getStatistics(area);
							area_total=area;////////////////////////////////////////////area_total
							run("Set Measurements...", "area centroid feret's redirect=None decimal=3");
							List.setMeasurements;
							diam=List.getValue("Feret");////////////////diam
							}
						if (nom_item=="Cylindre"){
							getStatistics(area);
							area_cylindre=area;////////////////////////////////////////////surfzone1
							}
						if (nom_item=="Parenchyme"){
							getStatistics(area);
							area_parenchyme=area;////////////////////////////////////////////surfzone1
							}
						if (startsWith(nom_item, "Xyl")){
							nb_fx_xyl++;////////////////////////////////////////////nb fx xyl
							getStatistics(area);
							area_xyl=area_xyl+area;
						}
						if (startsWith(nom_item, "Lacun")){
							getStatistics(area);
							area_lacune=area;
						}
						
		}
		area_parenchyme=area_parenchyme-area_cylindre;
		run("Select None");
		/*area_total=deux_decimal(area_total/1000000);
		area_cylindre=deux_decimal(area_bois/1000000);
		area_parenchyme=deux_decimal(area_moelle/1000000);
		area_xyl=deux_decimal(area_xyl/1000000);
		diam=deux_decimal(diam/1000);*/
	

		if( !isOpen("Resultats")){
		run("Table...", "name="+title2+" width=1400 height=600");
print(fe, "\\Headings:Image \tdiametre \ttotale \tcylindre \tparenchyme \tnb_xyl \tsurf_xyl \tsurf_lacun ");

	}
print(fe, nom+"\t"+diam+"\t"+area_total+"\t"+area_cylindre+"\t"+area_parenchyme+"\t"+nb_fx_xyl+"\t"+area_xyl+"\t"+area_lacune);

}	

		
