// PHIV NDPI Tool Set
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter l export des fichiers ndpi issu du nanozoomer

// installer loci bio formats
//http://www.loci.wisc.edu/files/software/loci_tools.jar



/*
Outil Ndpi : Pour previsualuser le contenu d un fichier Ndpi a faible resolution (serie4)

Outi CropLoci : Pour extraire au format tiff et a la resolution choisie (serie de 1 a 3)
	une zone selectionnee sur la previsualisation via l outil Ndpi
	Option clic droit pour le choix de la resolution

Outil NdpiMacroBatch Permet de decouper et exporter au format tiff les fichiers ndpi d un repertoire source
	dans un repertoire cible 
	avec l option N° de serie allant de   1 à 3 de la plus forte a la plus petite resolution 
	Crop Automatique pour decouper les objets detectes sinon exporte toute l image  
	Filtre gaussien pour lisser les objets
	Taille mini des objets en cm²
	Elargissement en pixel pour decouper plus grand que l objet

 

Outil Renommer permet de renommer tous les fichiers d un repertoire
	il faut choisir le repertoire
	copier la liste des noms dans excel
	ecrire les nouveaux noms dans la colonnes voisine correspondante
	copier dans le presse papier les 2 colonnes
	puis cliquer sur ok

*/

//variables glogales
var path="";
var FacteurMultiplicatif=0;
var NomImage="nom d image";
var numserie=2;
var numserie_crop=2;
//crop
var taille_crop=10; // mini en cm²
var filtre_crop=5;
var enlarge_crop=5;
var SX=newArray (6);
var SY=newArray (6);
var autocrop=true;


macro "AutoRun"{
	setTool("rectangle");
	setForegroundColor(255, 255, 255);//premier plan blanc
	setBackgroundColor(0,0,0);// fond noir
	run("Set Measurements...", "area shape display redirect=None decimal=3");
	requires("1.49p");
}


////////////////////////////////////////////////////////////////label=Ndpi////////////////////////////////////////////
macro "Ndpi Action Tool - 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"{

path = File.openDialog("Choose a file");
pathsansext=substring(path,0,indexOf(path,".ndpi"));
NomImage=File.getName(path);
Bio_meta(path);
run("Bio-Formats Importer", "open=["+path+"] color_mode=Default view=Hyperstack stack_order=XYCZT series_4");
Hyper2RGB();
//Array.show("title", SX, SY);
}

////////////////////////////////////////////////////////////////label=CropLoci////////////////////////////////////////////

macro "CropLoci Action Tool - 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"{


//waitForUser("Faire une Selection");
getSelectionBounds(x, y, width, height);

for (s=1;s<4;s++){
if (s==numserie_crop) FacteurMultiplicatif = SX[s-1]/SX[3];
}

x=(FacteurMultiplicatif)*x;
y=(FacteurMultiplicatif)*y;
width=(FacteurMultiplicatif)*width;
height=(FacteurMultiplicatif)*height;
if (width*height < 20000*20000){
	run("Bio-Formats Importer", "open=["+path+"] color_mode=Default crop view=Hyperstack stack_order=XYCZT series_"+numserie_crop+" x_coordinate_"+numserie_crop+"="+x+" y_coordinate_"+numserie_crop+"="+y+" width_"+numserie_crop+"="+width+" height_"+numserie_crop+"="+height+"");
	Hyper2RGB();
	}
	else print ("Taille trop grande");
}


macro 'CropLoci Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Serie"); //e.g., put a dialog here
	Dialog.addSlider("Numero de serie:", 1, 3, numserie_crop);
    Dialog.show();
    numserie_crop = Dialog.getNumber();
  	}



////////////////////////////////////////////////////////////////label=NdpiExportBatch////////////////////////////////////////////

macro "NdpiMacroBatch Action Tool - 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"{

Dialog.create("NdpiMacroBatch"); //e.g., put a dialog here
	Dialog.addSlider("Numero de serie pour les ndpi:", 1, 3, numserie);
	Dialog.addCheckbox("Crop Automatique", autocrop); 
	Dialog.addNumber("Filtre Gaussien :", filtre_crop);
    Dialog.addNumber("Taille mini (cm²) :", taille_crop);
	Dialog.addNumber("Elargissement :", enlarge_crop);
	Dialog.show();
	numserie = Dialog.getNumber();
	autocrop=Dialog.getCheckbox();
    filtre_crop = Dialog.getNumber();
	taille_crop = Dialog.getNumber();
	enlarge_crop = Dialog.getNumber();
	
	
dir1 = getDirectory("Choix du Repertoire Source ");
list = getFileList(dir1);
dir2 = getDirectory("Choix du Repertoire Cible ");	
Vide_Roi();
      for (i=0; i<list.length; i++) {
          showProgress(i+1, list.length);
			path=dir1+list[i];
			nom=list[i];
		if (autocrop){
           if (endsWith(list[i], '.ndpi')){
			nom=substring(nom,0,indexOf(nom,".ndpi"));
			nom=replace(nom, " ", "");
			Bio_meta(path);
			run("Bio-Formats Importer", "open=["+path+"] color_mode=Default view=Hyperstack stack_order=XYCZT series_4");
			Hyper2RGB();
			origid=getImageID();
			Detect_Roi(filtre_crop,taille_crop);
			count=roiManager("count");
			for(j=1;j<=count;j++){
				selectImage(origid);
				roiManager("Select", j-1);
				run("Enlarge...", "enlarge="+enlarge_crop+" pixel");
				getSelectionBounds(x, y, width, height);
				for (s=1;s<4;s++){
				if (s==numserie) FacteurMultiplicatif = SX[s-1]/SX[3];
				}
				x=(FacteurMultiplicatif)*x;
				y=(FacteurMultiplicatif)*y;
				width=(FacteurMultiplicatif)*width;
				height=(FacteurMultiplicatif)*height;
				if (width*height < 20000*20000){
					run("Bio-Formats Importer", "open=["+path+"] color_mode=Default crop view=Hyperstack stack_order=XYCZT series_"+numserie+" x_coordinate_"+numserie+"="+x+" y_coordinate_"+numserie+"="+y+" width_"+numserie+"="+width+" height_"+numserie+"="+height+"");
					Hyper2RGB();
					}
					else print ("Taille trop grande");	
				saveAs("Tiff",dir2+nom+"-"+j);	
				close();			
				}
			selectImage(origid);
			close();
			Vide_Roi();
		   }
		   if (endsWith(list[i], '.tif')){
			nom=substring(nom,0,indexOf(nom,".tif"));
			nom=replace(nom, " ", "");
			open(path);
			origid=getImageID();
			Detect_Roi(filtre_crop,taille_crop);
			count=roiManager("count");
			for(j=1;j<=count;j++){
				selectImage(origid);
				roiManager("Select", j-1);
				run("Enlarge...", "enlarge="+enlarge_crop+" pixel");
				run("Duplicate...", "title="+nom+"-"+j);
				run("Select None");
				saveAs("Tiff",dir2+nom+"-"+j);	
				close();				
				}
			close();
			Vide_Roi();
		   }
		   }
		   else {
		   nom=substring(nom,0,indexOf(nom,".ndpi"));
			nom=replace(nom, " ", "");
			Bio_meta(path);
			for (s=2;s<4;s++){
					if (s==numserie)  Max=SX[s-1]*SY[s-1];
				}					   
			 if (Max < 20000*20000){
			   run("Bio-Formats Importer", "open=["+path+"] color_mode=Default crop view=Hyperstack stack_order=XYCZT series_"+numserie);
			   Hyper2RGB();
			   saveAs("Tiff", dir2+nom+".tif");
			   close ();
			}
			else print (nom+" taille trop grande");
		   		   
		   }
		   
	   }

	}
	/*
macro 'NdpiMacroBatch Action Tool Options'  {
	Dialog.create("NdpiMacroBatch"); //e.g., put a dialog here
	Dialog.addNumber("Filtre Gaussien :", filtre_crop);
    Dialog.addNumber("Taille mini (cm²) :", taille_crop);
	Dialog.addNumber("Elargissement :", enlarge_crop);
	Dialog.addSlider("Numero de serie pour les ndpi:", 1, 3, numserie);
    Dialog.show();
    filtre_crop = Dialog.getNumber();
	taille_crop = Dialog.getNumber();
	enlarge_crop = Dialog.getNumber();
	numserie = Dialog.getNumber();
    
  	}
*/

macro "Renommer Action Tool - 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"{
	rename_files();
}

macro "jpeg2000 Action Tool - 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"{


dir1 = getDirectory("Choix du Repertoire Source ");
list = getFileList(dir1);
dir2 = getDirectory("Choix du Repertoire Cible ");	
dirmacro=getDirectory("macros");
dirjp2=dirmacro+"bin\\jp2\\";
print("\\Clear"); 
for (i=0; i<list.length; i++) {
          showProgress(i+1, list.length);
			
			//pathsansext=substring(path,0,indexOf(path,".czi"));
			nom=substring(list[i],0,indexOf(list[i],"."));
			
			command=dirjp2+"JP2WSIConverter -i "+dir1+list[i]+" -o "+dir2+nom+".jp2"+" -c "+30;
			print (command);	
	}


waitForUser("Conversion via JP2WSIConverter", "Fermer les fenetres de commande une fois la conversion terminee");
selectWindow("Log");//sauvegarder en .bat
		saveAs("Text",dirjp2+"cmd.txt");
		if (File.exists(dirjp2+"cmd.bat")) File.delete(dirjp2+"cmd.bat");
        File.rename(dirjp2+"cmd.txt",dirjp2+"cmd.bat");
		exec("cmd", "/c", "start", dirjp2+"cmd.bat");
		

print("ok");

exit();

}




macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/PHIV_Scan_toolset.txt");
}

	

function rename_files(){

dir = getDirectory("Choisir un repertoire source");
list_old = getFileList(dir);
list_ext=newArray(list_old.length);
list_new=newArray(list_old.length);
for (i=0; i<list_old.length; i++) {
	list_ext[i]=substring(list_old[i],(lastIndexOf(list_old[i], ".")),lengthOf(list_old[i]));
	  }
String.resetBuffer;
 for (i=0; i<list_old.length; i++) {
		String.append(substring(list_old[i],0,lastIndexOf(list_old[i], ".")) + "\n");
	  }
  String.copy(String.buffer);
  waitForUser("Coller dans excel","La liste des fichiers est dans le presse papier\nColler la dans excel (Ctrl-v), \nEcrire les nouveaux noms\ndans la colonne voisine\nCopier les 2 colonnes dans le presse papier (Ctrl-c)\npuis cliquer sur OK");
  clipboard=String.paste;
  //String.show(liste);
  lines=split(clipboard, "\n");	
if (lengthOf(lines)<1)  exit;
for (i=0; i<lengthOf(lines); i++){
			row=split(lines[i],"\t");
			if (lengthOf(row)==2) list_new[i]=row[1];
			}
if (doublon(list_new)) exit("Il y a un doublon");
for (i=0; i<lengthOf(lines); i++){
	File.rename(dir+list_old[i],dir+"temp"+list_old[i]);
	}
for (i=0; i<lengthOf(lines); i++){
	print (list_old[i]+"-->"+list_new[i]);
	File.rename(dir+"temp"+list_old[i],dir+list_new[i]+list_ext[i]);
	}
	Array.show("titre",list_old,list_ext,list_new);
}

function doublon(Tableau){
	double=false;
	for (i=0;i<Tableau.length;i++){
		for (j=0;j<Tableau.length;j++){
		if ((Tableau[i]==Tableau[j])&&(i!=j)) double=true;		
		}
	 return double;
	}
}

function Hyper2RGB(){
	setBatchMode(true);
	titre=getTitle();
	setSlice(1);
	 setMetadata("Label", "r");
	setSlice(2);
	 setMetadata("Label", "g");
	setSlice(3);
	 setMetadata("Label", "b");
	run("Stack to Images");
	run("Merge Channels...", "c1=r c2=g c3=b");
	selectWindow("RGB");
	rename(titre);
	setBatchMode(false);
}

function Bio_meta(path){
	run("Bio-Formats Macro Extensions");
	Ext.setId(path);
	for (s=0; s<6; s++) {
	  Ext.setSeries(s);
	  Ext.getSizeX(sizeX);
	  SX[s]=sizeX;
	  Ext.getSizeY(sizeY);
	  SY[s]=sizeY;
	  }
	Ext.close();
}

function Vide_Roi(){
if (isOpen("ROI Manager")){
				roiManager("Deselect");
				n = roiManager("count");
				if (n>0) roiManager("Delete");
			}
}

function Detect_Roi(filtre_crop,taille_crop){
		run("Duplicate...", "title=temp");
		run("8-bit");
		run("Gaussian Blur...", "sigma="+filtre_crop+" scaled");
		setAutoThreshold("Default");	
		run("Analyze Particles...", "size="+(taille_crop*1000000)+"-Infinity include add");
		count=roiManager("count");
		for(i=0;i<count;i++){
				roiManager("Select", i);
				getSelectionBounds(x, y, width, height);
				x=10000+x;
				roiManager("Rename", ""+x);				
			}
		roiManager("Deselect");
		roiManager("Sort");
		close();

}


