// PHIV Shorgo Moelle Tool Set 
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter la segmentation des coupes de sorgho

/*
Outil Calibration dans un premier temps recupere la valeur du pixel sur une photo de regle
	et dans un deuxieme temps fait une calibration spatiale des images
	
Outil Zonation pour delimiter la totalite de l objet a mesurer

Outil Faisceaux pour segmenter les faisceaux
	
Outil resultat
	
Raccourcis clavier au pave numerique
0 supprimme une selection
1 ajoute une selection



*/

macro "AutoRun"{
	setTool("rectangle");
	setForegroundColor(255, 255, 255);//premier plan blanc
	setBackgroundColor(0,0,0);// fond noir
	run("Set Measurements...", "area shape display redirect=None decimal=3");
	requires("1.49p");
}


/////////////////////variables glogales////////////////////////////

var radius=10;
var seuil_total=newArray(70,255);
var title1 = "Resultats";
var title2 = "["+title1+"]";
var fe = title2;
var calibration=0;

var param_fx_lab=newArray(5,50,50,0.2);
var param_fx_hsb=newArray(10,30,50,0.2);
var param_fx_fft=newArray(40,30,50,0.2);

/*
macro "Calibration Action Tool - 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"{


	if (calibration==0){
		setTool("line");
		waitForUser("Calibration","Faire une ligne de 1cm sur la photo de la regle");
		if(selectionType() !=5){
			waitForUser("Calibration","Faire une ligne de 10mm sur la photo de la regle");		
		}
		if(selectionType() ==5){
			run("Set Scale...", "distance=[] known=[] pixel=[] unit=[]");
			List.setMeasurements;
			calibration=List.getValue("Length");
		
		}
		close();
		showMessage("Vous pouvez appliquer la calibration \nNombre de pixels au mm: "+calibration);
		
	}
	else {
		run("Set Scale...", "distance="+calibration+" known=10 pixel=1 unit=mm");
		showMessage("Nombre de pixels au mm: "+calibration);
	}
	
	
	
}
*/



/////////////////////////////////////////////////Zonation///////////////////////////////////////////////////////////////////////////////

macro "Zonation Action Tool - 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"{
	if (roiManager("count")>0){
		showMessage("<html>"+"Recommencer l'analyse ?<br> Touche Echap pour Non");
		roiManager("Deselect");
		roiManager("Delete");
		}
	
	origid=getImageID();
	//run("Enhance Contrast", "saturated=0.35");
	dir=getInfo("image.directory");
	nom=getTitle();
	nom=replace(nom,".tif","");
	run("Select None");
	//Total
	run("Duplicate...", "title=nb");
	run("8-bit");
	run("Gaussian Blur...", "sigma="+radius);
	//run("Median...", "radius="+median);
	Validation_surface("Total",seuil_total);

	selectImage(origid);
	roiManager("Deselect");
	roiManager("Show All");
	//setTool("rectangle");
	
	}


macro 'Zonation Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    
    Dialog.create("Zonation");
    Dialog.addMessage("Tailles des filtres");
    Dialog.addNumber("Filtre Total:", radius);    
    Dialog.show();
    radius=Dialog.getNumber();
          
  	}



//////////////////////////////////Faisceaux_int///////////////////////////////////////////////////////////////////


macro "Faisceaux_HSB Action Tool - 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"{


	RoiDelete ("Fxi");	
	
	origid=getImageID();
	run("Select None");
	run("Duplicate...", "title=fx");
	//run("8-bit");
	n=roiManager("count");
	for(i=0;i<n;i++){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (nom_item=="Total"){
			setBackgroundColor(0,0,0);// fond blanc
			//run("Enlarge...", "enlarge=-50 pixel");
			run("Clear Outside");			
			}
		
		
		}
	roiManager("Deselect");
	run("Select None");
	setBackgroundColor(255,255,255);// fond noir
	norig=roiManager("count");
	run("HSB Stack");
	selectWindow("fx");
	run("Next Slice [>]");
	//run("Next Slice [>]");
	run("Duplicate...", "title=lb");
	run("8-bit");
	run("Grays");
	run("Median...", "radius="+param_fx_hsb[0]);
	run("Subtract Background...", "rolling="+param_fx_hsb[1]);
	setAutoThreshold("Yen dark");
	waitForUser;
	run("Analyze Particles...", "size="+param_fx_hsb[2]+"-Infinity pixel circularity="+param_fx_hsb[3]+"-1.00 add");
	
	selectWindow("fx");
	close();
	selectWindow("lb");
	close();

	nfinal=roiManager("count");
	for(i=norig;i<nfinal;i++){
		roiManager("Select", i);
		roiManager("Rename", "Fxi"+i);
			
	}
	
	selectImage(origid);
	roiManager("Deselect");
	roiManager("Show All with labels");
	setTool("oval");
	
	
	
}


macro 'Faisceaux_HSB Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    
    Dialog.create("Faisceaux");
    Dialog.addMessage("Parametres");
    Dialog.addNumber("Filtre median:", param_fx_hsb[0]);
	Dialog.addNumber("Rolling ball:", param_fx_hsb[1]); 
	Dialog.addNumber("Taille mini:", param_fx_hsb[2]); 
	Dialog.addNumber("Circularity mini:", param_fx_hsb[3]); 	
	Dialog.show();
    param_fx_hsb[0]=Dialog.getNumber();
	param_fx_hsb[1]=Dialog.getNumber();
	param_fx_hsb[2]=Dialog.getNumber();
	param_fx_hsb[3]=Dialog.getNumber();
          
  	}


//////////////////////////////////Faisceaux_int///////////////////////////////////////////////////////////////////



macro "Faisceaux_Lab Action Tool - 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"{

	RoiDelete ("Fxi");	
	
	origid=getImageID();
	run("Select None");
	run("Duplicate...", "title=fx");
	//run("8-bit");
	n=roiManager("count");
	for(i=0;i<n;i++){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (nom_item=="Total"){
			setBackgroundColor(0,0,0);// fond blanc
			//run("Enlarge...", "enlarge=-50 pixel");
			run("Clear Outside");			
			}
		
		
		}
	roiManager("Deselect");
	run("Select None");
	setBackgroundColor(255,255,255);// fond noir
	norig=roiManager("count");
	run("Lab Stack");
	selectWindow("fx");
	run("Next Slice [>]");
	run("Next Slice [>]");
	run("Duplicate...", "title=lb");
	run("8-bit");
	run("Grays");
	run("Median...", "radius="+param_fx_lab[0]);
	run("Subtract Background...", "rolling="+param_fx_lab[1]);
	setAutoThreshold("Yen dark");
	waitForUser;
	run("Analyze Particles...", "size="+param_fx_lab[2]+"-Infinity pixel circularity="+param_fx_lab[3]+"-1.00 add");
	
	selectWindow("fx");
	close();
	selectWindow("lb");
	close();

	nfinal=roiManager("count");
	for(i=norig;i<nfinal;i++){
		roiManager("Select", i);
		roiManager("Rename", "Fxi"+i);
			
	}
	
	selectImage(origid);
	roiManager("Deselect");
	roiManager("Show All with labels");
	setTool("oval");
	
	
	
}

macro 'Faisceaux_Lab Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    
    Dialog.create("Faisceaux");
    Dialog.addMessage("Parametres");
    Dialog.addNumber("Filtre median:", param_fx_lab[0]);
	Dialog.addNumber("Rolling ball:", param_fx_lab[1]); 
	Dialog.addNumber("Taille mini:", param_fx_lab[2]); 
	Dialog.addNumber("Circularity mini:", param_fx_lab[3]); 	
	Dialog.show();
    param_fx_lab[0]=Dialog.getNumber();
	param_fx_lab[1]=Dialog.getNumber();
	param_fx_lab[2]=Dialog.getNumber();
	param_fx_lab[3]=Dialog.getNumber();
          
  	}

//////////////////////////////////Faisceaux_int///////////////////////////////////////////////////////////////////



macro "Faisceaux_fft Action Tool - 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"{



	RoiDelete ("Fxi");	
	
	origid=getImageID();
	run("Select None");
	run("Duplicate...", "title=fx");
	//run("8-bit");
	n=roiManager("count");
	for(i=0;i<n;i++){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (nom_item=="Total"){
			setBackgroundColor(0,0,0);// fond blanc
			//run("Enlarge...", "enlarge=-50 pixel");
			run("Clear Outside");			
			}
		
		
		}
	roiManager("Deselect");
	run("Select None");
	setBackgroundColor(255,255,255);// fond noir
	norig=roiManager("count");
	run("HSB Stack");
	selectWindow("fx");
	run("Next Slice [>]");
	run("Duplicate...", "title=lb");
	run("8-bit");
	run("Grays");
	
	run("Bandpass Filter...", "filter_large="+param_fx_fft[0]+" filter_small="+param_fx_fft[1]+" suppress=None tolerance=5 autoscale saturate");


	
	setAutoThreshold("Intermodes dark");
	waitForUser;
	run("Analyze Particles...", "size="+param_fx_fft[2]+"-Infinity pixel circularity="+param_fx_fft[3]+"-1.00 add");
	
	selectWindow("fx");
	close();
	selectWindow("lb");
	close();

	nfinal=roiManager("count");
	for(i=norig;i<nfinal;i++){
		roiManager("Select", i);
		roiManager("Rename", "Fxi"+i);
			
	}
	
	selectImage(origid);
	roiManager("Deselect");
	roiManager("Show All with labels");
	setTool("oval");
	
	
	
}

macro 'Faisceaux_fft Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    
    Dialog.create("Faisceaux");
    Dialog.addMessage("Parametres");
    Dialog.addNumber("Filtre fft max:", param_fx_fft[0]);
	Dialog.addNumber("Filtre fft min:", param_fx_fft[1]); 
	Dialog.addNumber("Taille mini:", param_fx_fft[2]); 
	Dialog.addNumber("Circularity mini:", param_fx_fft[3]); 	
	Dialog.show();
    param_fx_fft[0]=Dialog.getNumber();
	param_fx_fft[1]=Dialog.getNumber();
	param_fx_fft[2]=Dialog.getNumber();
	param_fx_fft[3]=Dialog.getNumber();
          
  	}
	
	

/////////////////////////////////////////////////////Resultats R/////////////////////////////////////////////////////////////////////////////////////
macro "Resultats Action Tool - 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"{

		dir=getInfo("image.directory");
		nom=getTitle();
		nom=replace(nom,".tif","");
		RoiDedoublonne("Fxi");
		mesure_r();
		roiManager("Save", dir+nom+"-RoiSet.zip");//sauvegarde de roi manager
		run("Remove Overlay");
		run("Save");		
}

macro 'Resultats_R Action Tool Options'  {

		dir = getDirectory("Choisir un repertoire source");
		list = getFileList(dir);
		setBatchMode(true);
		for (i=0; i<list.length; i++) {												
			 if (endsWith(list[i], ".zip")){	
			 				roiManager("Open", dir+list[i]);										//condition sur l extension tif
			 			 nom=substring(list[i],0, lastIndexOf(list[i],"-"));		//nom sans l extension
			 			open(dir + nom+".tif");	
			 				mesure_r();
			 				close();
			 				roiManager("Reset");
			}

}
}

/////////////////////////////////////////////////////////////////////////////////////////////////////////////+


macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets\\PHIV_Sorgho_Moelle_toolset.txt");
}






//////////////////////////Shortcut Key/////////////////

//supression de selection 
macro "ROI Delete [n0]"{
	if(selectionType()!=-1 && selectionType()!=10){
	
		roiManager("Delete");
		run("Select None");
	}
		
}


//ajout de selection

macro "ROI Ajoute [n1]"{

			RoiAdd("Fxi");
		
		
	

}



//Zoom to selection

macro "Zoom [n3]"{
run("To Selection");
}
	

	
	
	/////////////////////////////////////////////////////FUNCTIONS///////////////////////////////////////////////////
	
	
/*	
function RoiAdd(nom) {
	compte=0;
	roiManager("Add");
	n = roiManager("count");
	for(i=0;i<n;i++){
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (startsWith(nom_item, nom)){
				compte++;
				roiManager("Select", i);
				if(compte==1) roiManager("Rename", nom);
				else roiManager("Rename", nom+"-"+compte);
				}
		}	
	roiManager("Select", n-1);	
	roiManager("Rename", nom+"-"+compte+1);
}
*/

function RoiAdd(nom) {
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);	
	roiManager("Rename", nom);
}




function RoiDedoublonne(string){
	compte=0;
	n=roiManager("count");
	for(i=0;i<n;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (startsWith(nom_item, string)){
				compte++;
				roiManager("Rename", string+"-"+compte);
			
			
			}
		}
	
		roiManager( "Deselect");
}




/*
function RoiRename(nom,index) {
	compte=0;
	n = roiManager("count");
	for(i=0;i<n;i++){
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (startsWith(nom_item, nom)){
				compte++;
				if(compte==1) roiManager("Rename", nom);
				else roiManager("Rename", nom+"-"+compte);
				}
		}	
	roiManager("Select", index);	
	roiManager("Rename", nom+"-"+compte);
}
*/


function RoiDelete (nom){
	ncount=roiManager("count");
	for(i=ncount-1;i>=0;i--){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (startsWith(nom_item, nom)) roiManager("Delete");
		}


}




var function RoiCompte(string){
	max=0;
	n=roiManager("count");
	for(i=0;i<n;i++){
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (startsWith(nom_item, string)){
				num=parseInt(replace(nom_item,string,""));
				if (max<num) max=num;
			}
		}
		return max+1;	
}


	///////////
var function faisseaux() {
	run("Duplicate...", "title=nb");
	run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
	run("Split Channels");
	selectWindow("nb (red)");
	close();
	selectWindow("nb (green)");
	close();
	selectWindow("nb (blue)");
	rename("fx");
	setBackgroundColor(255,255,255);
	zone_interne();
	setBackgroundColor(0,0,0);
}

var function sclerenchyme1() {
	colour_deconv("scl");

}

	///////////
var function sclerenchyme2() {
		run("Duplicate...", "title=scl");
		run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
		run("Split Channels");
		selectWindow("scl (red)");
		close();
		selectWindow("scl (green)");
		close();
		selectWindow("scl (blue)");
		rename("scl");
		//zone_interne();
	

}

var function colour_deconv(name){
	
		run("Select None");
		run("Duplicate...", "title=temp");
		run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
		run("Colour Deconvolution", "vectors=[FastRed FastBlue DAB]");
		selectWindow("temp-(Colour_3)");
		close();
		selectWindow("temp-(Colour_2)");
		close();
		selectWindow("Colour Deconvolution");
		close();
		selectWindow("temp");
		close();
		selectWindow("temp-(Colour_1)");
		//imageCalculator("Add create", "scl-(Colour_1)","xyl");
		rename("Colour_deconv_red");
		run("Select None");
		run("Duplicate...", "title="+name);
	
	
}




///////////////////////////

var function Blur(sigma){
	run("Gaussian Blur...", "sigma="+sigma);
}


	
	var function Seuil(seuils){
	setThreshold(seuils[0], seuils[1]);
	run("Convert to Mask");
}




function Validation_surface(zone,seuils){
	run("Threshold...");
	setThreshold(seuils[0], seuils[1]);
	run("Threshold...");	
	setTool("wand");
	title = zone;
	msg = "Regler le seuil puis selectionner avec la baguette";
	waitForUser(title, msg);
	getThreshold(lower, upper);
	seuils[0]=lower;
	seuils[1]=upper;
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);
	roiManager("Rename", zone);
	close();
  selectImage(origid);
  roiManager("Select", n-1);
  run("Enlarge...", "enlarge="+(2*radius)+" pixel");
  run("Enlarge...", "enlarge="+(-radius)+" pixel");
	setTool("brush");
	call("ij.gui.Toolbar.setBrushSize", 50); 
	waitForUser(zone,"Correction de la selection");
	//run("Interpolate", "interval=1");//voir feret!
	roiManager("Update");	
	roiManager("Deselect");
	run("Select None");	
	setTool("rectangle");
}

var function ChoixSeuils(titre,seuils){
	run("Threshold...");
	setThreshold(seuils[0], seuils[1]);
	run("Threshold...");
	waitForUser(titre,"Reglage du Seuil");
	getThreshold(lower, upper);
	seuils[0]=lower;
	seuils[1]=upper;
	}


var function zone_interne(){
		n=roiManager("count");
		for(i=0;i<n;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (nom_item=="Total") run("Clear Outside");
			if (nom_item=="Manque") run("Clear");
			if (nom_item=="Portion") run("Clear Outside");
			if (nom_item=="Zone") run("Clear");	
		}	
		run("Select None");	
}


var function raz(titre){
	if (roiManager("count")>0){
		roiManager("Deselect");
		roiManager("Delete");
		}	
	run("Remove Overlay");
	run("Clear Results");
	print ("\\Clear");
	
}



var function clear_roi(){
	valid_fx_ext=0;
	valid_autosegment=0;
	Num_Fxi="";
	n=roiManager("count");
	for(i=n-1;i>-1;i--){
		roiManager("Select", i);
		nom_item=Roi.getName;
		if (startsWith(nom_item, "Delete")) roiManager("Delete");
	}
	roiManager("Deselect");
	roiManager("Show None");
	roiManager("UseNames", "true");
	roiManager("Show All");
	run("Select None");
}


function NA(valeur){
	if (valeur==-1)valeur="NA";
	return valeur;
}

function deux_decimal(valeur){
	if (valeur!=-1){
		valeur= round(valeur*100)/100;
	}
	else valeur="NA";
	return valeur;
}


function angle2polygon (){
	if(selectionType() == 8){
		List.setMeasurements;
		angle=List.getValue("Angle");
		//y=ax+b;	
		Roi.getCoordinates(xpoints, ypoints);
		a1=(ypoints[1]-ypoints[0])/(xpoints[1]-xpoints[0]);
		b1=(ypoints[1]-a1*xpoints[1]);
		a2=(ypoints[1]-ypoints[2])/(xpoints[1]-xpoints[2]);
		b2=(ypoints[1]-a2*xpoints[1]);
		print (a1);
		print(b1);
		print (a2);
		print(b2);
		if(xpoints[0]<xpoints[1]) x1=-10000;
		else x1=10000;
		y1=a1*hx1+b1;
		makeLine(hx, hy, xpoints[1], ypoints[1]);
		hy=5000;
		hx=(hy-b)/a;
		makeLine(hx, hy, xpoints[0], ypoints[0]);
		
	}
	else {
		setTool("angle");
		title = "Zone a supprimer";
		msg = "Selectionner la zone a enlever avec l outil angle";
		waitForUser(title, msg);
		//angle2polygon ();
	}
	
	
}

function centre_gravite(){
	run("Set Measurements...", "area centroid shape display redirect=None decimal=3");
	getPixelSize(unit, pixelWidth, pixelHeight);
	run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
	List.setMeasurements;
	xg=List.getValue("X");
	yg=List.getValue("Y");
	run("Select None");
	makePoint(xg, yg);
	run("Set Scale...", "distance=1 known=&pixelWidth pixel=1 unit=&unit");
	run("Add Selection...");
}

function mesure_angle(){
	Roi.getCoordinates(xpoints, ypoints);
	xpoints=Array.trim(xpoints,3);
	ypoints=Array.trim(ypoints,3);
	makeSelection("angle",xpoints,ypoints);
	List.setMeasurements;
	return List.getValue("Angle");		
}

function portion_roi(i,index_portion,nom){
	roiManager("Select", newArray(i,index_portion));
	roiManager("AND");
	if(selectionType()!=-1) RoiAdd(nom+"_p");
}
function biomass(){
							run("8-bit");
							//setAutoThreshold("Default");
							ncount=roiManager("count");
							for(j=0;j<ncount;j++){
						roiManager("Select", j);
						nom_item=call("ij.plugin.frame.RoiManager.getName", j);
						
						if (nom_item=="Total"){
							index=j;
						}
						if (nom_item=="Portion"){
							index=j;
						}
					}
					roiManager("Select", index);
							setBackgroundColor(255, 255, 255);
							run("Clear Outside");
							run("Threshold...");
							setAutoThreshold("Default");
							waitForUser("Biomass","Reglage du Seuil");
							run("Create Selection");
							RoiAdd("Biomass");
			}

function mesure_r(){
	getVoxelSize(width, height, depth, unit);
	
	area_total=-1;
	nb_fx=0;
	//densite_fx=0;
	area_fx=0;
	pourcent_fx=0;
	
	ncount=roiManager("count");
	for(i=0;i<ncount;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			
						if (nom_item=="Total"){
							getStatistics(area);
							area_total=area;////////////////////////////////////////////area_total
							}
						if (startsWith(nom_item, "Fxi")){
							nb_fx++;
							getStatistics(area);
							area_fx=area_fx+area;
						} 
			}	
		run("Select None");
		
		//densite_fx=deux_decimal(nb_fx/area_total);
		pourcent_fx=deux_decimal(100*(area_fx/area_total));

		if( !isOpen("Resultats")){
		run("Table...", "name="+title2+" width=800 height=600");
print(fe, "\\Headings:Image \tsurftotale \tnb_fx \tsurf_fx \tperc_fx \tunite");

	}		
print(fe, nom+"\t"+area_total+"\t"+nb_fx+"\t"+area_fx+"\t"+pourcent_fx+"\t"+unit);

}	


