// PHIV Tilapia Tool Set
// Marc LARTAUD PHIV
// Boite a outils estimer les proportions de cellules marquees
// a partir de 2 acquisitions
// une Dapi pour reperer les noyaux
// une autre de marquage

/* 
Outil Maxi pour determiner les maxima



 Outil Marquage : reglages de seuils (clic droit)  et comptage des cellules marquees
 
 Outil Mesure : pour avoir les valeurs d intensite de marquage pour chaque cellules 
 
 
 */








//variables glogales
var fmn=5;//parametre du find maxima
var seuild=125;//seuils de comptage
var seuil1=160;//seuils de comptage
var seuil2=200;
var taille_median=10;//taille du filtre
compte_a=0;
compte_b=0;
compte_c=0;




macro "Unused Tool-1 - " {}  // laisse une place libre!

macro "Unused Tool-2 - " {}  // laisse une place libre!


macro "Maxi Action Tool - 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"{

run("Find Maxima...", "noise="+fmn+" output=[Point Selection]");
run("Enlarge...", "enlarge=3");
run("ROI Manager...");
roiManager("Add");
roiManager("Select", 0);
roiManager("Split");
roiManager("Delete");
roiManager("Show All without labels");
}

macro 'Maxi Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Find Maxima"); //e.g., put a dialog here
    Dialog.addNumber("noise:", fmn);
    Dialog.show();
    fmn = Dialog.getNumber();
  	}

/*
macro "Cellules Action Tool - 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"{
	origid=getImageID();
	nom=getInfo("image.filename");
	compte_a=0;
	compte_b=0;
	run("Duplicate...", "title=nb");
	run("8-bit");
	count=roiManager("count");
	for(i=0;i<count;i++){
	roiManager("Select", i);
	getStatistics(area, mean);
	if (mean<seuild){
		roiManager("Set Color", "#00ffff"); // rgb (magenta)
  	roiManager("Set Line Width", 2);
  	compte_a++;
  	roiManager("Rename", "N1_"+compte_a);
  }
  else {
  	roiManager("Set Color", "#ff00ff"); // rgb (magenta)
  	roiManager("Set Line Width", 2);
  	compte_b++;
  	roiManager("Rename", "N2_"+compte_b);
  }

		}
		close();
selectImage(origid);
roiManager("Show All");

print (nom);
print ("DAPI  seuil:"+seuild);
print ("Nombre de Noyaux de classe1 :"+compte_a);
print ("Nombre de Noyaux de classe2 :"+compte_b);
print("--------------------------");
}

macro 'Cellules Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Classes Cellules"); //e.g., put a dialog here
    Dialog.addSlider("seuil1:", 0, 255, seuild);
  	Dialog.show();
    seuild = Dialog.getNumber();
 	 
  	}
*/

macro "Marquage Action Tool - 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"{
compte_n1a=0;
compte_n1b=0;
compte_n1c=0;
compte_n2a=0;
compte_n2b=0;
compte_n2c=0;
origid=getImageID();
nom=getInfo("image.filename");
run("Duplicate...", "title=red");
run("Split Channels");
selectWindow("red (green)");
selectWindow("red (blue)");
close();
selectWindow("red (green)");
close();
selectWindow("red (red)");
run("Median...", "radius="+taille_median);
count=roiManager("count");
for(i=0;i<count;i++){
	roiManager("Select", i);
	nom_item=call("ij.plugin.frame.RoiManager.getName", i);
	getStatistics(area, mean);
	
	//if (startsWith(nom_item, "N1_")){
	
	if (mean<seuil1){
		roiManager("Set Color", "#00ff00"); // rgb (vert)
  	roiManager("Set Line Width", 2);
  	compte_n1a++;
  	roiManager("Rename", "M2_"+compte_n1a);
  } else {if  (mean<seuil2) {
		roiManager("Set Color", "#0000ff"); // rgb (bleu)
  	roiManager("Set Line Width", 2);
  	compte_n1b++;
  	roiManager("Rename", "M1_"+compte_n1b);
  }
  else {
  	roiManager("Set Color", "#ff0000"); // rgb (rouge)
  	roiManager("Set Line Width", 2);
  	compte_n1c++;
  	roiManager("Rename", "M0_"+compte_n1c);
  }

		}
	//}
	
	/*	if (startsWith(nom_item, "N2_")){
	
	if (mean<seuil1){
		roiManager("Set Color","#ffff00"); // rgb (jaune)
  	roiManager("Set Line Width", 2);
  	compte_n2a++;
  	roiManager("Rename", "N2M0_"+compte_n2a);
  } else {if  (mean<seuil2) {
		roiManager("Set Color", "#00ffff"); // rgb (cyan)
  	roiManager("Set Line Width", 2);
  	compte_n2b++;
  	roiManager("Rename", "N2M1_"+compte_n2b);
  }
  else {
  	roiManager("Set Color","#ff00ff"); // rgb (magenta)
  	roiManager("Set Line Width", 2);
  	compte_n2c++;
  	roiManager("Rename", "N2M2_"+compte_n2c);
  }

		}
	}
	
	*/
	
	
	}
		close();
selectImage(origid);
roiManager("Show All");

print (nom);
print ("Marquage seuils: "+seuil1+" ; "+seuil2);
print ("Nombre de cellules avec un marquage: \nfort (vert)\t "+compte_n1a+"\nfaible (bleu)\t "+compte_n1b+"\nnul (rouge)\t "+compte_n1c);
//print ("Nombre de cellules Type N2 : jaune "+compte_n2a+";cyan "+compte_n2b+";magenta "+compte_n2c);
print("--------------------------");
}

macro 'Marquage Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Marquage"); //e.g., put a dialog here
    Dialog.addNumber("Taille du filtre median:", taille_median);
    Dialog.addSlider("seuil1:", 0, 255, seuil1);
  	Dialog.addSlider("seuil2:", 0, 255, seuil2);
    Dialog.show();
    taille_median = Dialog.getNumber();
    seuil1 = Dialog.getNumber();
 	 seuil2 = Dialog.getNumber();
  	}



macro "Mesure Action Tool - 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"{
setBatchMode(true);
origid=getImageID();
nom=getInfo("image.filename");
run("Duplicate...", "title=red");
run("Split Channels");
selectWindow("red (green)");
selectWindow("red (blue)");
close();
selectWindow("red (green)");
close();
selectWindow("red (red)");
rename("ndg");
run("Median...", "radius="+taille_median);

roiManager("Deselect");
roiManager("Sort");
run("Set Measurements...", "  mean display redirect=None decimal=3");
roiManager("Measure");
		close();
selectImage(origid);
roiManager("Show All");

print (nom);
print ("Marquage seuils: "+seuil1+" ; "+seuil2);
}



macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/PHIV_Tilapia_toolset.txt");
}

