// PHIV Tomo Tool Set
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter l exploitation des fichiers issus du microtomographe

//enlever les fichiers log et autres que les images dans le dossier de reconstruction!

// installer Polar transformer
//http://rsbweb.nih.gov/ij/plugins/download/Polar_Transformer.class
//Installation de stripeFilter
//http://www.google.fr/url?sa=t&rct=j&q=&esrc=s&source=web&cd=1&ved=0CFgQFjAA&url=http%3A%2F%2Flibrary.eawag-empa.ch%2Fempa_publications_2009_open_access%2FEMPA20090111.pdf&ei=YSciUKC-NY2IhQe-uIGoDw&usg=AFQjCNGsaMN0upeiuw-HFi3p0dK5wKvqYg&sig2=2QDjnojgGkPHdMFTPKbpnQ
// ftp://ftp.empa.ch/pub/empa/outgoing/BeatsRamsch/lib/xlib_.jar



/*

Outil Crop et Clear Outside et binning simultanes
	Travaille sur des stack virtuels 
	clic droit pour l option facteur de binning_crop a 1 par defaut

Outil binning 
retaille l image en x y et z
clic droit pour l option facteur de binning a 2 par defaut



Outil Ring Artefact permet de supprimer ces artefacts
Selectionner au prealable le centre des artefacts
Clic droit pour acceder aux options de reglages des parametres

Trois paramètres permettent de contrôler le comportement du filtre: 
(1)W Ondelette, Daubechies wavelet 
Des résultats optimaux ont été obtenus pour les grandes ondelettes DB>3 
(2)L  Niveaux de decomposition dépend de la largeur la plus grande bande, ainsi que de sa verticalité
Choisir le plus petit pour une bonne elimination des artefacts en preservant les details de l image
(3)G  Facteur d'amortissement damping.
Le facteur optimal d'amortissement dépend de la linearite et regularite des bandes a l origine d el artefact
elle peut être abaissée pour les artefacts idéaux.


Outils de test des parametres du filtre sur une image

RingArtefact_test_DB pour des valeurs d ondelettes  (W) de de DB1 a DB43
RingArtefact_test_decomp pour des valeurs de niveaux  (L) de 1 a 20
RingArtefact_test_Damp pour des valeurs de damping  (G) de 1 a 40













*/

//variables glogales
var wavelet=24;
var decomposition=3;
var damping=10;
var binning=2;
var binningz=2;
var binning_crop=1;
var binning_cropz=1;



//enlever les fichiers log et autres que les images dans le dossier de reconstruction!
function IsAnImage (NomFichier)
{
	if (endsWith(NomFichier, '.bmp')) return true;
	if (endsWith(NomFichier, '.tif')) return true;
	if (endsWith(NomFichier, '.tiff')) return true;
	if (endsWith(NomFichier, '.jpg')) return true;
	if (endsWith(NomFichier, '.png')) return true;
	if (endsWith(NomFichier, '.gif')) return true;
	return false;
}


macro "Unused Tool-1 - " {}  // laisse une place libre!


////////////////////////////////////////////////////////////////label=Crop and Clear Outside////////////////////////////////////////////
macro "Crop Action Tool - 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"{
   
   setBackgroundColor(0, 0, 0);
   dir1 = getDirectory("Dossier Source ");
   list = getFileList(dir1);
   dir2 = getDirectory("Dossier Cible ");
   //start = getTime();
   run("Image Sequence...", "open=["+dir1+"] sort use");
   getSelectionBounds(x, y, width, height);
		if (x==0) waitForUser("Faire une selection de l image a garder\nFait un Clear Outside et un Crop et un binning");
		getSelectionBounds(x, y, width, height);
    new_width=round(width/binning_crop);
    new_height=round(height/binning_crop); 
   roiManager("reset")
   roiManager("Add");
   setBatchMode(true); // runs up to 6 times faster
   for (i=0; i<list.length; i=i+binning_cropz) {
   		showProgress(i+1, list.length);
   		if(  IsAnImage(list[i])){
   		open(dir1+list[i]);
			roiManager("Select", 0);
			run("Clear Outside");
			run("Crop");
			getPixelSize(unit, pixelWidth, pixelHeight);
			run("Size...", "width="+new_width+" height="+new_height+" constrain average interpolation=Bilinear");
			if(pixelWidth!=1) run("Set Scale...", "distance=1 known="+(pixelWidth*binning_crop)+" pixel=1 unit="+unit+"");		
		  saveAs("Tiff", dir2+list[i]);		
		  close();
		  		}
        }
  setBatchMode(false); // runs up to 6 times faster
  run("Image Sequence...", "open=["+dir2+"] sort use");
  //print((getTime()-start)/1000);

}

macro 'Crop Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Binning_Crop"); //e.g., put a dialog here
    Dialog.addNumber("Binning_Crop :", binning_crop);
    Dialog.addCheckbox("Binning en z", true);
    Dialog.show();
    binning_crop = Dialog.getNumber();
    bz=Dialog.getCheckbox();
    if (bz!=true) binning_cropz=1;
    else binning_cropz=binning_crop;

    

  	}


////////////////////////////////////////////////////////////////label=Binning////////////////////////////////////////////
macro "Binning Action Tool - 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"{

   dir1 = getDirectory("Dossier Source ");
   list = getFileList(dir1);
   dir2 = getDirectory("Dossier Cible ");
   //start = getTime();
   run("Image Sequence...", "open=["+dir1+"] sort use");
   getDimensions(width, height, channels, slices, frames);
   new_width=round(width/binning);
   new_height=round(height/binning);
   setBatchMode(true); // runs up to 6 times faster
   for (i=0; i<list.length; i=i+binningz) {
   		showProgress(i+1, list.length);
   		if(  IsAnImage(list[i])){
   		open(dir1+list[i]);
   		getPixelSize(unit, pixelWidth, pixelHeight);
			run("Size...", "width="+new_width+" height="+new_height+" constrain average interpolation=Bilinear");
			if(pixelWidth!=1) run("Set Scale...", "distance=1 known="+(pixelWidth*binning)+" pixel=1 unit="+unit+"");
		  saveAs("Tiff", dir2+list[i]);		
		  close();
		   		}
        }
  setBatchMode(false); // runs up to 6 times faster
  run("Image Sequence...", "open=["+dir2+"] sort use");
  //print((getTime()-start)/1000);



}
macro 'Binning Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Binning"); //e.g., put a dialog here
    Dialog.addNumber("Binning :", binning);
    Dialog.addCheckbox("Binning en z", true);
    Dialog.show();
    binning = Dialog.getNumber();
    bz=Dialog.getCheckbox();
    if (bz!=true) binningz=1;
    else binningz=binning;
    

  	}





////////////////////////////////////////////////////////////////label=RingArtefact////////////////////////////////////////////

macro "RingArtefact Action Tool - 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"{
run("8-bit");
getSelectionBounds(x, y, width, height);
if (x==0) waitForUser("Selection", "Faire une selection du centre des Artefacts ");
getSelectionBounds(x, y, width, height);
xcentre=x+(width/2);
ycentre=y+(height/2);
getDimensions(width, height, channels, slices, frames);
BitDepth=bitDepth();
orig_ID=getImageID();
orig_width=width;
orig_height=height;
run("Hyperstack...", "title=RingFiltre type="+BitDepth+"-bit display=Grayscale width="+width+" height="+height+" channels="+channels+" slices="+slices+" frames="+frames+"");
filtre_ID=getImageID();
selectImage(orig_ID);
setBatchMode(true);
for (slice=1; slice<=nSlices; slice++) {
          if (nSlices>1) run("Set Slice...", "slice=" + slice); 
        	run("Polar Transformer", "method=Polar degrees=360 default for");
					rename("Polar");
					run("Stripes Filter", "filter=Wavelet-FFT direction=Vertical types=Daubechies wavelet=DB"+wavelet+" border=[Symmetrical mirroring] image=don't negative decomposition=0:"+decomposition+" damping="+damping+" large=100000000 small=5 tolerance=1 half=100 offset=10");
					run("Polar Transformer", "method=Cartesian degrees=360 default for");
					getDimensions(width, height, channels, slices, frames);
					orig_x=(width/2)-xcentre;
					orig_y=(height/2)-ycentre;
					makeRectangle(orig_x, orig_y, orig_width, orig_height);//pour retrouver les memes dimentions que l image d origine
					run("Crop");
					run("Select All");
					run("Copy");
					close();
					selectImage(filtre_ID);
					if (nSlices>1) run("Set Slice...", "slice=" + slice);
					run("Paste");
					run("Select None");
					selectWindow("Stripe filtered");
					close();
					selectWindow("Polar");
					close();
					selectImage(orig_ID);

}
setBatchMode(false);
selectImage(filtre_ID);
}

macro 'RingArtefact Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Parametres"); //e.g., put a dialog here
    Dialog.addNumber(" W Wavelet de 1 a 43 :", wavelet);
    Dialog.addNumber("L Niveaux Decomposition :", decomposition);
    Dialog.addNumber("G Damping :", damping);
    Dialog.show();
    wavelet = Dialog.getNumber();
    decomposition = Dialog.getNumber();;
    damping = Dialog.getNumber();;;
    

  	}


////////////////////////////////////////////////////////////////label=RingArtefact_test_DB////////////////////////////////////////////
macro "RingArtefact_test_DB Action Tool - C000T4b12W"{

run("8-bit");
getSelectionBounds(x, y, width, height);
if (x==0) waitForUser("Selection", "Faire une selection du centre des Artefacts ");
xcentre=x+(width/2);
ycentre=y+(height/2);
getDimensions(width, height, channels, slices, frames);
BitDepth=bitDepth();
orig_ID=getImageID();
orig_width=width;
orig_height=height;
//setBatchMode(true);
run("Hyperstack...", "title=RingFiltreDB type="+BitDepth+"-bit display=Grayscale width="+width+" height="+height+" channels="+channels+" slices=43 frames="+frames+"");
selectImage(orig_ID);
for (i=1; i<=43; i++) {
          run("Polar Transformer", "method=Polar degrees=360 default for");
					rename("Polar");
					run("Stripes Filter", "filter=Wavelet-FFT direction=Vertical types=Daubechies wavelet=DB"+i+" border=[Symmetrical mirroring] image=don't negative decomposition=0:"+decomposition+" damping="+damping+" large=100000000 small=5 tolerance=1 half=100 offset=10");
					run("Polar Transformer", "method=Cartesian degrees=360 default for");
					getDimensions(width, height, channels, slices, frames);
					orig_x=(width/2)-xcentre;
					orig_y=(height/2)-ycentre;
					makeRectangle(orig_x, orig_y, orig_width, orig_height);
					run("Crop");
					run("Select All");
					run("Copy");
					close();
					selectWindow("RingFiltreDB");
					if (nSlices>1) run("Set Slice...", "slice=" + i);
					run("Paste");
					run("Select None");
					selectWindow("Stripe filtered");
					close();
					selectWindow("Polar");
					close();
					selectImage(orig_ID);
				}


//setBatchMode(false);
}

////////////////////////////////////////////////////////////////label=RingArtefact_test_decomp////////////////////////////////////////////
macro "RingArtefact_test_decomp Action Tool - C000T4b12L"{

run("8-bit");
getSelectionBounds(x, y, width, height);
if (x==0) waitForUser("Selection", "Faire une selection du centre des Artefacts ");
xcentre=x+(width/2);
ycentre=y+(height/2);
getDimensions(width, height, channels, slices, frames);
BitDepth=bitDepth();
orig_ID=getImageID();
orig_width=width;
orig_height=height;
//setBatchMode(true);
run("Hyperstack...", "title=RingFiltreDecomp type="+BitDepth+"-bit display=Grayscale width="+width+" height="+height+" channels="+channels+" slices=20 frames="+frames+"");
selectImage(orig_ID);
for (i=1; i<=20; i++) {
          run("Polar Transformer", "method=Polar degrees=360 default for");
					rename("Polar");
					run("Stripes Filter", "filter=Wavelet-FFT direction=Vertical types=Daubechies wavelet=DB"+wavelet+" border=[Symmetrical mirroring] image=don't negative decomposition=0:"+i+" damping="+damping+" large=100000000 small=5 tolerance=1 half=100 offset=10");
					run("Polar Transformer", "method=Cartesian degrees=360 default for");
					getDimensions(width, height, channels, slices, frames);
					orig_x=(width/2)-xcentre;
					orig_y=(height/2)-ycentre;
					makeRectangle(orig_x, orig_y, orig_width, orig_height);
					run("Crop");
					run("Select All");
					run("Copy");
					close();
					selectWindow("RingFiltreDecomp");
					if (nSlices>1) run("Set Slice...", "slice=" + i);
					run("Paste");
					run("Select None");
					selectWindow("Stripe filtered");
					close();
					selectWindow("Polar");
					close();
					selectImage(orig_ID);
				}


//setBatchMode(false);
}

////////////////////////////////////////////////////////////////label=RingArtefact_test_damp////////////////////////////////////////////

macro "RingArtefact_test_damp Action Tool - C000T4b12G"{

run("8-bit");
getSelectionBounds(x, y, width, height);
if (x==0) waitForUser("Selection", "Faire une selection du centre des Artefacts ");
xcentre=x+(width/2);
ycentre=y+(height/2);
getDimensions(width, height, channels, slices, frames);
BitDepth=bitDepth();
orig_ID=getImageID();
orig_width=width;
orig_height=height;
//setBatchMode(true);
run("Hyperstack...", "title=RingFiltreDamp type="+BitDepth+"-bit display=Grayscale width="+width+" height="+height+" channels="+channels+" slices=40 frames="+frames+"");
selectImage(orig_ID);
for (i=1; i<=40; i++) {
          run("Polar Transformer", "method=Polar degrees=360 default for");
					rename("Polar");
					run("Stripes Filter", "filter=Wavelet-FFT direction=Vertical types=Daubechies wavelet=DB"+wavelet+" border=[Symmetrical mirroring] image=don't negative decomposition=0:"+decomposition+" damping="+i+" large=100000000 small=5 tolerance=1 half=100 offset=10");
					run("Polar Transformer", "method=Cartesian degrees=360 default for");
					getDimensions(width, height, channels, slices, frames);
					orig_x=(width/2)-xcentre;
					orig_y=(height/2)-ycentre;
					makeRectangle(orig_x, orig_y, orig_width, orig_height);
					run("Crop");
					run("Select All");
					run("Copy");
					close();
					selectWindow("RingFiltreDamp");
					if (nSlices>1) run("Set Slice...", "slice=" + i);
					run("Paste");
					run("Select None");
					selectWindow("Stripe filtered");
					close();
					selectWindow("Polar");
					close();
					selectImage(orig_ID);
				}


//setBatchMode(false);
}


macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/PHIV_Tomo_toolset");
}



