// PHIV Matlab Tool Set
// Marc LARTAUD MRI PHIV
// Boite a outils pour l analyse d images multispectrales dans Matlab


/*
Matlab = a partir d une image .lsm choix d un dossier de travail pour matlab copie dedans tous les fichiers
en option choix de l emplacement du dossier de base ou sont tous les scripts matlab
par defaut "D:\\Mes donnees\\matlab\\la base"
Mask = creation d un masque et sauvegarde dans le dossier de travail
//Luminosite Contraste = reglages!
Spectre = mets dans le presse papier les spectres des roi pour les coller dans le fichier spectres.csv
Composite = creation d une image composite des stacks unmix en options le nombre de cannaux
Lut = choix des lut
on peut aussi utiliser stack sorter pour mettre les couches dans l ordre  R G B C M Y




*/

var canaux=5;
     var dCmds = newMenu("Lut Menu Tool",
      newArray("Red","Green", "Blue", "Cyan", "Magenta", "Yellow", "Matlab"));


//macro "Unused Tool-1 - " {}  // laisse une place libre!

var dir="";
var dirbase="D:\\Mes donnees\\matlab\\la base";
var fichier_unmix="unmix_pca.tif";
var lambdas=newArray(0);



macro "LUT_spectrale Action Tool - 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"{

		run("Duplicate...", "duplicate");
		
		lambda_labels();
		 //Array.show(lambdas);
		 run("Make Composite", "display=Composite");
		 n = nSlices;
		for (i=1; i<=n; i++) {
			setSlice(i);
			setMetadata("Label", ""+lambdas[i-1]+"nm");
			lambda_lut(lambdas[i-1]);
			run("Enhance Contrast...", "saturated=0.01");
			
			
		}
		 
		 run("RGB Color");
		 run("Z Project...", "projection=[Max Intensity]");

}
  



macro "Spectre Action Tool - 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"{
	
	if (isOpen("plot_live")){
		selectWindow("plot_live");
		close();
	}
	if (isOpen("Spectre")){
		selectWindow("Spectre");
		close();
	}
	
	
	lambda_labels();
	run("Plot Z-axis Profile");
	rename("plot_live");
	Plot.getValues(xpoints, ypoints);
	maxInts= Array.findMaxima(ypoints, 10);
	Array.show(maxInts);
	
	leg="{";
	for (i=0;i<xpoints.length;i++){
			leg=leg+lambdas[i]+",";
		}
	leg=leg+"}";
	Plot.create("Spectre",leg, "Y-axis Label",ypoints );
	Plot.getLimits(xMin, xMax, yMin, yMax);
	
	for (i=0;i<maxInts.length;i++){
		print (maxInts[i]/lambdas.length);
		Plot.addText(lambdas[maxInts[i]], maxInts[i]/lambdas.length, 1-(ypoints[maxInts[i]]/yMax));
	}
	Plot.update();

}



macro "ROI_add Action Tool - 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"{

roiManager("Add");

}



macro "Unmixing Action Tool - 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"{

run("PoissonNMF ");


}



////////////////////////////////////////////////////////////////label=Composite////////////////////////////////////////////

macro "myTool Action Tool - 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"{

if (isOpen("NMF sources")) selectWindow("NMF sources");
else exit("Pa s encore unmixer!");
run("Make Composite", "display=Composite");
n = nSlices;
setSlice(1);
run("Blue");
setSlice(n);
run("Red");
for (i=1;i<nSlices+1;i++){
	setSlice(i);
	run("Enhance Contrast", "saturated=0.3");
}
run("Channels Tool...");
run("Brightness/Contrast...");

}







macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/PHIV_Unmix_toolset.txt");
}



function lambda_lut(lambda){

		if((lambda >= 380) && (lambda < 440)){
		redFactor = -(lambda - 440) / (440 - 380);
		greenFactor = 0.0;
		blueFactor = 1.0;
		}

		//440-489 nm colorization
		else if((lambda >= 440) && (lambda < 490)){
		redFactor = 0.0;
		greenFactor = (lambda - 440) / (490 - 440);
		blueFactor = 1.0;
		}
		//490-509 nm colorization
		else if((lambda >= 490) && (lambda < 510)){
		redFactor = 0.0;
		greenFactor = 1.0;
		blueFactor = -(lambda - 510) / (510 - 490);
		}
		//510-579 nm colorization
		else if((lambda >= 510) && (lambda < 580)){
		redFactor = (lambda - 510) / (580 - 510);
		greenFactor = 1.0;
		blueFactor = 0.0;
		}

		//580-644 nm colorization
		else if((lambda >= 580) && (lambda < 645)){
		redFactor = 1.0;
		greenFactor = -(lambda - 645) / (645 - 580);
		blueFactor = 0.0;
		}

		//645-780 nm colorization
		else if((lambda >= 645) && (lambda <= 780)){
		redFactor = 1.0;
		greenFactor = 0.0;
		blueFactor = 0.0;
		}
		//all other lambdas, including outside of VIS range, default to black
		else if((lambda < 380) || (lambda > 780)){
		redFactor = 0.0;
		greenFactor = 0.0;
		blueFactor = 0.0;
		}
		//unintelligible lambdas (e.g. transmitted channel) white if flagged so at top of macro...
		else if(nonLambdaChannelsWhite){
		redFactor = 1.0;
		greenFactor = 1.0;
		blueFactor = 1.0;
		}
		else{
		redFactor = 0.0;
		greenFactor = 0.0;
		blueFactor = 0.0;
		}

		// Let the intensity fall off near the vision limits
		if((lambda >=380) && (lambda < 420)){
		masterFactor = 0.3 + 0.7*(lambda - 380) / (420 - 380);
		}
		else if((lambda >= 701) && (lambda <=780)){
		masterFactor = 0.3 + 0.7*(780 - lambda) / (780 - 700);
		}
		else if((lambda >= 420) && (lambda <= 700)){
		masterFactor = 1.0;
		}
		else{
		masterFactor = 1.0;
		}

		maxRed = redFactor * masterFactor;
		maxGreen = greenFactor * masterFactor;
		maxBlue = blueFactor * masterFactor;

		//arrays for LUT
		redArray = initializeArray(maxRed);  //initializeArray is defined below
		greenArray = initializeArray(maxGreen);
		blueArray = initializeArray(maxBlue);
		setLut(redArray, greenArray, blueArray);

}


function initializeArray(max)
{
array = newArray(256);
for(i = 0; i <= 255; i++){
array[i] = i * max;
}

return array;
}

function lambda_labels(){
	lambdas=newArray(0);
	infos=getMetadata("Info");
		lines=split(infos, "\n");
		for (i=0; i<lengthOf(lines); i++){
		if (startsWith(lines[i], "Information|Image|Channel|Name #")) { 
			tab=split(lines[i], "#");
			tab2=split(tab[1], "=");
			lambdas=Array.concat(lambdas,parseInt(tab2[1])) ;
			}
		 }
	} 

