// PHIV Video Tool Set
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter l exploitation des videos

/*
Outils:
Ouverture des videos dans ImageJ
	"Use virtual stack" prend moins de place en memoire mais certaines operations impossibles comme le crop


Outil VideoCrop pour ne garder que la selection (ou toute l image si pas de selection)
avec une image toutes les "z"
clic droit sur l outil pour changer le pas en z

Pour ne garder qu un bout de film on peut dupliquer le stack de l image x a l image y

Tampon pour ajouter un tampon choisi en option (clic droit) en bas de chaque image

Sauvegarde des videos dans ImageJ
 Frame rate = nombre d images a la seconde
 container format .avi ou .mov
 using codec wmv pour windows et mpeg4 pour Mac
 video quality excellent
 custom bitrate par defaut
 
Capture Screen pour capturer en video un partie de l ecran
 
 ConvertBatch convertit tous les fichiers .mov d un repertoire en .avi 
 et tous les .avi en .mov
clic droit sur l outil pour changer le nombre d images par seconde (frame)

Installation:
Recuperrer de Fiji 
	plugins/FFMPEG_IO.jar a mettre dans ImageJ/plugin
	creer lib/win64 a la racine d imagej et y mettre  lib/win64/ffmpeg.dll
	
	mettre dans /macros/bin
	ffmpeg.exe
	libmp3lame-0.dll
	xvidcore.dll
	(Pazera free Mov to avi)
	

Copier phiv.gif dans \ImageJ\macros\toolsets

Installer la bonne version de SaveAsMovie
https://sites.google.com/site/qingzongtseng/save-as-movie

Video format suggestion
In general, if you have 3rd-party video player like VLC or mPlayer, all the provided codecs/ formats should be readable. 
For default system media player (Windows Media Player / Quicktime), WMV will be the safest format for window system 
and MPEG4 in mov should work for Macintosh.
About the video quality option, it is basically determined by the bitrate. 
If the preset doesn't give satisfactory quality, 
you can try to select the custom option and put in desired bitrate for video encoding (the higher the better qualty). 











*/


var frame=15;
var nbframe=30;
//var SetCompression="(0x64697663,0,10000,0)";
//var SetCompData="(4,\"Y29scg==\")";

macro "Unused Tool-1 - " {}  // laisse une place libre!
var tamponpath=getDirectory("macros")+"toolsets\\phiv.gif";



////////////////////////////////////////////////////////////////Ouvrir////////////////////////////////////////////
//macro "Ouvrir Action Tool - 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"{
macro "Ouvrir Action Tool - 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"{

run("Movie (FFMPEG)...");

}

// ffmpeg 
//exec("cmd", "/c","start", "D:/ffmpeg.exe","-y","-i","D:/test.mov","-vcodec","huffyuv","","-b","500k","-an","","D:/test.avi");

//Virtualdub --> uncompresse



////////////////////////////////////////////////////////////////Decompression////////////////////////////////////////////
macro "Decompression Action Tool - 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"{



filepath=File.openDialog("Select a File"); 
filepathuncompress=substring(filepath,0,indexOf(filepath,"."));
filepathffmpeg=filepathuncompress+"ffmpeg.avi";
filepathuncompress=filepathuncompress+"uncompress.avi";
dirmacro=getDirectory("macros");
dirbin=dirmacro+"bin\\";
//exec("cmd", "/c","start", "D:/ffmpeg.exe","-y","-i","D:/test.mov","-vcodec","huffyuv","","-b","500k","-an","","D:/test.avi");

exec("cmd", "/c","start", dirbin+"ffmpeg.exe","-y","-i",filepath,"-vcodec","huffyuv","","-b","500k","-an",filepathffmpeg);
wait_recursif(filepathffmpeg);



 // Close "Log" window
  if (isOpen("Log")) {
      selectWindow("Log");
      run("Close");
  }
print ("VirtualDub.audio.SetSource(0);");
print ("VirtualDub.audio.SetMode(0);");
print ("VirtualDub.audio.SetInterleave(1,500,1,0,0);");
print ("VirtualDub.audio.SetClipMode(1,1);");
print ("VirtualDub.audio.SetConversion(0,0,0,0,0);");
print ("VirtualDub.audio.SetVolume();");
print ("VirtualDub.audio.SetCompression();");
print ("VirtualDub.audio.EnableFilterGraph(0);");
print ("VirtualDub.video.SetInputFormat(0);");
print ("VirtualDub.video.SetOutputFormat(7);");
print ("VirtualDub.video.SetMode(3);");
print ("VirtualDub.video.SetSmartRendering(0);");
print ("VirtualDub.video.SetPreserveEmptyFrames(0);");
print ("VirtualDub.video.SetFrameRate2(0,0,1);");
print ("VirtualDub.video.SetIVTC(0, 0, 0, 0);");
print ("VirtualDub.video.SetCompression();");
print ("VirtualDub.video.filters.Clear();");
print ("VirtualDub.audio.filters.Clear();");
print ("VirtualDub.subset.Clear();");
print ("VirtualDub.subset.AddRange(0,2991);");
print ("VirtualDub.video.SetRange();");
print ("VirtualDub.project.ClearTextInfo();");
print ("VirtualDub.Open(U\""+filepathffmpeg+"\");");
print ("VirtualDub.SaveAVI(U\""+filepathuncompress+"\");");
selectWindow("Log"); 
saveAs("Text", dirbin+"scriptvirtualdub.txt");
command=dirbin+"vdub.exe /s "+dirbin+"scriptvirtualdub.txt";
exec(command);
//print (command);
wait_recursif(filepathuncompress);
open(filepathuncompress);
}












////////////////////////////////////////////////////////////////Tampon PHIV////////////////////////////////////////////
macro "Tampon Action Tool - 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"{

taille_video();
OrigID=getImageID();
open(tamponpath);
getDimensions(width, height, channels, slices, frames);
tampon_width=width;
tampon_height=height;
run("Select All");
run("Copy");
close();
selectImage(OrigID);
if(nSlices>1) run("Set Slice...", "slice=1");
for(i=0;i<nSlices;i++){
	makeRectangle((getWidth()-tampon_width), (getHeight()- tampon_height), tampon_width, tampon_height);
	run("Paste");
	if(nSlices>1) run("Next Slice [>]");
}
run("Select None");	
if(nSlices>1) run("Set Slice...", "slice=1");

}

macro 'Tampon Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    tamponpath=File.openDialog("Select a File"); 

    

  	}


////////////////////////////////////////////////////////////////Text PHIV////////////////////////////////////////////

macro "Txt Action Tool - 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"{

			setTool("text");
			title = "Text";
			msg = "Tapez le text et positionnez le";
			waitForUser(title, msg);
			run("Draw", "stack");
			run("Set Slice...", "slice=1");
			run("Select None");

}


////////////////////////////////////////////////////////////////video save jpeg avi////////////////////////////////////////////



macro "Microsoft_Wmv_Save Action Tool - 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"{

 Dialog.create("Nombre de frame");
	  Dialog.addMessage("Nombre d images par seconde");
    Dialog.addNumber("Nombre de frame:", nbframe);
    Dialog.show();
    nbframe=Dialog.getNumber();

run("Save as Movie", "frame="+nbframe+" container=.avi using=WMV7 video=excellent save");
//run("Save as Movie");
/*taille_video();
run("AVI... ", "frame="+frame+" save");*/

}	

macro "MP4 Action Tool - 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"{

filepath=File.openDialog("Select a File"); 
prefix=substring(filepath,0,indexOf(filepath,"."));
//filepathffmpeg=filepathuncompress+"ffmpeg.avi";
//filepathmp4=prefix+".mp4";
filepathmov=prefix+"_mac.mov";
filepathavi=prefix+"_pv.avi";
dirmacro=getDirectory("macros");
dirbin=dirmacro+"bin\\";
print("\\Clear"); 

/*Defaults and ranges:
Contrast -2.0 to 2.0, default 0 (but I think it is default 1)
Brightness -2.0 to 2.0, default 0
Saturation 0 to 3, default 1
Gamma 0 to 10, default 1
Gamma r 0 to 10, default 1
Gamma g 0 to 10, default 1
Gamma b 0 to 10, default 1
ffmpeg -i test.m2ts -vf eq=1:0:1:1:1:1:1:1 foo.mp4 makes no changes
*/


//command=dirbin+"ffmpeg -i "+filepath+" -c:v libx264 -preset slow -crf 20 -c:a copy "+filepathmp4;
//command=dirbin+"ffmpeg -i "+filepath+" -vf \"eq=1.2:0:1:1:1:1:1:1\" -c:v libx264 -preset slow -crf 20 -c:a copy "+filepathmov;
command=dirbin+"ffmpeg -i "+filepath+" -c:v libx264 -preset slow -crf 20 -c:a copy "+filepathmov;
//exec(command);
print (command);
/*
//command=ffmpeg -i total.avi  -q:a 2 -q:v 4 -vcodec wmv2 -acodec wmav2 total2.avi
command=dirbin+"ffmpeg -i "+filepath+" -q:a 2 -q:v 4 -vcodec wmv2 -acodec wmav2 "+filepathavi;
//exec(command);
print (command);
*/
waitForUser("Conversion via FFMPEG", "Fermer la fenetre de commande une fois la conversion terminee");
selectWindow("Log");//sauvegarder en .bat
		saveAs("Text",dirbin+"cmd.txt");
		if (File.exists(dirbin+"cmd.bat")) File.delete(dirbin+"cmd.bat");
        File.rename(dirbin+"cmd.txt",dirbin+"cmd.bat");
		exec("cmd", "/c", "start", dirbin+"cmd.bat");
		



//wait_recursif(filepathmp4);
print("ok");

exit();
/*commande ffmepg libmp3lame-0
ffmpeg -i video.avi -c:v libx264 -preset slow -crf 20 -c:a copy video.mp4*/


//https://www.ffmpeg.org/ffmpeg.html

}
macro "HTML5 Action Tool - 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"{

filepath=File.openDialog("Select a File"); 
prefix=substring(filepath,0,indexOf(filepath,"."));

filepathmp4=prefix+".mp4";
filepathogv=prefix+".ogv";
filepathwebm=prefix+".webm";

dirmacro=getDirectory("macros");
dirbin=dirmacro+"bin\\";
print("\\Clear"); 

/*
ffmpeg -i ma_video.avi -vcodec libx264 ma_video.mp4
ffmpeg -i ma_video.avi -vcodec libtheora ma_video.ogv
ffmpeg -i ma_video.avi -b 1000k ma_video.webm
*/
command1=dirbin+"ffmpeg -i "+filepath+" -vcodec libx264 "+filepathmp4;
command2=dirbin+"ffmpeg -i "+filepath+" -vcodec libtheora "+filepathogv;
command3=dirbin+"ffmpeg -i "+filepath+" -b 1000k "+filepathwebm;


print (command1);
print (command2);
print (command3);

waitForUser("Conversion via FFMPEG", "Fermer la fenetre de commande une fois la conversion terminee");
selectWindow("Log");//sauvegarder en .bat
		saveAs("Text",dirbin+"cmd.txt");
		if (File.exists(dirbin+"cmd.bat")) File.delete(dirbin+"cmd.bat");
        File.rename(dirbin+"cmd.txt",dirbin+"cmd.bat");
		exec("cmd", "/c", "start", dirbin+"cmd.bat");

print("ok");
/*print("Code HTML5");
print("<video width=\"572\" height=\"316\" controls>");
print("<source src=\"../download/videos/"+filepathmp4+"\" type=\"video/mp4\" /> ");
print("<source src=\"../download/videos/"+filepathwebm+"\" type=\"video/webm\" /> ");
print("<source src=\"../download/videos/"+filepathogv+"\" type=\"video/ogg\" /> ");
print("</video> ");*/
  

exit();
}


////////////////////////////////////////////////////////////////Virtual dub Save////////////////////////////////////////////
macro "Compression Action Tool - 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"{



filepath=File.openDialog("Select a File"); 
filepathcompress=substring(filepath,0,indexOf(filepath,"."));
//filepathffmpeg=filepathuncompress+"ffmpeg.avi";
filepathcompress=filepathcompress+"compress.avi";
dirmacro=getDirectory("macros");
dirbin=dirmacro+"bin\\";




 // Close "Log" window
  if (isOpen("Log")) {
      selectWindow("Log");
      run("Close");
  }
print ("VirtualDub.audio.SetSource(0);");
print ("VirtualDub.audio.SetMode(0);");
print ("VirtualDub.audio.SetInterleave(1,500,1,0,0);");
print ("VirtualDub.audio.SetClipMode(1,1);");
print ("VirtualDub.audio.SetConversion(0,0,0,0,0);");
print ("VirtualDub.audio.SetVolume();");
print ("VirtualDub.audio.SetCompression();");
print ("VirtualDub.audio.EnableFilterGraph(0);");
print ("VirtualDub.video.SetInputFormat(0);");
print ("VirtualDub.video.SetOutputFormat(7);");
print ("VirtualDub.video.SetMode(3);");
print ("VirtualDub.video.SetSmartRendering(0);");
print ("VirtualDub.video.SetPreserveEmptyFrames(0);");
print ("VirtualDub.video.SetFrameRate2(0,0,1);");
print ("VirtualDub.video.SetIVTC(0, 0, 0, 0);");
print ("VirtualDub.video.SetCompression(0x6376736d,0,10000,0);");
print ("VirtualDub.video.SetCompData(4,\"SwAAAA==\");");
print ("VirtualDub.video.filters.Clear();");
print ("VirtualDub.audio.filters.Clear();");
print ("VirtualDub.subset.Clear();");
print ("VirtualDub.subset.AddRange(0,75);");
print ("VirtualDub.video.SetRange();");
print ("VirtualDub.project.ClearTextInfo();");
print ("VirtualDub.Open(U\""+filepath+"\");");
print ("VirtualDub.SaveAVI(U\""+filepathcompress+"\");");
selectWindow("Log"); 
saveAs("Text", dirbin+"scriptvirtualdubre.txt");
command=dirbin+"vdub.exe /s "+dirbin+"scriptvirtualdubre.txt";
exec(command);
//print (command);
wait_recursif(filepathcompress);
print("ok");
//open(filepathuncompress);
}


macro "Capture_Screen Action Tool - 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"{

run("Capture Screen Plugin");

}    








////////////////////////////////////////////////////////////////label=ConvertBatch////////////////////////////////////////////

/*commande ffmepg libmp3lame-0
ffmpeg -i video.avi -c:v libx264 -preset slow -crf 20 -c:a copy video.mp4*/

macro "ConvertBatch Action Tool - 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"{

dir1 = getDirectory("Choix du Répertoire Source ");
list = getFileList(dir1);
dir2 = getDirectory("Choix du Répertoire Cible ");	
//setBatchMode(true);
      for (i=0; i<list.length; i++) {
          showProgress(i+1, list.length);
           if (endsWith(list[i], '.mov')){
           	run("Movie (FFMPEG)...", "choose=["+dir1+list[i]+"] use_virtual_stack first_frame=0 last_frame=-1");
           	fichier=substring(list[i],0,indexOf(list[i],".mov"));
           	run("Save as Movie", "frame="+nbframe+" container=.avi using=WMV7 video=excellent save="+dir2+fichier+".avi");
           	close();
          }
          if (endsWith(list[i], '.avi')){
           	run("Movie (FFMPEG)...", "choose=["+dir1+list[i]+"] use_virtual_stack first_frame=0 last_frame=-1");
           	fichier=substring(list[i],0,indexOf(list[i],".avi"));
           	run("Save as Movie", "frame="+nbframe+" container=.mov using=MPEG4 video=excellent save="+dir2+fichier+".mov");
           	close();
          }
        }
           

}



macro 'ConvertBatch Action Tool Options'  {
	  Dialog.create("Nombre de frame");
	  Dialog.addMessage("Nombre d images par seconde");
    Dialog.addNumber("Nombre de frame:", nbframe);
    Dialog.show();
    nbframe=Dialog.getNumber();
    

}



//////////////////////////////////////////////////////////?//////////////////////////////////


macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/PHIV_Video_toolset.txt");
}	
	


///////////////////////Fonctions////////////////


function	wait_recursif (path){
	if (!File.exists(path)){
		 wait (5000);
		 wait_recursif (path);
		}
		//else open (path);
}
	

function taille_video(){
	getDimensions(width, height, channels, slices, frames);
	if (width>2048||height>2048){
	
		if (width>height )run("Size...", "width=2048 height=560 constrain average interpolation=Bilinear");
		if (width<=height )run("Size...", "width="+(width*(2048/height))+"    height=2048 constrain average interpolation=Bilinear");
	}
	getDimensions(width, height, channels, slices, frames);
	width=width-(width%16);
	height=height-(height%16);
	makeRectangle(0, 0, width, height);
	run("Crop");
}	
	
