// PHIV Zoomify Tool Set
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter l export des fichiers ndpi issu du nanozoomer pour les mettre en Zoomify

// installer loci bio formats
//http://www.loci.wisc.edu/files/software/loci_tools.jar



/*
Outil Ndpi : Pour previsualuser le contenu d un fichier Ndpi a faible resolution (serie4)

Outi CropLoci : Pour extraire au format tiff et a la resolution choisie (serie de 1 a 3)
	une zone selectionnee sur la previsualisation via l outil Ndpi
	Option clic droit pour le choix de la resolution



*/

//variables glogales
var path="";
var pathsansext="";
var FacteurMultiplicatif=0;
var NomImage="nom d image";
var numserie=1;
var numserie_crop=1;
var dir_zoom_image="E:\\Mes donnees\\www\\phiv\\zoom\\images\\";
var POIVISIBILITY=1;
var LABELVISIBILITY=1;
var NOTEVISIBILITY=1;
var POI_NAME="";
var NOTE_NAME="";
var LABELS_NAME="";

var IDlab=0;
var interval=10;
var CAPTION=1;
var TOOLTIP=1;
var TEXTCOLOR="Blanc";
var BACKCOLOR="Noir";
var LINECOLOR="Blanc";
var FILLCOLOR="Blanc";
var TEXTVISIBLE="1";
var BACKVISIBLE="1";
var LINEVISIBLE="1";
var FILLVISIBLE="1";
//crop
var taille_crop=10; // mini en cm²
var filtre_crop=5;
var enlarge_crop=5;
var SX=newArray (1);
var SY=newArray (1);
var tabIndexScenes=newArray (1);
var seriesCount=0;
var autocrop=true;

var couleur_rgb=newArray("Blanc","Noir","Rouge","Vert","Bleu","Magenta","Jaune","Cyan");
var couleur_hex=newArray("ffffff","000000","ff0000","00ff00","0000ff","ff00ff","ffff00","00ffff");

var dir_toolset=getDirectory("macros")+"toolsets\\";

macro "AutoRun"{
	setTool("rectangle");
	setForegroundColor(255, 255, 255);//premier plan blanc
	setBackgroundColor(0,0,0);// fond noir
	run("Set Measurements...", "area shape display redirect=None decimal=3");
	requires("1.49p");
}


////////////////////////////////////////////////////////////////label=crop////////////////////////////////////////////
macro "CropLoci Action Tool - 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"{

list = getList("image.titles");
if (list.length==0){
	path = File.openDialog("Choose a file");
	if (endsWith(path, "ndpi")) pathsansext=substring(path,0,indexOf(path,".ndpi"));
	if (endsWith(path, "czi")) pathsansext=substring(path,0,indexOf(path,".czi"));
	NomImage=File.getName(path);
	Bio_meta(path);

	Array.show("Dimensions", SX, SY);
	Array.show(tabIndexScenes);

	for (i=1;i<tabIndexScenes.length;i++){
	if ((tabIndexScenes[i]-tabIndexScenes[i-1])>2) {
		run("Bio-Formats Importer", "open=["+path+"] color_mode=Default view=Hyperstack stack_order=XYCZT series_"+(tabIndexScenes[i]-1));
		Hyper2RGB();
		rename("scene_"+tabIndexScenes[i]-1);
		}
	}
}
waitForUser("Faire une Selection");
getSelectionBounds(x, y, width, height);
num_serie=parseInt(replace(getTitle(),"scene_",""));
print (num_serie);
print (SX[num_serie]);
serie_max=0;
for (i=1;i<tabIndexScenes.length;i++){
	if (tabIndexScenes[i]>num_serie) {
		serie_max=tabIndexScenes[i-1];
		i=tabIndexScenes.length;
		}
}
print (serie_max);
print (SX[serie_max]);

FacteurMultiplicatif= SX[serie_max]/SX[num_serie];
x=(FacteurMultiplicatif)*x;
y=(FacteurMultiplicatif)*y;
width=(FacteurMultiplicatif)*width;
height=(FacteurMultiplicatif)*height;


if (width*height < 2000000000 && width<64000 && height<64000){
	run("Bio-Formats Importer", "open=["+path+"] color_mode=Default crop view=Hyperstack stack_order=XYCZT series_"+serie_max+" x_coordinate_"+serie_max+"="+x+" y_coordinate_"+serie_max+"="+y+" width_"+serie_max+"="+width+" height_"+serie_max+"="+height+"");
	Hyper2RGB();
	}
	else {
		print (width);
		print (height);	
		print ("Taille trop grande");
	}
}


macro 'CropLoci Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    
  	}

////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

macro "PNG Action Tool - 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"{

index=0;
if (bitDepth() != 8) run("8-bit Color", "number=256");
waitForUser("noter l index a mettre en transparence");
Dialog.create("png");
Dialog.addSlider("Index transparence", 0, 255, index);
Dialog.show() ;
index=Dialog.getNumber() ;
  call("ij.Prefs.setTransparentIndex", 1);
  saveAs("PNG"); 


}
//////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

macro "Reduction Action Tool - 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"{

run("Size...", "width=324 constrain average interpolation=Bilinear");
//saveAs("Jpeg", dir_zoom_image+getTitle()+".jpg");




}






macro "Zoom_to Action Tool - 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"{
Dialog.create("Zoom to"); 
Dialog.addNumber("X:", 0);
Dialog.addNumber("Y:", 0);
Dialog.addNumber("ZOOM:", 100);
Dialog.show();
Xz=Dialog.getNumber();
Yz=Dialog.getNumber();
Zz=Dialog.getNumber();
run("Set... ", "zoom="+Zz+" x="+Xz+" y="+Yz+"");
getDisplayedArea(x, y, width, height);
run("Set... ", "zoom="+Zz+" x="+Xz+(width/2)+" y="+Yz+(height/2)+"");
/*run("Specify...", "width=500 height=500 x="+Xz+" y="+Yz+" centered");
run("To Selection");
run("Select None");*/

}

////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
macro "PixPerUnit Action Tool - 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"{

getPixelSize(unit, pixelWidth, pixelHeight);
print("\\Clear");
print("&zPixelsPerUnit="+(1/pixelWidth));
String.copy(getInfo("log"));


}

/////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
macro "Texte_zoomy Action Tool - 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"{


print("\\Clear");

getSelectionCoordinates(xpoints, ypoints);
X=xpoints[0];
Y=ypoints[0];

Dialog.create("Parametres annotations"); 
	Dialog.addString("NAME :", "",50);
	Dialog.addNumber("ZOOM:", 100);
	Dialog.addString("CAPTION :", "",50);
		Dialog.addMessage("Couleurs");
	Dialog.addCheckbox("Couleur du texte :", TEXTVISIBLE);
	Dialog.addChoice("", couleur_rgb, TEXTCOLOR);//Dialog.addString("", TEXTCOLOR);
	
	Dialog.addCheckbox("Couleur du bord du texte :", BACKVISIBLE);
	Dialog.addChoice("", couleur_rgb, BACKCOLOR);
	
	Dialog.addCheckbox("Couleur de la bordure :", LINEVISIBLE);
	Dialog.addChoice("", couleur_rgb, LINECOLOR);
	
	Dialog.addCheckbox("Couleur de remplissage :", FILLVISIBLE);
	Dialog.addChoice("", couleur_rgb, FILLCOLOR);
	Dialog.show();
	NAME=Dialog.getString();
	ZOOM=Dialog.getNumber();
	CAPTION=Dialog.getString();
	TEXTCOLOR=Dialog.getChoice();
	TEXTVISIBLE=Dialog.getCheckbox();
	BACKCOLOR=Dialog.getChoice();
	BACKVISIBLE=Dialog.getCheckbox();
	LINECOLOR=Dialog.getChoice();
	LINEVISIBLE=Dialog.getCheckbox();
	FILLCOLOR=Dialog.getChoice();
	FILLVISIBLE=Dialog.getCheckbox();
	
	
print("<LABEL ");
				print("ID=\""+parseInt(random*10000)+"\" ");
				print("NAME=\""+NAME+"\" ");
				print("MEDIATYPE=\"icon\"");
				print("MEDIA=\"\"");
				print("X=\""+X+"\" ");
				print("Y=\""+Y+"\" ");
				print("ZOOM=\""+ZOOM+"\" ");
				print("XSCALE=\"100\" ");
				print("YSCALE=\"100\" ");
				print("CLICKURL=\"\" ");
				print("URLTARGET=\"_blank\" ");
				print("ROLLOVER=\"0\" ");
				print("CAPTION=\""+CAPTION+"\" ");
				print("TOOLTIP=\""+CAPTION+"\" ");
				print("TEXTCOLOR=\""+couleur_cherche(TEXTCOLOR)+"\" ");
				print("BACKCOLOR=\""+couleur_cherche(BACKCOLOR)+"\"");
				print("LINECOLOR=\""+couleur_cherche(LINECOLOR)+"\" ");
				print("FILLCOLOR=\""+couleur_cherche(FILLCOLOR)+"\"");
				print("TEXTVISIBLE=\""+TEXTVISIBLE+"\" ");
				print("BACKVISIBLE=\""+BACKVISIBLE+"\"");
				print("LINEVISIBLE=\""+LINEVISIBLE+"\" ");
				print("FILLVISIBLE=\""+FILLVISIBLE+"\"");
				print("CAPTIONPOSITION=\"5\" >");
			print("</LABEL>");
RoiAdd(NAME);
log2clipboard();
}


////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

macro "Fleche_zoomy Action Tool - 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"{



print("\\Clear");

getSelectionCoordinates(xpoints, ypoints);
X=xpoints[0];
Y=ypoints[0];

Dialog.create("Parametres annotations"); 
	Dialog.addString("NAME :", "",50);
	Dialog.addNumber("ZOOM:", 100);
	Dialog.addString("CAPTION :", "",50);
		Dialog.addMessage("Couleurs");
	Dialog.addCheckbox("Couleur du texte :", TEXTVISIBLE);Dialog.addChoice("", couleur_rgb, TEXTCOLOR);//Dialog.addString("", TEXTCOLOR);
	
	Dialog.addCheckbox("Couleur du bord du texte :", BACKVISIBLE);Dialog.addChoice("", couleur_rgb, BACKCOLOR);
	
	Dialog.addCheckbox("Couleur de la bordure :", LINEVISIBLE);Dialog.addChoice("", couleur_rgb, LINECOLOR);
	
	Dialog.addCheckbox("Couleur de remplissage :", FILLVISIBLE);Dialog.addChoice("", couleur_rgb, FILLCOLOR);
	Dialog.show();
	NAME=Dialog.getString();
	ZOOM=Dialog.getNumber();
	CAPTION=Dialog.getString();
	TEXTCOLOR=Dialog.getChoice();
	TEXTVISIBLE=Dialog.getCheckbox();
	BACKCOLOR=Dialog.getChoice();
	BACKVISIBLE=Dialog.getCheckbox();
	LINECOLOR=Dialog.getChoice();
	LINEVISIBLE=Dialog.getCheckbox();
	FILLCOLOR=Dialog.getChoice();
	FILLVISIBLE=Dialog.getCheckbox();
	
	IDlab++;
	
print("<LABEL ");
				print("ID=\""+parseInt(random*10000)+"\" ");
				print("NAME=\""+NAME+"\" ");
				print("MEDIATYPE=\"icon\"");
				print("MEDIA=\"images/fleche.png\" ");
				print("X=\""+X+80+"\" ");
				print("Y=\""+Y+27+"\" ");
				print("ZOOM=\""+ZOOM+"\" ");
				print("XSCALE=\"100\" ");
				print("YSCALE=\"100\" ");
				print("CLICKURL=\"\" ");
				print("URLTARGET=\"_blank\" ");
				print("ROLLOVER=\"0\" ");
				print("CAPTION=\""+CAPTION+"\" ");
				print("TOOLTIP=\""+CAPTION+"\" ");
				print("TEXTCOLOR=\""+couleur_cherche(TEXTCOLOR)+"\" ");
				print("BACKCOLOR=\""+couleur_cherche(BACKCOLOR)+"\"");
				print("LINECOLOR=\""+couleur_cherche(LINECOLOR)+"\" ");
				print("FILLCOLOR=\""+couleur_cherche(FILLCOLOR)+"\"");
				print("TEXTVISIBLE=\""+TEXTVISIBLE+"\" ");
				print("BACKVISIBLE=\""+BACKVISIBLE+"\"");
				print("LINEVISIBLE=\""+LINEVISIBLE+"\" ");
				print("FILLVISIBLE=\""+FILLVISIBLE+"\"");
				print("CAPTIONPOSITION=\"8\" >");
			print("</LABEL>");

RoiAdd(NAME);
log2clipboard();
}


////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

macro "Polygone_zoomy Action Tool - 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"{



print("\\Clear");
run("Interpolate", "interval="+interval+" smooth adjust");
getSelectionCoordinates(xpoints, ypoints);
run("Set Measurements...", "area mean center feret's limit display redirect=None decimal=9");
		List.setMeasurements;
		XM=List.getValue("XM");
		YM=List.getValue("YM");
Dialog.create("Parametres annotations"); 
	Dialog.addString("NAME :", "",50);
	Dialog.addNumber("ZOOM:", 100);
	Dialog.addString("CAPTION :", "",50);
	Dialog.addMessage("Couleurs");
	Dialog.addCheckbox("Couleur du texte :", TEXTVISIBLE);Dialog.addChoice("", couleur_rgb, TEXTCOLOR);//Dialog.addString("", TEXTCOLOR);
	
	Dialog.addCheckbox("Couleur du bord du texte :", BACKVISIBLE);Dialog.addChoice("", couleur_rgb, BACKCOLOR);
	
	Dialog.addCheckbox("Couleur de la bordure :", LINEVISIBLE);Dialog.addChoice("", couleur_rgb, LINECOLOR);
	
	Dialog.addCheckbox("Couleur de remplissage :", FILLVISIBLE);Dialog.addChoice("", couleur_rgb, FILLCOLOR);
	Dialog.show();
	NAME=Dialog.getString();
	ZOOM=Dialog.getNumber();
	CAPTION=Dialog.getString();
	TEXTCOLOR=Dialog.getChoice();
	TEXTVISIBLE=Dialog.getCheckbox();
	BACKCOLOR=Dialog.getChoice();
	BACKVISIBLE=Dialog.getCheckbox();
	LINECOLOR=Dialog.getChoice();
	LINEVISIBLE=Dialog.getCheckbox();
	FILLCOLOR=Dialog.getChoice();
	FILLVISIBLE=Dialog.getCheckbox();



print("<LABEL ");
				print("ID=\""+parseInt(random*10000)+"\" 	");
				print("NAME=\""+NAME+"\" ");
				print("MEDIATYPE=\"polygon\"");
				print("MEDIA=\"polygon\" ");
				print("X=\""+XM+"\" ");
				print("Y=\""+YM+"\"  ");
				print("ZOOM=\""+ZOOM+"\" ");
				print("XSCALE=\"100\" ");
				print("YSCALE=\"100\" ");
				print("URL=\"\" ");
				print("URLTARGET=\"_blank\" ");
				print("ROLLOVER=\"0\" ");
				print("CAPTION=\""+CAPTION+"\" ");
				print("TOOLTIP=\""+CAPTION+"\" ");
				print("TEXTCOLOR=\""+couleur_cherche(TEXTCOLOR)+"\" ");
				print("BACKCOLOR=\""+couleur_cherche(BACKCOLOR)+"\"");
				print("LINECOLOR=\""+couleur_cherche(LINECOLOR)+"\" ");
				print("FILLCOLOR=\""+couleur_cherche(FILLCOLOR)+"\"");
				print("TEXTVISIBLE=\""+TEXTVISIBLE+"\" ");
				print("BACKVISIBLE=\""+BACKVISIBLE+"\"");
				print("LINEVISIBLE=\""+LINEVISIBLE+"\" ");
				print("FILLVISIBLE=\""+FILLVISIBLE+"\"");
				print("CAPTIONPOSITION=\"5\" >");
					
					print("<POLYGON>");
					for(j=0;j<xpoints.length;j++){
					print ("<POINT X=\""+ parseInt(xpoints[j])+"\"   Y=\""+ parseInt(ypoints[j])+"\"   ></POINT>");
					}
					print("</POLYGON>");
			print("</LABEL>	");	
RoiAdd(NAME);
log2clipboard();
}

macro 'Polygone_zoomy Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    Dialog.create("Interval entre Points"); //e.g., put a dialog here
	Dialog.addSlider("Interval:", 1, 400, interval);
    Dialog.show();
    interval = Dialog.getNumber();
  	}

	
	
////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
macro "ZAS Action Tool - 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"{


	Dialog.create("Parametres annotations"); 
	Dialog.addCheckbox("POI visible :", POIVISIBILITY);Dialog.addString("", POI_NAME,50);
	Dialog.addCheckbox("Notes visibles :", NOTEVISIBILITY);Dialog.addString("", NOTE_NAME,50);
	Dialog.addString("Notes", "Commentaire", 100) ;
	Dialog.addCheckbox("Labels visibles", LABELVISIBILITY);//Dialog.addString("", LABELS_NAME);
		
	Dialog.addSlider("Facteur Intervals :", 1, 100, interval);
	Dialog.addMessage("Couleurs");
	Dialog.addCheckbox("Couleur du texte :", TEXTVISIBLE);Dialog.addChoice("", couleur_rgb, TEXTCOLOR);//Dialog.addString("", TEXTCOLOR);
	
	Dialog.addCheckbox("Couleur du bord du texte :", BACKVISIBLE);Dialog.addChoice("", couleur_rgb, BACKCOLOR);
	
	Dialog.addCheckbox("Couleur de la bordure :", LINEVISIBLE);Dialog.addChoice("", couleur_rgb, LINECOLOR);
	
	Dialog.addCheckbox("Couleur de remplissage :", FILLVISIBLE);Dialog.addChoice("", couleur_rgb, FILLCOLOR);
	
	Dialog.addCheckbox("Texte", CAPTION);
	Dialog.addCheckbox("Tip", TOOLTIP);
    Dialog.show();
	POI_NAME=Dialog.getString();
	POIVISIBILITY=Dialog.getCheckbox();
	NOTE_NAME=Dialog.getString();
	NOTEVISIBILITY=Dialog.getCheckbox();
	NOTES=Dialog.getString() ;
	//LABELS_NAME=Dialog.getString();
	LABELVISIBILITY=Dialog.getCheckbox();
    interval = Dialog.getNumber();
	TEXTCOLOR=Dialog.getChoice();
	TEXTVISIBLE=Dialog.getCheckbox();
	BACKCOLOR=Dialog.getChoice();
	BACKVISIBLE=Dialog.getCheckbox();
	LINECOLOR=Dialog.getChoice();
	LINEVISIBLE=Dialog.getCheckbox();
	FILLCOLOR=Dialog.getChoice();
	FILLVISIBLE=Dialog.getCheckbox();
	CAPTION=Dialog.getCheckbox();
	TOOLTIP=Dialog.getCheckbox();


print("\\Clear");
print("<ZAS>");
	print("<SETUP ");
		print("PANELPOSITION=\"2\" ");
		print("INITIALVISIBILITY=\"1\" ");
		print("MINSCALE=\"0.20\" ");
		print("MAXSCALE=\"2\" ");
		print("POIVISIBILITY=\""+POIVISIBILITY+"\" ");
		print("LABELVISIBILITY=\""+LABELVISIBILITY+"\" ");
		print("NOTEVISIBILITY=\""+NOTEVISIBILITY+"\" >");		
	print("</SETUP>");
	



	
	print("<POI ");
		print("ID=\"0\" ");
		print("NAME=\""+POI_NAME+"\" ");
		print("X=\"center\" ");
		print("Y=\"center\" ");
		print("ZOOM=\"-1\" ");
		print(" >");
		print("<NOTES>");
			print("<NOTE ");
				print("ID=\"0\" ");				
				print("NAME=\""+NOTE_NAME+"\" ");
				print("TEXT=\""+NOTES+"\" ");
				print(">");
			print("</NOTE>");
		print("</NOTES>");
print("<LABELS>");
count=roiManager("count");
for (i=0;i<count;i++){
		roiManager("Select", i);
		nom_item=Roi.getName;
		run("Set Measurements...", "area mean center feret's limit display redirect=None decimal=9");
		List.setMeasurements;
		XM=List.getValue("XM");
		YM=List.getValue("YM");
		getStatistics(area, mean, min, max, std, histogram);
		run("Interpolate", "interval="+area/(interval*1000)+" smooth adjust");
		//run("Interpolate", "interval="+interval+" smooth adjust");
		getSelectionCoordinates(xpoints, ypoints);
		print("<LABEL ");
				print("ID=\""+i+"\" 	");
				print("NAME=\""+nom_item+"\" ");
				print("MEDIATYPE=\"polygon\"");
				print("MEDIA=\"polygon\" ");
				print("X=\""+XM+"\" ");
				print("Y=\""+YM+"\"  ");
				print("ZOOM=\"10\" ");
				print("XSCALE=\"100\" ");
				print("YSCALE=\"100\" ");
				print("URL=\"\" ");
				print("URLTARGET=\"_blank\" ");
				print("ROLLOVER=\"0\" ");
				print("CAPTION=\""+nom_item+"\" ");
				print("TOOLTIP=\""+nom_item+"\" ");
				print("TEXTCOLOR=\""+couleur_cherche(TEXTCOLOR)+"\" ");
				print("BACKCOLOR=\""+couleur_cherche(BACKCOLOR)+"\"");
				print("LINECOLOR=\""+couleur_cherche(LINECOLOR)+"\" ");
				print("FILLCOLOR=\""+couleur_cherche(FILLCOLOR)+"\"");
				print("TEXTVISIBLE=\""+TEXTVISIBLE+"\" ");
				print("BACKVISIBLE=\""+BACKVISIBLE+"\"");
				print("LINEVISIBLE=\""+LINEVISIBLE+"\" ");
				print("FILLVISIBLE=\""+FILLVISIBLE+"\"");
				print("CAPTIONPOSITION=\"5\" >");
					
					print("<POLYGON>");
					for(j=0;j<xpoints.length;j++){
					print ("<POINT X=\""+ parseInt(xpoints[j])+"\"   Y=\""+ parseInt(ypoints[j])+"\"   ></POINT>");
					}
					print("</POLYGON>");
			print("</LABEL>	");	
	}

			print("</LABELS>");
		print("</POI>	");
print("</ZAS>");
dir=getDirectory("Repertoir de sauvegarde pour annotations.xml");
selectWindow("Log");
saveAs("Text", dir+"annotations.txt");
if (File.exists(dir+"annotations.xml")) File.delete(dir+"annotations.xml");
File.rename(dir+"annotations.txt", dir+"annotations.xml");

}

macro 'Labels Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    
  	}




macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/PHIV_Zoomify_toolset.txt");
}

	

function Bio_meta(path){
	SX=Array.trim(SX, 1); 
	SY=Array.trim(SY, 1); 
	tabIndexScenes=Array.trim(tabIndexScenes, 1);
	run("Bio-Formats Macro Extensions");
	Ext.setId(path);
	Ext.getCurrentFile(file);
	Ext.getSeriesCount(seriesCount);
	for (s=0; s<seriesCount; s++) {
	  Ext.setSeries(s);
	  Ext.getSizeX(sizeX);
	  SX=Array.concat(SX,sizeX);
	  Ext.getSizeY(sizeY);
	  SY=Array.concat(SY,sizeY);
	   }
	   //((SX[s]>SX[s-1]) || (abs((SX[s]/SX[s-1])-(SY[s]/SY[s-1]))<0.01))
		//(SX[s]>SX[s-1])
	for (s=1;s<seriesCount;s++){
		if ((SX[s]>SX[s-1]) || (abs((SX[s]/SX[s-1])-(SY[s]/SY[s-1]))>0.01))	tabIndexScenes=Array.concat(tabIndexScenes,s);	
		}
	   
	 tabIndexScenes=Array.concat(tabIndexScenes,seriesCount); 
	Ext.close();
}

function Hyper2RGB(){
	setBatchMode(true);
	titre=getTitle();
	setSlice(1);
	 setMetadata("Label", "r");
	setSlice(2);
	 setMetadata("Label", "g");
	setSlice(3);
	 setMetadata("Label", "b");
	run("Stack to Images");
	run("Merge Channels...", "c1=r c2=g c3=b");
	selectWindow("RGB");
	rename(titre);
	setBatchMode(false);
}

function couleur_cherche(string){
	for(i=0;i<couleur_rgb.length;i++){
		if (couleur_rgb[i]==string) return couleur_hex[i];
	}
	print("rien");
}

function RoiAdd(nom) {
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);	
	roiManager("Rename", nom);
}


function log2clipboard(){
	/*dir_toolset=getDirectory("macros")+"toolsets\\";
	selectWindow("Log");
	run("Text...", "save=["+dir_toolset+"log.txt]");
	clipstring=File.openAsString(dir_toolset+"log.txt");
	String.copy(clipstring);*/
	String.copy(getInfo("log"));
	
	
}
