// PHIV Automate 880 Tool Set v2
// Marc LARTAUD MRI PHIV
// Toolset du concatene blocks from automate 880

/*
Install plugins
Bioformat, StackReg, TurboReg, HyperStackReg v05
https://sites.google.com/site/vedsharma/imagej-plugins-macros/hyperstackreg

czi_import : to convert czi files in a folder in tiff files in another folder with metadata

Auto_aboute : from tif files in same folder
	create un MIP folder with max intensity projectionen 
	create a sequences files in a new folder depending thickness of vibratome
		in option : bleach corrector or gamma
		http://wiki.cmci.info/downloads/bleach_corrector
		Simple Ratio, Fit, Histogram Matching Method
	x y Zen positions saved in Roi Manager
	
Virtual stack un open virtual stack from a sequence folder with metadata

Crop to obtain stack small enough to be open with free RAM
	Choose first and last slide
	Choose ROI
	Choose Image Type
	Choose resampling in xy or z

Aligne to realign by translation in option
	Automatic StackReg
	Manual : Add points selection on corresponding detail in the Roi Manager before and after each shift
	
Ablation to keep only good slices
	Make selection and add in Roi Manager on first and latest slides to keep


*/

var methode="None";
var gamma=1;
var	thickness=60;
var	delta_z=2;
var saturation=0.1;


	 
macro "czi_import Action Tool - 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"{
	run("Close All");
	dir = getDirectory("Input folder");
	list = getFileList(dir);
	dir2 = getDirectory("Output folder");
	tab_lut = newArray(32);
	
	
	for (i=0; i<list.length; i++) {	
			showProgress(i/list.length);
			print ( list[i]+" "+i+1+"/"+list.length);			
			 if (endsWith(list[i], "czi")){											
			 nom=substring(list[i],0,indexOf(list[i],"."));		
			 run("Bio-Formats Importer", "open=["+dir+list[i]+"] autoscale color_mode=Default view=Hyperstack stack_order=XYCZT");
			infos=getImageInfo(); // metadata Bioformats
			tab_lut=get_lut(infos);
			Stack.getDimensions(width, height, channels, slices, frames);
				
			for (j=1; j<channels+1; j++) {
				run("Duplicate...", "duplicate channels="+j);
				if (slices>1)	run("Reverse"); //reverse stack
				rename("temp"+j);
				selectWindow(list[i]);				
			}
			selectWindow(list[i]);
			close();
			if (channels>1){
				run("Concatenate...", "all_open title=[Concatenated Stacks]");
				run("Stack to Hyperstack...", "order=xyzct channels="+channels+" slices="+slices+" frames=1 display=Composite");
			}
			if(channels==1) run(apply_lut(tab_lut[0]));
			else {
				for (j=1; j<channels+1; j++) {
					Stack.setChannel(j);
					run(apply_lut(tab_lut[j-1]));			
					}
			}
			setMetadata("Info", infos); // Inscrit metadata Bioformats
			saveAs("Tiff", dir2+nom+".tif");
			close();
			
		}
	}
	print ("End !");
}



macro "Auto_aboute Action Tool - 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"{
	first_slice=newArray(0);
	last_slice=newArray(0);
	position_x=newArray(0);
	position_y=newArray(0);
	position_z=newArray(0);
	
	run("Close All");
	dir = getDirectory("Input folder");
	list = getFileList(dir);
	
	  html = "<html>"
     +"<a href=\"http://imagej.net/Bleach_Correction\">Bleach Correction</a>";
     
	
	Dialog.create("Parameters");
	Dialog.addNumber("Thickness from vibratome(µm):", thickness);
	Dialog.addChoice("Normalization", newArray("None","Simple ratio", "Exponential Fitting", "Histogram Matching"),methode) ;
	Dialog.addHelp(html);
	Dialog.addNumber("Gamma ", gamma);
	
	Dialog.show();
	thickness = Dialog.getNumber();
	methode = Dialog.getChoice();
	gamma=Dialog.getNumber();
		
	getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);
	suffix="_"+hour+"_"+minute+"_"+second;
	
	dira=substring(dir,0,lastIndexOf(dir,File.separator));
	  dir2 = dira+"_MIP"+suffix+File.separator;
	  File.makeDirectory(dir2);
	 
	 dir3 = dira+"_sequence"+suffix+File.separator;
	 File.makeDirectory(dir3);
	  
	  
	
	
	tab_lut = newArray(32);
	slice_max=1;
	
	
	
	//////////Boucle sur les fichiers czi du dossier dir/////////////////
	for (i=0; i<list.length; i++) {	
			showProgress(i/list.length);	
			if (endsWith(list[i], "tif"))
			
			 {											
			 nom=substring(list[i],0,indexOf(list[i],"."));	
			open(dir+list[i]); //tif deja converti
			infos=getImageInfo();
			positions=get_positions(infos);
			print ("image = "+list[i]);
			delta_z=positions[3]; // interval en z
			print ("delta_z = "+delta_z);
			tab_lut=get_lut(infos);// luts
			Stack.getDimensions(width, height, channels, slices, frames);
			position_x=Array.concat(position_x,positions[0]);// 
			position_y=Array.concat(position_y,positions[1]);
			position_z=Array.concat(position_z,positions[2]);			
			slice_max=Slice_Int_Max();
			print ("slice_max = "+slice_max);	
			nb_slice=thickness/delta_z;	//nombre de coupes a recuperrer			
						
			if (slice_max+nb_slice>=slices) {
				slice_debut=(slices-nb_slice);
				slice_fin=slices;			
			}
			else {
				slice_debut=slice_max;
				slice_fin=slice_max+nb_slice;		
			}
			
			
			
			print ("first slice = "+slice_debut);	
			print ("last slice = "+slice_fin);	
			
			first_slice=Array.concat(first_slice,slice_debut);
			last_slice=Array.concat(last_slice,slice_fin);
			
			run("Z Project...", "projection=[Max Intensity]");
			if(channels==1) run(apply_lut(tab_lut[0]));
			else {
				for (j=1; j<channels+1; j++) {
					Stack.setChannel(j);
					run(apply_lut(tab_lut[j-1]));			
					}
			}
			if (channels>1){
				Stack.setDisplayMode("composite");
				setMetadata("Info", infos);
				run("Image Sequence... ", "format=TIFF use save=["+dir2+nom+".tif]");
				/*temp=getImageID();				
				run("Stack to RGB");
				saveAs("Tiff", dir2+nom+"_MIP.tif");
				close();
				selectImage(temp);*/
				close();			
			} else {
				saveAs("Tiff", dir2+nom+"_MIP.tif");
				close();			
			}
						
			selectWindow(list[i]);	
			
			
			for (j=1; j<channels+1; j++) {
				run("Duplicate...", "duplicate channels="+j+" slices="+slice_debut+"-"+slice_fin);				
				//run("Reverse");//retourne le stack
				if (methode!="None") {
					stackorigid=getImageID();
					if (methode=="Simple ratio") run("Bleach Correction", "correction=[Simple Ratio] background=0");
					if (methode=="Exponential Fitting"){
						run("Bleach Correction", "correction=[Exponential Fit (Frame-Wise Double Fit)]");
						selectWindow("y = a*exp(-bx) + c");
						close();
						selectWindow("y = a*exp(-bx) + c");
						close();
						} 
					if (methode=="Histogram Matching") run("Bleach Correction", "correction=[Histogram Matching]");
					if (gamma!=1) run("Gamma...", "value="+gamma+" stack");
					rename("temp"+j);
					selectImage(stackorigid);
					close();
				}
				else {
					if (gamma!=1) run("Gamma...", "value="+gamma+" stack");
					rename("temp"+j);			
				}
				selectWindow(list[i]);				
			}
			selectWindow(list[i]);
			
			close();
			if (channels>1){
				run("Concatenate...", "all_open title=[Concatenated Stacks]");
				print ("c="+channels);
				print ("s="+nb_slice);
				run("Stack to Hyperstack...", "order=xyzct channels="+channels+" slices="+(nb_slice+1)+" frames=1 display=Composite");
			}
			if(channels==1) run(apply_lut(tab_lut[0]));
			else {
				for (j=1; j<channels+1; j++) {
					Stack.setChannel(j);
					run(apply_lut(tab_lut[j-1]));			
					}
			}
			
			run("Image Sequence... ", "format=TIFF name=b"+IJ.pad(i+1,3)+" save=["+dir3+"]");
				close();				
					
			
			
		}
		}
	

	
list2 = getFileList(dir2);
open(dir2+list2[0]);
	setMetadata("Info", infos);
	run("Save");
	close();
run("Image Sequence...", "open=["+dir2+list2[0]+"] sort use");
run("Stack to Hyperstack...", "order=xyczt(default) channels="+channels+" slices="+(list2.length/channels)+" frames=1 display=Composite");
	if(channels==1) run(apply_lut(tab_lut[0]));
				else {
					for (j=1; j<channels+1; j++) {
						Stack.setChannel(j);
						run(apply_lut(tab_lut[j-1]));			
						}
				}
				setMetadata("Info", infos);
		
	setTool("rectangle");
	
	
	
	
list3 = getFileList(dir3);	
	open(dir3+list3[0]);
	setMetadata("Info", infos);
	run("Save");
	close();
	run("Image Sequence...", "open=["+dir3+list3[0]+"] sort use");
	run("Stack to Hyperstack...", "order=xyczt(default) channels="+channels+" slices="+(list3.length/channels)+" frames=1 display=Composite");
	if(channels==1) run(apply_lut(tab_lut[0]));
				else {
					for (j=1; j<channels+1; j++) {
						Stack.setChannel(j);
						run(apply_lut(tab_lut[j-1]));			
						}
				}
				setMetadata("Info", infos);
		
	setTool("rectangle");
	/*Array.show(first_slice);
	Array.show(last_slice);
	Array.show(position_x);
	Array.show(position_y);
	Array.show(position_z);*/
	slice_position=0;
	for (i=0;i<position_x.length-1;i++){
		zen_shift_x=Array.concat(zen_shift_x,position_x[i+1]-position_x[i]);
		zen_shift_y=Array.concat(zen_shift_y,position_y[i+1]-position_y[i]);
		slice_position=slice_position+last_slice[i]-first_slice[i]+1;
		Stack.setSlice(slice_position);//select slice n-1
		makePoint(position_x[i]-position_x[0]+(width/2), position_y[i]-position_y[0]+(height/2));// make point
		roiManager("Add");// add roi manager
		Stack.setSlice(slice_position+1);//select slice n
		makePoint(position_x[i+1]-position_x[0]+(width/2), position_y[i+1]-position_y[0]+(height/2));// make point
		roiManager("Add");// add roi manager

		
	}
	
	Stack.setSlice(1);
	roiManager("Deselect");
	roiManager("Save",dira+"ROI"+suffix+".zip");
	/*
	Array.show(zen_shift_x);
	Array.show(zen_shift_y);*/
	showMessage("End");


	
}


////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
macro "Virtual_stack Action Tool - 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"{


	dir1 = getDirectory("Input folder");
	list = getFileList(dir1);
	
	open(dir1+list[0]);
	
	infos=getImageInfo();
	tab_lut=get_lut(infos);
	positions=get_positions(infos);
	delta_z=positions[3];
	Stack.getDimensions(width, height, channels, slices, frames);
	if (channels!=1) {
		diapos=list.length;
		}
	else {
		channels=get_canaux(infos);
		diapos=list.length/channels;	
	}
	//if (bitDepth() ==24) channels=1;
	close();
	
	run("Image Sequence...", "open=["+dir1+list[0]+"] sort use");
	
	
	if (bitDepth() !=24)	{
	if(channels==1) run(apply_lut(tab_lut[0]));
				else {
					run("Stack to Hyperstack...", "order=xyczt(default) channels="+channels+" slices="+diapos+" frames=1 display=Composite");
					for (j=1; j<channels+1; j++) {
						Stack.setChannel(j);
						run(apply_lut(tab_lut[j-1]));			
						}
				}
		}
	setMetadata("Info", infos);
	run("Properties...", "voxel_depth="+delta_z);
	
	setTool("rectangle");
	
}


////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
macro "Crop Action Tool - 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"{


	getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);
	suffix="_"+hour+"_"+minute+"_"+second;


	origid=getImageID();
	infos=getImageInfo();
	positions=get_positions(infos);
	delta_z=positions[3];
	dir=getDirectory("image");
	dira=substring(dir,0,lastIndexOf(dir,File.separator));
	dir2 = dira+File.separator+"crop"+suffix+File.separator;
	File.makeDirectory(dir2);
	list = getFileList(dir2);
	for (i=0; i<list.length; i++) {
		File.delete(dir2 + list[i]);
	}
	 if (isOpen("Log")) {
         selectWindow("Log");
         run("Close");
     } 
	
	
	Stack.getDimensions(width, height, channels, slices, frames);
	waitForUser("Choose first slice");
	Stack.getPosition(channel, slice, frame) ;
	slice_debut=slice;
	waitForUser("Choose last slice");
	Stack.getPosition(channel, slice, frame) ;
	slice_fin=slice;
	waitForUser("Rectangular selection to keep");
	getSelectionBounds(x, y, width, height);
	
	Dialog.create("New Image");
	Dialog.addChoice("Type:", newArray("RGB","8-bit","16-bit"));
	Dialog.addSlider("Resampling factor xy", 1, 10, 1);
	Dialog.addSlider("Resampling factor z", 1, 10, 1);
	Dialog.show();
	type = Dialog.getChoice();
	resample_xy=Dialog.getNumber();
	resample_z=Dialog.getNumber();
	
	width=width/resample_xy;
	
	height=height/resample_xy;
	
	depth=(slice_fin-slice_debut+1)/resample_z;
	
	delta_z2=delta_z*resample_z;
	//run("Properties...", "voxel_depth="+delta_z);
	
	//gestion de la memoire
	mem=IJ.freeMemory();
	mem1=substring(mem, 0, indexOf(mem, "MB"));
	mem1=parseInt(mem1);
	mem2=substring(mem, indexOf(mem, "of")+3, lastIndexOf(mem, "MB"));
	mem2=parseInt(mem2);
	mem_dispo=mem2-mem1;
	print("Free Ram (Mo): "+mem_dispo);
	
	
	if (type=="RGB") cod_px=4;
	if (type=="8-bit") cod_px=channels+((channels%2)*2);
	if (type=="16-bit") cod_px=channels*2;
	
	taille_image=width*height*depth*cod_px/1024000;
	/*print (width);
	print (height);
	print (depth);
	print (cod_px);*/
	print ("Image size (Mo) : "+taille_image);
	
	//if(mem_dispo<taille_image)  exit("Out of memory !");
	
	
	for (i=slice_debut;i<=slice_fin;i=i+resample_z)
		{
			showProgress(-i/depth);
			Stack.setSlice(i);
			nomimage=getMetadata("Label");
			if (i==slice_debut) premier_nom=nomimage+".tif";
			run("Duplicate...", "title=temp");
			if (type=="RGB") {
				run("Stack to RGB");
				selectWindow("temp");
				close();
				selectWindow("temp (RGB)");
				rename("temp");				
				}
			if (type=="8-bit") run("8-bit");
			run("Size...", "width="+width+" height="+height+" constrain average interpolation=Bilinear");
			ind=lastIndexOf(nomimage, "_");
			nomimage=substring(nomimage, 0, ind);
			rename(nomimage+".tif");
			setMetadata("Info", infos);
			run("Image Sequence... ", "format=TIFF use save=["+dir2+"]");
			close();
			list3 = getFileList(dir2);	
			open(dir2+list3[0]);
			setMetadata("Info", infos);
			run("Save");
			close();			
			selectImage(origid);			
		}
		
	
	if (type=="RGB") {
			run("Image Sequence...", "open=["+dir2+premier_nom+"] sort");
			cropid=getImageID();
			}
	else {
			
			list = getFileList(dir2);
			open(dir2+list[0]);
			//Stack.getDimensions(width, height, channels, slices, frames);
			infos=getImageInfo();
			tab_lut=get_lut(infos);
			//Array.show(tab_lut);
			channels=get_canaux(infos);
			//print (channels);
			close();
			run("Image Sequence...", "open=["+dir2+list[0]+"] sort");
			
			
			run("Stack to Hyperstack...", "order=xyczt(default) channels="+channels+" slices="+(list.length/channels)+" frames=1 display=Composite");
			cropid=getImageID();
			
			if(channels==1) run(apply_lut(tab_lut[0]));
				else {
					for (j=1; j<channels+1; j++) {
						Stack.setChannel(j);
						run(apply_lut(tab_lut[j-1]));			
						}
				}
	
	}
	setMetadata("Info", infos);	
	selectImage(cropid);
	run("Properties...", "voxel_depth="+delta_z2);
	selectImage(origid);
	run("Properties...", "voxel_depth="+delta_z);
	selectImage(cropid);
	
	setTool("rectangle");
	
}



////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////


macro "Aligne Action Tool - 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"{
	
	Dialog.create("Alignement");
	Dialog.addChoice("Type:", newArray("Point par point dans le RoiManager","StackReg","HyperStackReg"));
	Dialog.show();
	method = Dialog.getChoice();
	infos=getImageInfo();
	if (method=="StackReg") {
	if(is("Virtual Stack")) run("Duplicate...", "title=[] duplicate");
	run("StackReg ", "transformation=[Translation]");
		for (i=1; i<=2; i++) {
		 showProgress(-i/2);		 
		}	
	}
	else if (method=="HyperStackReg") {
		Dialog.create("Alignement Channel");
		Dialog.addNumber("Reference Channel?", 1)
		Dialog.show();
		channel_ref = Dialog.getNumber();
		if(is("Virtual Stack")) run("Duplicate...", "title=[] duplicate");
		run("HyperStackReg v05", "transformation=Translation channel"+channel_ref+" ");
	}
	else {
	
	setTool("point");
	waitForUser("Add in Roi Manager\nPoint selection on correspondant detail before shift\nPoint selection on correspondant detail after shift\nsame thing for all shifts");
	
	origid=getImageID();
	
	tab_lut=get_lut(infos);
	Stack.getDimensions(width, height, channels, slices, frames);
	count=roiManager("count");
	if((count%2)!=0) exit("Not enough selection in RoiManager!");
	position_slice=newArray(count);
	position_x=newArray(count);
	position_y=newArray(count);
	nb_shift=(count/2)+2;
	delta_x=newArray(nb_shift);
	delta_y=newArray(nb_shift);
	shift_x=newArray(nb_shift);
	shift_y=newArray(nb_shift);
	shift_x[0]=0;
	shift_y[0]=0;
	slice_duplic=newArray(nb_shift);
	slice_duplic[0]=0;
	slice_duplic[nb_shift-1]=slices;
	
	somme_delta_x=0;
	somme_delta_y=0;
	max_shift_x=0; 
	max_shift_y=0;
	min_shift_x=0; 
	min_shift_y=0;
		
	for(i=0;i<count;i++){
		roiManager("Select", i);
		if (selectionType() !=10)exit("Is not point selection!");
		Stack.getPosition(channel, slice, frame);
		position_slice[i]=slice;
		getSelectionCoordinates(x, y);
		position_x[i]=x[0];
		position_y[i]=y[0];	
		}

	for(i=0;i<count;i=i+2){
		j=(i/2)+1;
		delta_x[j]=position_x[i]-position_x[i+1];
		delta_y[j]=position_y[i]-position_y[i+1];
		somme_delta_x=somme_delta_x+delta_x[j];
		somme_delta_y=somme_delta_y+delta_y[j];
		shift_x[j]=somme_delta_x;
		shift_y[j]=somme_delta_y;
		slice_duplic[j]=position_slice[i];
			if (shift_x[j]>max_shift_x) max_shift_x=shift_x[j];
			if (shift_y[j]>max_shift_y) max_shift_y=shift_y[j];
			if (shift_x[j]<min_shift_x) min_shift_x=shift_x[j];
			if (shift_y[j]<min_shift_y) min_shift_y=shift_y[j];
	}
	
	
	x_canvas=width+max_shift_x-min_shift_x;
	y_canvas=height+max_shift_y-min_shift_y;
	trans_x=(max_shift_x-min_shift_x)/2;
	trans_y=(max_shift_y-min_shift_y)/2;
//////////////////////////////////////////////////////////////////////////////////////////////////
	trans_x=(-trans_x);
	trans_y=(-trans_y);
////////////////////////////////////////////////////////////////////////////////////////////////////
	
	
	run("Canvas Size...", "width="+x_canvas+" height="+y_canvas+" position=Center zero");
	
	for(i=0;i<nb_shift-1;i++){
	selectImage(origid);
	if (is("composite")) run("Duplicate...", "duplicate slices="+(slice_duplic[i])+1+"-"+slice_duplic[i+1]);
	else run("Duplicate...", "duplicate range="+(slice_duplic[i])+1+"-"+slice_duplic[i+1]);
	rename(i+1);
	run("Translate...", "x="+trans_x+shift_x[i]+" y="+trans_y+shift_y[i]+" interpolation=Bilinear stack");
	tag=0;
	if (is("composite")) {
			run("Hyperstack to Stack");
			tag=1;
			}
	}
	selectImage(origid);
	close();
	run("Concatenate...", "all_open title=[Aligned]");
	
		if (tag==1) {
			run("Stack to Hyperstack...", "order=xyczt(default) channels="+channels+" slices="+slices+" frames=1 display=Composite");
			for (j=1; j<channels+1; j++) {
						Stack.setChannel(j);
						run(apply_lut(tab_lut[j-1]));			
						}	
		
		}
	
	}
	setMetadata("Info", infos);
	setTool("rectangle");
	
}




////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

macro "Ablation Action Tool - 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"{

	waitForUser("Add selection in Roi Manager\nOne selection on first slice to keep\nOne selection on last slice to keep\nSame thing for all block to keep");
	
	origid=getImageID();
	Stack.getDimensions(width, height, channels, slices, frames);
	count=roiManager("count");
	if((count%2)!=0) exit("Not enough selection in RoiManager!");
	position_slice=newArray(count);

	
	for(i=0;i<count;i++){
		roiManager("Select", i);
		Stack.getPosition(channel, slice, frame);
		position_slice[i]=slice;
		}
	roiManager("Deselect");
	run("Select None");
	Array.show(position_slice);
	
	
	for(i=0;i<count;i=i+2){
	selectImage(origid);
	if (is("composite")) run("Duplicate...", "duplicate slices="+(position_slice[i])+"-"+position_slice[i+1]);
	else run("Duplicate...", "duplicate range="+(position_slice[i])+"-"+position_slice[i+1]);
	rename(i+1);
	}
	
	selectImage(origid);
	close();
	run("Concatenate...", "all_open title=[Reduced Stacks]");
	
	
	
	setTool("rectangle");
	
}

////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/PHIV_automate_880_toolset_en.txt");
}



///////////////////////////////////////////////FUNCTIONS//////////////////////////////////////////////////////////////////////////////////////////




function get_positions(infos){
getPixelSize(unit, pixelWidth, pixelHeight);
 lines=split(infos,"\n");
 position = newArray(4);
for (k=0; k<lengthOf(lines); k++){
					if (startsWith(lines[k], "Information|Image|S|Scene|Position|X #1")){
							index=indexOf(lines[k], "=");
							position[0]=parseFloat(substring(lines[k], index+2, lengthOf(lines[k])))/pixelWidth;							
						}
					if (startsWith(lines[k], "Information|Image|S|Scene|Position|Y #1")){
							index=indexOf(lines[k], "=");
							position[1]=-parseFloat(substring(lines[k], index+2, lengthOf(lines[k])))/pixelHeight;								
						}
					if (startsWith(lines[k], "Information|Image|S|Scene|Position|Z #1")){
							index=indexOf(lines[k], "=");
							position[2]=parseFloat(substring(lines[k], index+2, lengthOf(lines[k])));								
						}
					if (startsWith(lines[k], "Information|Image|Z|Interval|Increment #1")){
							index=indexOf(lines[k], "=");
							position[3]=parseFloat(substring(lines[k], index+2, lengthOf(lines[k])));								
						}
				}
	return position	;	
	}
	
	
	
function get_lut(infos){
 lines=split(infos,"\n");
 tab_lut = newArray(32);
 count=0;
 countunmix=0;
 countfinger=0;
for (k=0; k<lengthOf(lines); k++){
					if (startsWith(lines[k], "Experiment|AcquisitionBlock|MultiTrackSetup|TrackSetup|Detector|Color #")){
							index=indexOf(lines[k], "=");
							tab_lut[count]=substring(lines[k], index+2, lengthOf(lines[k]));
							count++;							
						}	
					if (startsWith(lines[k], "Information|Processing|Spectra|Spectrum|Color #")){ //unmixing
							index=indexOf(lines[k], "=");
							tab_lut[countunmix]=substring(lines[k], index+2, lengthOf(lines[k]));
							countunmix++;							
						}
					if (startsWith(lines[k], "Experiment|AcquisitionBlock|MultiTrackSetup|TrackSetup|RatioSetup|Ratio|Color #")){ //finger
							index=indexOf(lines[k], "=");
							tab_lut[countfinger]=substring(lines[k], index+2, lengthOf(lines[k]));
							countfinger++;							
						}

						
						
				}
	//Array.print(tab_lut);
	return tab_lut	;	
	}
	
function get_canaux(infos){
 lines=split(infos,"\n");
 nb_cannaux = 0;
 count=0;
for (k=0; k<lengthOf(lines); k++){
 
					if (startsWith(lines[k], " SizeC = ")){
							nb_cannaux=parseInt(substring(lines[k], lengthOf(lines[k])-1,lengthOf(lines[k])));
													}					
				}
	return nb_cannaux	;	
}	



	
	
function get_wave_debut(infos){
 lines=split(infos,"\n");
 wave_debut = newArray(32);
 count=0;
for (k=0; k<lengthOf(lines); k++){
					if (startsWith(lines[k], "Information|Image|Channel|DetectionWavelength|Ranges #")){
							index=indexOf(lines[k], "=");
							wave_debut[count]=parseInt(substring(lines[k], index+2, lengthOf(lines[k])-20));
							//wave_debut[count]=parseInt(substring(lines[k], index+2, lengthOf(lines[k])-20));
							count++;							
						}					
				}
	return wave_debut	;	
}

function get_wave_fin(infos){
 lines=split(infos,"\n");
 wave_fin = newArray(32);
 count=0;
for (k=0; k<lengthOf(lines); k++){
					if (startsWith(lines[k], "Information|Image|Channel|DetectionWavelength|Ranges #")){
							index=indexOf(lines[k], "-");
							wave_fin[count]=parseInt(substring(lines[k], index+1, lengthOf(lines[k])));
							//wave_fin[count]=parseInt(substring(lines[k], index+2, lengthOf(lines[k])));
							count++;							
						}					
				}
	return wave_fin	;	
}

function get_wave_excitation(infos){
 lines=split(infos,"\n");
 for (k=0; k<lengthOf(lines); k++){
					if (startsWith(lines[k], "Information|Image|Channel|ExcitationWavelength #")){
							index=indexOf(lines[k], "=");
							wave_excitation=parseInt(substring(lines[k], index+1, lengthOf(lines[k])));
										
						}					
				}
	return wave_excitation	;	
}

	
	
function apply_lut(tab_lut)	{
	lut="Grays";
	if (tab_lut=="#FF0000") lut="Red";
	if (tab_lut=="#00FF00") lut="Green";
	if (tab_lut=="#0000FF") lut="Blue";
	if (tab_lut=="#FF00FF") lut="Magenta";
	if (tab_lut=="#FFFF00") lut="Yellow";
	if (tab_lut=="#00FFFF") lut="Cyan";
return lut;

}

  
function normalisation(methode){
run("Set Measurements...", "area mean integrated display redirect=None decimal=3");
maxraw=0;
slice_max=0;
n = nSlices;
run("Plot Z-axis Profile");
for (i=0; i<nResults; i++){
	raw=getResult("RawIntDen", i);
//print (raw)	;
	if (raw>maxraw) {
		maxraw=raw;
		slice_max=i+1;
	 }		
}
 if (isOpen("Results")) {
       selectWindow("Results");
       run("Close");
   } 
close();
print ("max_slice :"+slice_max);

setSlice(1);
return slice_max;
}



function Slice_Int_Max (){
	origid=getImageID();
	Stack.getDimensions(width, height, channels, slices, frames);
	mean_tot=newArray(slices);
	mean_max=0;
	slice_max=1;
	for (j=1; j<=channels; j++) {
			Stack.setChannel(j);
			run("Plot Z-axis Profile");
			Plot.getValues(xpoints, ypoints);
			close();
			selectImage(origid);
			for (k=0;k<mean_tot.length;k++){
				mean_tot[k]=mean_tot[k]+ypoints[k];
				}
			}
	for (k=0;k<mean_tot.length;k++){ 
		if(mean_tot[k]>mean_max){
			mean_max=mean_tot[k];
			slice_max=k+1;
			}
		}
	
	return slice_max;	
}



