// PHIV Alignement Tool Set
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter l alignement des photos de coupes seriees




//var globales zones


var sigma_z1=5;
var seuil_z1=newArray(0,107);
var sigma_z2=5;
var seuil_z2=newArray(48,255);

var indice_total=1;
var indice_amidon=1;
var indice_angle=1;
var indice_gel=1;
var angle_rotation=10;
var xg=0;
var yg=0;


////////////////////////////////////////////////////////////////label=AutoMerge ////////////////////////////////////////////

macro "AutoMerge Action Tool - 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"{
if (getInfo("fiji.dir")=="") showMessage("A utiliser dans Fiji!");
else {
	dir = getDirectory("Choix du Répertoire Source ");

	run("Grid/Collection stitching", "type=[Unknown position] order=[All files in directory] directory=["+dir+"] output_textfile_name=txt.txt fusion_method=[Linear Blending] regression_threshold=0.30 max/avg_displacement_threshold=2.50 absolute_displacement_threshold=3.50 computation_parameters=[Save memory (but be slower)] image_output=[Fuse and display]");
	rename("temp");
	run("RGB Color");
	rename("Merge");
	selectWindow("temp");
	close();
	}
}


macro "Zonation Action Tool - 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"{
	
	raz();
	origid=getImageID();
	
	run("Select None");
	run("Duplicate...", "title=nb");
	run("8-bit");
	run("Gaussian Blur...", "sigma="+sigma_z1);
	Validation_surface("Total",seuil_z1);
	n=roiManager("count");
	indice_total=n-1;
	roiManager("Select", n-1);
	//run("Enlarge...", "enlarge="+2*sigma_z1);
	run("Enlarge...", "enlarge="+-sigma_z1);
	roiManager("Update");
	
	
	run("Select None");
	run("Duplicate...", "title=nb");
	run("8-bit");
	run("Gaussian Blur...", "sigma="+sigma_z2);
	Validation_surface("Zone",seuil_z2);
	
	Dialog.create("Zonation");
	items = newArray("Amidon", "Gel");
	Dialog.addRadioButtonGroup("Zone selectionnee", items, 1, 2, "Amidon");
	Dialog.show;
	zone=Dialog.getRadioButton;
	
	n=roiManager("count");
	if(zone=="Amidon"){
		roiManager("Select", n-1);
		roiManager("Rename", "Amidon");		
	}
	if(zone=="Gel"){		
		roiManager("Select", n-1);
		run("Enlarge...", "enlarge="+sigma_z2);
		run("Make Inverse");
		roiManager("Update");
		roiManager("Select", newArray(0,1));
		roiManager("AND");
		RoiAdd("Amidon");
		roiManager("Select", n-1);
		roiManager("Delete");		
	}
	indice_amidon=n-1;
	roiManager("Select", n-1);
	centre_gravite();
	
	/*run("Enlarge...", "enlarge="+-2*sigma_z2);
	run("Enlarge...", "enlarge="+sigma_z2);
	roiManager("Update");*/
	
	
	run("Select None");
	roiManager("Show None");
	setTool("polygon");
	title = "Portion";
	msg = "Tracer un polygone avec le deuxieme point au centre de gravite ";
	waitForUser(title, msg);
	RoiAdd("temp");
	indice_temp=roiManager("count")-1;
	run("Remove Overlay");
	
	Roi.getCoordinates(xpoints, ypoints);
	xpoints=Array.trim(xpoints,3);
	ypoints=Array.trim(ypoints,3);
	makeSelection("angle",xpoints,ypoints);
	RoiAdd("Angle");
	indice_angle=roiManager("count")-1;
	
	roiManager("Select", indice_temp);
	run("Make Inverse");
	roiManager("Update");
	roiManager("Select", newArray(indice_total,indice_temp));
	roiManager("AND");
	RoiAdd("temp2");
	indice_temp2=roiManager("count")-1;
	
	roiManager("Select", indice_amidon);
	run("Make Inverse");
	roiManager("Update");
	roiManager("Select", newArray(indice_amidon,indice_temp2));
	roiManager("AND");
	RoiAdd("Gel");
	indice_gel=roiManager("count")-1;
	
	roiManager("Select", indice_amidon);
	run("Make Inverse");
	roiManager("Update");
	
	ncount=roiManager("count");
	for(i=ncount-1;i>=0;i--){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (startsWith(nom_item, "temp")) {
			roiManager("Delete");
			indice_gel--;
		}
		
		}

		roiManager("Show All with labels");
		roiManager("Select", indice_gel);

}




macro 'Zonation Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    
    Dialog.create("Zonation");
    Dialog.addMessage("Tailles des filtres");
    Dialog.addNumber("Total:", sigma_z1);
	Dialog.addNumber("Amidon:", sigma_z2);
    Dialog.show();
    sigma_z1=Dialog.getNumber();
	sigma_z2=Dialog.getNumber();;
   
          
  	}

















	



///////////////////////////////////////////////////////////////////////////////////////

	macro "Plot Action Tool - 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"{
	
	ncount=roiManager("count");
	for(i=ncount-1;i>=0;i--){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (startsWith(nom_item, "Segment")) roiManager("Delete");
		if (startsWith(nom_item, "Epaisseur")) roiManager("Delete");
		}
	
	
	getDimensions(width, height, channels, slices, frames);
	if(xg==0) exit("Selectionner la Zone 1 pour avoir le centre de gravite");
	makeLine(-1000, yg, width, yg);
	RoiAdd("Ligne");
	indice_ligne=roiManager("count")-1;
	for(i=1;i<=(360/angle_rotation);i++){
		roiManager("Select", indice_ligne);
		run("Rotate...", "angle="+i*angle_rotation);
		Roi.getCoordinates(xpoints, ypoints);
		makeLine(xpoints[0], ypoints[0], xg, yg);
		RoiAdd("Segment");
		}
	roiManager("Select", indice_ligne);
	roiManager("Delete");
	
	ncount=roiManager("count");
	for(i=ncount-1;i>=0;i--){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			if (startsWith(nom_item, "Segment")) {
			run("Line to Area");
			roiManager("Update");
			roiManager("Select", newArray(indice_gel,i));
			roiManager("AND");
			if (selectionType()!=-1) {	
				RoiAdd("Epaisseur");
				//RoiAdd("Epaisseur_"+nom_item);
			}
			
					
		
		}
	}
	
	
	ncount=roiManager("count");
	for(i=ncount-1;i>=0;i--){
		roiManager("Select", i);
		nom_item=call("ij.plugin.frame.RoiManager.getName", i);
		if (startsWith(nom_item, "Segment")) roiManager("Delete");
		
		}
	
	
	
	
	
	roiManager("Show All with labels");
}


macro 'Plot Action Tool Options'  {
    //on right-click, the corresponding 'Options' macro is run
    
    Dialog.create("Tracage des lignes");    
    Dialog.addNumber("Angle de rotation:", angle_rotation);    
    Dialog.show();
    angle_rotation=Dialog.getNumber();
   
          
  	}	
	
/////////////////////////////////////////////////////Resultats/////////////////////////////////////////////////////////////////////////////////////
macro "Resultats Action Tool - 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"{
		dir=getInfo("image.directory");
		nom=getTitle();
		nom=replace(nom,".tif","");

		
		title1 = "Zonation"+nom;
		title2 = "["+title1+"]";
		fz = title2;
		
		title3 = "Epaisseurs de gelification";
		title4 = "["+title3+"]";
		fe = title4;
		
		area_total=-1;
		diam_total=-1;
		area_amidon=-1;
		diam_amidon=-1;
		angle=-1;
		area_gel=-1;
		somme_epaisseur=-1;
		nb_epaisseur=0;
		somme_epaisseur=-1;
		
		
		
		ncount=roiManager("count");
	for(i=0;i<ncount;i++){
			roiManager("Select", i);
			nom_item=call("ij.plugin.frame.RoiManager.getName", i);
			
						if (nom_item=="Total"){
							getStatistics(area);
							area_total=area;////////////////////////////////////////////area_total
							run("Set Measurements...", "area centroid feret's redirect=None decimal=3");
							List.setMeasurements;
							diam_total=List.getValue("Feret");////////////////diam
							}
						if (nom_item=="Amidon"){
							getStatistics(area);
							area_amidon=area;
							run("Set Measurements...", "area centroid feret's redirect=None decimal=3");
							List.setMeasurements;
							diam_amidon=List.getValue("Feret");
							}
						if (nom_item=="Angle"){
							List.setMeasurements;
							angle=List.getValue("Angle");///////////////angle
							}
						if (nom_item=="Gel"){
							getStatistics(area);
							area_gel=area;////////////////////////////////////////////surfzone1
							}							
						
						if (startsWith(nom_item, "Epaisseur")){
						
							run("Set Measurements...", "area centroid feret's redirect=None decimal=3");
							List.setMeasurements;
							somme_epaisseur=somme_epaisseur+List.getValue("Feret");
							nb_epaisseur++;
							if( !isOpen("Epaisseurs de gelification")){
								run("Table...", "name="+title4+" width=600 height=600");
								print(fe, "\\Headings:Image \tnom_item \tepaisseur");
									}
							print(fe, nom+"\t"+nom_item+"\t"+deux_decimal(List.getValue("Feret")));
							}
							
			
			}	
		run("Select None");
		
		moy_epaisseur=deux_decimal(somme_epaisseur/nb_epaisseur);
		
		if( !isOpen("Zonation")){
								run("Table...", "name="+title2+" width=1200 height=600");
								print(fz, "\\Headings:Image \tsurf_total \tdiam_total \tsurf_amidon \tdiam_amidon \tangle \tsurf_gel \tepaisseur_moyenne \tnb_mesure");
									}
							print(fz, nom+"\t"+area_total+"\t"+diam_total+"\t"+area_amidon+"\t"+diam_amidon+"\t"+angle+"\t"+area_gel+"\t"+moy_epaisseur+"\t"+nb_epaisseur);
							}
	
		
		//roiManager("Save", dir+nom+"-RoiSet.zip");//sauvegarde de roi manager
			
}	
	
	
	
	
	
	
	
	
	
	
	
	
macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/PHIV_cuisson_riz.txt");
}

//////////////////////////Shortcut Key/////////////////

//supression de selection 
macro "ROI Delete [n0]"{
	if(selectionType()!=-1 && selectionType()!=10){
	
		roiManager("Delete");
		run("Select None");
	}
		
}


/////////////////////Function//////////////////////

function deux_decimal(valeur){
	if (valeur!=-1){
		valeur= round(valeur*100)/100;
	}
	else valeur="NA";
	return valeur;
}

function RoiAdd(nom) {
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);	
	roiManager("Rename", nom);
}


function Blur(sigma){
	run("Gaussian Blur...", "sigma="+sigma);
}
	
function Seuil(seuils){
	setThreshold(seuils[0], seuils[1]);
	run("Convert to Mask");
}

function Validation_surface(zone,seuils){
	run("Threshold...");
	setThreshold(seuils[0], seuils[1]);
	run("Threshold...");	
	setTool("wand");
	title = zone;
	msg = "Regler le seuil puis selectionner avec la baguette";
	waitForUser(title, msg);
	getThreshold(lower, upper);
	seuils[0]=lower;
	seuils[1]=upper;
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);
	roiManager("Rename", zone);
	close();
  selectImage(origid);
  roiManager("Select", n-1);
	setTool("brush");
	call("ij.gui.Toolbar.setBrushSize", 100);
	waitForUser(zone,"Correction de la selection");
	//run("Interpolate", "interval=1");//voir feret!
	roiManager("Update");	
	roiManager("Deselect");
	run("Select None");	
	setTool("rectangle");
}

function ChoixSeuils(titre,seuils){
	run("Threshold...");
	setThreshold(seuils[0], seuils[1]);
	run("Threshold...");
	waitForUser(titre,"Reglage du Seuil");
	getThreshold(lower, upper);
	seuils[0]=lower;
	seuils[1]=upper;
	}

function centre_gravite(){
	//run("Set Measurements...", "area centroid shape display redirect=None decimal=3");
	run("Set Measurements...", "area centroid feret's display redirect=None decimal=3");
	getPixelSize(unit, pixelWidth, pixelHeight);
	run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
	List.setMeasurements;
	xg=List.getValue("X");
	yg=List.getValue("Y");
	run("Select None");
	makePoint(xg, yg);
	run("Set Scale...", "distance=1 known=&pixelWidth pixel=1 unit=&unit");
	run("Add Selection...");
}

function raz(){
	indice_total=1;
	indice_amidon=1;
	indice_angle=1;
	indice_gel=1;
	angle_rotation=10;
	xg=0;
	yg=0;
	if (roiManager("count")>0){
		roiManager("Deselect");
		roiManager("Delete");
		}	
	run("Remove Overlay");
	run("Clear Results");
	print ("\\Clear");
	
}


