// PHIV Pain Tool Set
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter l exploitation d



/*

Outil Crop 
	Choix d un repertoire source avec les images originales
	Choix d un repertoire destination avec les images traitees
	Pour chaque image selectionner la zone d interet
	--> Crop, Remove scale, Save

Outil Seuil
	Premier seuillage pour selectioner la mie du pain
	Deuxieme seuillage pour selectionner las alveoles
	


*/

//variables glogales

var taille_mini=50;

var seuil_total=newArray(0,113);
var seuil_alveole=newArray(0,130);


////////////////////////////////////////////////////////////////label=Crop and Clear Outside////////////////////////////////////////////
macro "Crop Action Tool - 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"{
   
   dir1 = getDirectory("Choix du Répertoire Source ");
	list = getFileList(dir1);
	dir2 = getDirectory("Choix du Répertoire Cible ");	

 for (i=0; i<list.length; i++) {
   showProgress(i+1, list.length);
   open(dir1+list[i]);  
   while(selectionType()!=0)  waitForUser("Selection", "Faire une selection rectangulaire autour de la tranche");
   run("Crop");
   run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
	saveAs("Tiff", dir2+list[i]);
	close();
   
   
   
   
		  }

}


	
	
	
////////////////////////////////////////////////////////////////label=Seuil ////////////////////////////////////////////
macro "Seuil Action Tool - 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"{
origid=getImageID();
run("Select None");
run("Duplicate...", "title=[ndg]");
run("8-bit");
run("Gaussian Blur...", "sigma=2");
Validation_surface("Mie",seuil_total);
ChoixSeuils("Seuillage des Alveoles",seuil_alveole);
run("Analyze Particles...", "size="+taille_mini+"-Infinity add");
close();
selectImage(origid);
roiManager("Deselect");
run("Select None");
roiManager("Show All");

}


macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/PHIV_Pain_toolset");
}

var BrushSize
//////////////////////////Shortcut Key/////////////////
var BrushSize=15;
call("ij.gui.Toolbar.setBrushSize", BrushSize); 
//supression de selection 
macro "Select_None [n0]"{
	run("Select None");
		
}


//ajout de selection

macro "ROI-vert [n1]"{
	roiManager("Add");
	Stack.getPosition(channel, slice, frame) ;
	Stack.setDisplayMode("color");
	Stack.setPosition(1,slice,1);
	run("Clear", "slice");
	Stack.setPosition(3,slice,1);
	run("Clear", "slice");
	Stack.setDisplayMode("composite");
}



//Zoom to selection

macro "Select_None [n4]"{
	BrushSize--;
	call("ij.gui.Toolbar.setBrushSize", BrushSize); 
		
}
macro "Select_None [n6]"{
	BrushSize++;
	call("ij.gui.Toolbar.setBrushSize", BrushSize); 
		
}


function Validation_surface(zone,seuils){
	run("Threshold...");
	setThreshold(seuils[0], seuils[1]);
	run("Threshold...");	
	setTool("wand");
	title = zone;
	msg = "Regler le seuil puis selectionner avec la baguette";
	waitForUser(title, msg);
	getThreshold(lower, upper);
	seuils[0]=lower;
	seuils[1]=upper;
	run("Enlarge...", "enlarge=-20");
	roiManager("Add");
	n = roiManager("count");
	roiManager("Select", n-1);
	roiManager("Rename", zone);
	
}

var function ChoixSeuils(titre,seuils){
	run("Threshold...");
	setThreshold(seuils[0], seuils[1]);
	run("Threshold...");
	waitForUser(titre,"Reglage du Seuil");
	getThreshold(lower, upper);
	seuils[0]=lower;
	seuils[1]=upper;
	}

